#pragma TextEncoding     = "UTF-8"
#pragma rtGlobals        = 3 // Use modern global access method and strict wave access.
#pragma rtFunctionErrors = 1

#ifdef AUTOMATED_TESTING
#pragma ModuleName = MIES_PSX
#endif // AUTOMATED_TESTING

/// @file MIES_SweepFormula_PSX.ipf
///
/// @brief __PSX__ Sweep formula related code for PSP/PSC (-> PSX) detection and classification
///
/// GUI layout
///
/// @verbatim
///
/// +---+-----------+-----------+
/// |   | All event | Single    |
/// |   | graph     | event     |
/// |   |           | graph     |
/// |   |           |           |
/// +------+-------------------------------+
/// |      |  PSX graph                    |
/// |      |                               |
/// |      |-------------------------------|
/// |      |  PSX stats graph              |
/// |      |                               |
/// |      |-------------------------------|
/// |      | ...                           |
/// +------+-------------------------------+
///
/// @endverbatim
///
/// Related functions:
/// - PSX_GetSpecialPanel()
/// - PSX_GetAllEventGraph()
/// - PSX_GetSingleEventGraph()
/// - PSX_GetPSXGraph()
///
/// To find the sweep/data browser use SFH_GetBrowserForFormulaGraph() and for the reverse direction use SFH_GetFormulaGraphForBrowser.

static Constant PSX_DEFAULT_FILTER_HIGH = 0   // [Hz]
static Constant PSX_DEFAULT_FILTER_LOW  = 550 // [Hz]

static Constant PSX_COLOR_ACCEPT_R = 0
static Constant PSX_COLOR_ACCEPT_G = 65535
static Constant PSX_COLOR_ACCEPT_B = 0

static Constant PSX_COLOR_REJECT_R = 65535
static Constant PSX_COLOR_REJECT_G = 0
static Constant PSX_COLOR_REJECT_B = 0

static Constant PSX_COLOR_UNDET_R = 48059
static Constant PSX_COLOR_UNDET_G = 48059
static Constant PSX_COLOR_UNDET_B = 48059

static Constant PSX_KEYBOARD_DIR_RL = 0
static Constant PSX_KEYBOARD_DIR_LR = 1

static Constant PSX_NUMBER_OF_SDS_DEFAULT = 2.5

static Constant PSX_TAU_CALC_FACTOR             = 1
static Constant PSX_BASELINE_RANGE_FACTOR       = 5
static Constant PSX_FIT_RANGE_FACTOR            = 10
static Constant PSX_FIT_RANGE_PERC              = 0.9
static Constant PSX_BASELINE_NUM_POINTS_AVERAGE = 5
static Constant PSX_PEAK_RANGE_FACTOR_LEFT      = 5
static Constant PSX_PEAK_RANGE_FACTOR_RIGHT     = 0.33
static Constant PSX_PEAK_NUM_HIST_BINS          = 21

static Constant PSX_NUM_PEAKS_MAX = 2000

static Constant PSX_PLOT_DEFAULT_X_RANGE = 200

static Constant PSX_DEFAULT_X_START_OFFSET = 2

static StrConstant USER_DATA_KEYBOARD_DIR = "keyboard_direction"

static StrConstant PSX_USER_DATA_WORKING_FOLDER = "psxFolder"

static StrConstant PSX_X_DATA_UNIT = "X_DATA_UNIT"
static StrConstant PSX_Y_DATA_UNIT = "Y_DATA_UNIT"

static StrConstant PSX_EVENT_DIMENSION_LABELS = "sweepData;sweepDataOffFilt;sweepDataOffFiltDeconv;peakX;peakY;psxEvent;eventFit"

static Constant PSX_KERNEL_OUTPUTWAVES_PER_ENTRY     = 3
static Constant PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY = 7

static StrConstant PSX_SPECIAL_EVENT_PANEL    = "SpecialEventPanel"
static StrConstant PSX_SINGLE_EVENT_SUB_GRAPH = "Single"
static StrConstant PSX_ALL_EVENT_SUB_GRAPH    = "All"

static StrConstant PSX_CURSOR_TRACE = "peakY"

static StrConstant PSX_USER_DATA_TYPE = "type"
static StrConstant PSX_USER_DATA_PSX  = "PSX"

static StrConstant PSX_JWN_PARAMETERS      = "Parameters"
static StrConstant PSX_JWN_STATS_POST_PROC = "PostProcessing"

static StrConstant PSX_TUD_EVENT_INDEX_KEY = "eventIndex"

static StrConstant PSX_UD_NUM_BLOCKS = "NumberOfBlocks"

/// @name State types
/// @anchor SpecialEventPanelEventTypes
///@{
static StrConstant PSX_TUD_FIT_STATE_KEY   = "Fit State"
static StrConstant PSX_TUD_EVENT_STATE_KEY = "Event State"
///@}
///
static StrConstant PSX_TUD_TRACE_HIDDEN_KEY = "traceHidden"
static StrConstant PSX_TUD_TYPE_KEY         = "type"

/// @name Trace types
/// @anchor AllEventGraphTraceType
///@{
static StrConstant PSX_TUD_TYPE_SINGLE  = "single"
static StrConstant PSX_TUD_TYPE_AVERAGE = "average"
///@}

static StrConstant PSX_TUD_COMBO_KEY   = "comboKey"
static StrConstant PSX_TUD_COMBO_INDEX = "comboIndex"
static StrConstant PSX_TUD_BLOCK_INDEX = "blockIndex"

static Constant PSX_GUI_SETTINGS_VERSION = 4

static StrConstant PSX_GUI_SETTINGS_PSX = "GuiSettingsPSX"

static Constant PSX_MAX_NUM_EVENTS = 1e6

static StrConstant PSX_GLOBAL_AVERAGE_SUFFIX       = "_global"
static StrConstant PSX_TUD_AVERAGE_ALL_COMBO_KEY   = "allCombos"
static Constant    PSX_TUD_AVERAGE_ALL_COMBO_INDEX = NaN

static StrConstant PSX_AVERAGE_FIT_RESULT_DEFAULT_HELP = "No fit results available for average accept"

static Constant PSX_STATS_TAU_FACTOR = 10
static Constant PSX_STATS_AMP_FACTOR = 100

static Constant PSX_DEFAULT_MAX_TAU_FACTOR = 10

static StrConstant PSX_PANEL_MACRO = "PSXPanel"

/// @name Different ways to derive cache key from the parameters JSON
/// @anchor PSXCacheKeyType
///@{
static Constant PSX_CACHE_KEY_EVENTS        = 0x1
static Constant PSX_CACHE_KEY_ANALYZE_PEAKS = 0x3
///@}

static Constant EVENT_INDEX_HORIZONTAL = 0x1
static Constant EVENT_INDEX_VERTICAL   = 0x2

static StrConstant PSX_FREE_AXIS_DECONV = "freeDeconvAxis"
static StrConstant PSX_COLORS_DECONV    = "65535,16385,36045"

static StrConstant PSX_FREE_AXIS_PEAK = "freePeakAxis"
static StrConstant PSX_COLORS_PEAK    = "65535,43690,0"

static StrConstant PSX_FREE_AXIS_BASELINE = "freeBaselineAxis"
static StrConstant PSX_COLORS_BASELINE    = "0,0,0"

static Constant PSX_FILTER_SWEEP  = 0x1
static Constant PSX_FILTER_DECONV = 0x2

Menu "GraphMarquee"
	"PSX: Accept Event && Fit", /Q, PSX_MouseEventSelection(PSX_ACCEPT, PSX_STATE_EVENT | PSX_STATE_FIT)
	"PSX: Reject Event && Fit", /Q, PSX_MouseEventSelection(PSX_REJECT, PSX_STATE_EVENT | PSX_STATE_FIT)
	"PSX: Accept Fit", /Q, PSX_MouseEventSelection(PSX_ACCEPT, PSX_STATE_FIT)
	"PSX: Reject Fit", /Q, PSX_MouseEventSelection(PSX_REJECT, PSX_STATE_FIT)
	"PSX: Jump to Events", /Q, PSX_JumpToEvents()
End

static Function PSX_GetFindPeakBoxSize()

#ifdef AUTOMATED_TESTING
	return 10
#endif // AUTOMATED_TESTING

	return 10
End

static Function/S PSX_GetUserDataForWorkingFolder()

	return PSX_USER_DATA_WORKING_FOLDER
End

/// @brief Return the working folder for the `psx` operation
///
/// Can be null in case the operation was not executed in this sweep formula panel
static Function/DF PSX_GetWorkingFolder(string win)

	string mainWindow = GetMainWindow(win)

	return $GetUserData(mainWindow, "", PSX_USER_DATA_WORKING_FOLDER)
End

Function/S PSX_GetSpecialPanel(string win)

	return GetMainWindow(win) + "#" + PSX_SPECIAL_EVENT_PANEL
End

static Function/S PSX_GetSingleEventGraph(string win)

	return PSX_GetSpecialPanel(win) + "#" + PSX_SINGLE_EVENT_SUB_GRAPH
End

static Function/S PSX_GetAllEventGraph(string win)

	return PSX_GetSpecialPanel(win) + "#" + PSX_ALL_EVENT_SUB_GRAPH
End

/// @brief Return a wave with the checkbox states, single or average, of the special event panel
///
/// Can be indexed with the state as dimension label.
///
/// @param win windows
/// @param traceType One of @ref AllEventGraphTraceType
static Function/WAVE PSX_GetCheckboxStatesFromSpecialPanel(string win, string traceType)

	string specialEventPanel, ctrlPrefix
	variable last

	WAVE states = PSX_GetStates(withAllState = 1)
	Make/FREE/N=(DimSize(states, ROWS))/T lbls = PSX_StateToString(states[p])
	SetDimensionLabels(states, TextWaveToList(lbls, ";"), ROWS)

	strswitch(traceType)
		case PSX_TUD_TYPE_AVERAGE:
			ctrlPrefix = "checkbox_average_events_"
			last       = DimSize(states, ROWS) - 1
			break
		case PSX_TUD_TYPE_SINGLE:
			ctrlPrefix   = "checkbox_single_events_"
			states[%all] = 0
			last         = DimSize(states, ROWS) - 2
			break
		default:
			ASSERT(0, "Unknown trace type")
			break
	endswitch

	specialEventPanel = PSX_GetSpecialPanel(win)
	states[, last]    = GetCheckboxState(specialEventPanel, ctrlPrefix + lbls[p])

	return states
End

/// @brief Return the state type (fit or event) state from the special event panel
///
/// @brief One of @ref SpecialEventPanelEventTypes
static Function/S PSX_GetStateTypeFromSpecialPanel(string win)

	string specialEventPanel

	specialEventPanel = PSX_GetSpecialPanel(win)
	return GetPopupMenuString(specialEventPanel, "popupmenu_state_type")
End

static Function PSX_GetRestrictEventsToCurrentCombo(string win)

	string specialEventPanel

	specialEventPanel = PSX_GetSpecialPanel(win)
	return GetCheckBoxState(specialEventPanel, "checkbox_restrict_events_to_current_combination")
End

/// @brief Filter the sweep data
///
/// @param sweepDataOff data from a single sweep and channel *without* inserted TP already offsetted
/// @param sweepFilter  low/high cutoff [Hz] and order
static Function [variable realOrder, WAVE filtered] PSX_FilterSweepData(WAVE/Z sweepDataOff, WAVE sweepFilter)

	variable low, high, maxOrder

	if(!WaveExists(sweepDataOff))
		return [NaN, $""]
	endif

	low      = sweepFilter[%$"Filter Low"]
	high     = sweepFilter[%$"Filter High"]
	maxOrder = sweepFilter[%$"Filter Order"]

	if(IsNaN(low))
		low = sweepFilter[%$"Filter Low (Default)"]
	endif

	if(IsNaN(high))
		high = sweepFilter[%$"Filter High (Default)"]
	endif

	if(IsNaN(maxOrder))
		maxOrder = sweepFilter[%$"Filter Order (Default)"]
	endif

	[realOrder, WAVE filtered] = BandPassWithRingingDetection(sweepDataOff, high, low, maxOrder)

	return [realOrder, filtered]
End

/// @brief Create a histogram of the sweep data
///
/// @param sweepData data from a single sweep and channel *without* inserted TP
/// @param bin_start [optional, defaults to data's minimum] first histogram bin
/// @param bin_end   [optional, defaults to data's maximum] last histogram bin
/// @param bin_width [optional, defaults to 0.1] width of a histogram bin
static Function/WAVE PSX_CreateHistogram(WAVE sweepData, [variable bin_start, variable bin_end, variable bin_width])

	variable minimum, maximum, n_bins, err

	[minimum, maximum] = WaveMinAndMax(sweepData)

	if(ParamIsDefault(bin_start))
		bin_start = floor(minimum)
	endif

	if(ParamIsDefault(bin_end))
		bin_end = ceil(maximum)
	endif

	if(ParamIsDefault(bin_width))
		bin_width = 0.1
	endif

	n_bins = ceil((bin_end - bin_start) / bin_width)

	AssertOnAndClearRTError()
	Make/FREE/R/N=0 output
	Histogram/B={bin_start, bin_width, n_bins}/DEST=output sweepData; err = GetRTError(1)

	if(err)
		return $""
	endif

	return output
End

/// @brief Offset sweepData by X
///
/// X is calculated as the x coordinate of histogram's maximum taken of sweepData.
///
/// The result is that the histogram maximum of the offsetted trace is at zero.
static Function [WAVE sweepDataOff, variable offset] PSX_OffsetSweepData(WAVE sweepData)

	WAVE/Z hist = PSX_CreateHistogram(sweepData)

	if(!WaveExists(hist))
		return [$"", NaN]
	endif

	WaveStats/Q/M=1 hist
	offset = V_maxLoc

	Duplicate/FREE sweepData, output
	output -= offset

	return [output, offset]
End

static Function PSX_AddDefaultFilterFrequencies(WAVE filter, variable riseTau, variable decayTau, variable filterType)

	variable fac

	switch(filterType)
		case PSX_FILTER_SWEEP:
			fac = 1.5
			break
		case PSX_FILTER_DECONV:
			fac = 2
			break
		default:
			ASSERT(0, "Invalid case")
	endswitch

	filter[%$"Filter Low (Default)"]  = 1 / (fac * pi * riseTau * MILLI_TO_ONE)
	filter[%$"Filter High (Default)"] = 1 / (fac * pi * decayTau * MILLI_TO_ONE)
End

/// @brief Return the deconvoluted sweep data
///
/// @param sweepData data from a single sweep and channel *without* inserted TP
/// @param psxKernelFFT FFT'ed kernel from PSX_CreatePSXKernel()
/// @param deconvFilter deconvolution filter settings
static Function [variable realOrder, WAVE filtered] PSX_DeconvoluteSweepData(WAVE sweepData, WAVE/C psxKernelFFT, WAVE deconvFilter)

	variable numPoints, samp, low, high, maxOrder

	low      = deconvFilter[%$"Filter Low"]
	high     = deconvFilter[%$"Filter High"]
	maxOrder = deconvFilter[%$"Filter Order"]

	if(IsNaN(low))
		low = deconvFilter[%$"Filter Low (Default)"]
	endif

	if(IsNaN(high))
		high = deconvFilter[%$"Filter High (Default)"]
	endif

	if(IsNaN(maxOrder))
		maxOrder = deconvFilter[%$"Filter Order (Default)"]
	endif

	numPoints = DimSize(sweepData, ROWS)

	// no window function on purpose
	WAVE/C outputFFT = DoFFT(sweepData, padSize = numPoints)

	ASSERT(DimSize(outputFFT, ROWS) == DimSize(psxKernelFFT, ROWS), "Unmatched wave sizes")
	Multithread outputFFT[] = outputFFT[p] / (psxKernelFFT[p] + 1e-5)

	IFFT/DEST=Deconv/FREE outputFFT

	FindValue/UOFV/FNAN Deconv
	ASSERT(V_Value == -1, "Can not handle NaN in the deconvoluted wave")

	CopyScales sweepData, Deconv
	[realOrder, filtered] = BandPassWithRingingDetection(Deconv, high, low, maxOrder)

	return [realOrder, filtered]
End

/// @brief Creates a histogram of the deconvoluted sweep data
static Function/WAVE PSX_CreateHistogramOfDeconvSweepData(WAVE deconvSweepData)

	variable n_bins, start, binWidth, range

	// we take +/- 80% of the average deviation around the average value
	WaveStats/Q deconvSweepData
	range    = V_adev * 2
	start    = V_avg - range
	n_bins   = PSX_PEAK_NUM_HIST_BINS
	binWidth = 2 * range / n_bins

	Make/D/FREE/N=0 hist
	Histogram/B={start, binWidth, n_bins}/DEST=hist deconvSweepData

	return hist
End

/// Fit the given wave with a gaussian where K0, y offset, is fixed at zero.
static Function [WAVE coef, WAVE fit] PSX_FitHistogram(WAVE input)

	variable err

	Make/D/FREE/N=4 coefWave
	K0 = 0

	AssertOnAndClearRTError()
	CurveFit/H="1000"/Q/TBOX/X=1 gauss, kwCWave=coefWave, input/D; err = GetRTError(1)
	WAVE/Z fit = $("fit_" + NameOfWave(input))

	if(err > 0 || !WaveExists(fit))
		return [$"", $""]
	endif

	MakeWaveFree($"W_sigma")

	return [coefWave, MakeWaveFree(fit)]
End

/// Full analysis cycle:
/// - filtering
/// - offsetting
/// - deconvolution
/// - histogram of deconvolution
/// - gaussian fit of histogram
static Function [variable realOrderSweep, variable realOrderDeconv, WAVE sweepDataOffFilt, WAVE sweepDataOffFiltDeconv] PSX_Analysis(WAVE sweepData, WAVE psxKernelFFT, WAVE sweepFilter, WAVE deconvFilter)

	variable offset

	[WAVE sweepDataOff, offset] = PSX_OffsetSweepData(sweepData)

	[realOrderSweep, WAVE sweepDataOffFilt] = PSX_FilterSweepData(sweepDataOff, sweepFilter)

	if(!WaveExists(sweepDataOffFilt))
		return [NaN, NaN, $"", $""]
	endif

	[realOrderDeconv, WAVE sweepDataOffFiltDeconv] = PSX_DeconvoluteSweepData(sweepDataOffFilt, psxKernelFFT, deconvFilter)

	return [realOrderSweep, realOrderDeconv, sweepDataOffFilt, sweepDataOffFiltDeconv]
End

/// Searches for peaks in sweepData
///
/// @param sweepDataOffFiltDeconv 1D wave
/// @param threshold              FindPeak parameter
/// @param numPeaksMax            maximum number of peaks to search
/// @param start                  [optional, defaults first point] start x value
/// @param stop                   [optional, defaults last point] end x value
///
/// @retval peakX x-coordinates of peaks
/// @retval peakY y-coordinates of peaks
static Function [WAVE/D peakX, WAVE/D peakY] PSX_FindPeaks(WAVE sweepDataOffFiltDeconv, variable threshold, [variable numPeaksMax, variable start, variable stop])

	variable i, boxSize

	if(ParamIsDefault(numPeaksMax))
		numPeaksMax = PSX_NUM_PEAKS_MAX
	endif

	if(ParamIsDefault(start))
		start = leftx(sweepDataOffFiltDeconv)
	endif

	if(ParamIsDefault(stop))
		stop = rightx(sweepDataOffFiltDeconv)
	endif

	boxSize = PSX_GetFindPeakBoxSize()

	Make/FREE/D/N=(numPeaksMax) peakX, peakY

	for(i = 0; i < numPeaksMax; i += 1)
		FindPeak/B=(boxSize)/M=(threshold)/Q/R=(start, stop) sweepDataOffFiltDeconv

		if(V_Flag != 0)
			break
		elseif(IsNaN(V_TrailingEdgeLoc))
			break
		endif

		peakX[i] = V_peakLoc
		peakY[i] = V_PeakVal

		start = V_TrailingEdgeLoc
	endfor

	if(i == 0)
		return [$"", $""]
	endif

	Redimension/N=(i) peakX, peakY

	return [peakX, peakY]
End

static Function [WAVE/D peakX, WAVE/D peakY] PSX_FilterEventsKernelAmpSign(WAVE/Z peakXUnfiltered, WAVE/Z peakYUnfiltered, WAVE sweepDataOffFilt, variable kernelAmp, variable kernelRiseTau, variable kernelDecayTau, WAVE psxEvent)

	variable numCrossings, idx, i
	variable peak, peak_t, baseline, baseline_t, amplitude
	variable overrideSignQC = NaN
	string comboKey
	variable peak_t_prev = -Inf

	if(!WaveExists(peakXUnfiltered) || !WaveExists(peakYUnfiltered))
		return [$"", $""]
	endif

	numCrossings = DimSize(peakXUnfiltered, ROWS)

	Make/FREE/D/N=(numCrossings) peakX, peakY

	for(i = 0; i < numCrossings; i += 1)

		[peak, peak_t, baseline, baseline_t, amplitude] = PSX_CalculateEventProperties(peakXUnfiltered, peakYUnfiltered, sweepDataOffFilt, peak_t_prev, kernelAmp, kernelRiseTau, kernelDecayTau, i)

#ifdef AUTOMATED_TESTING
		WAVE/Z overrideResults = GetOverrideResults()

		if(WaveExists(overrideResults))
			comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)

			overrideSignQC = overrideResults[i][%$comboKey][%KernelAmpSignQC]
		endif
#endif // AUTOMATED_TESTING

		if(IsNaN(overrideSignQC))
			if(sign(amplitude) != sign(kernelAmp))
				continue
			endif
		elseif(overrideSignQC == 0)
			continue
		endif

		if(isFinite(peakXUnfiltered[i]) && isFinite(peakYUnfiltered[i]))
			peakX[idx] = peakXUnfiltered[i]
			peakY[idx] = peakYUnfiltered[i]

			idx        += 1
			peak_t_prev = peak_t
		endif
	endfor

	if(idx == 0)
		return [$"", $""]
	endif

	Redimension/N=(idx) peakX, peakY

	return [peakX, peakY]
End

static Function [variable peak_t, variable peak] PSX_CalculateEventPeak(WAVE peakX, WAVE peakY, WAVE sweepDataOffFilt, variable baseline_t, variable kernelAmp, variable kernelRiseTau, variable kernelDecayTau, variable index, variable peak_t_prev, variable prevDeconvPeak_t)

	variable numCrossings, nextDeconvPeak_t
	variable peak_start_search, peak_end_search, threshold, range

	numCrossings    = DimSize(peakX, ROWS)
	peak_end_search = max(peakX[index] - PSX_PEAK_RANGE_FACTOR_LEFT * kernelRiseTau, baseline_t, prevDeconvPeak_t, peak_t_prev)

	// upper bound
	if(index < (numCrossings - 1))
		nextDeconvPeak_t = peakX[index + 1]
	else
		nextDeconvPeak_t = Inf
	endif

	peak_start_search = min(peakX[index] + PSX_PEAK_RANGE_FACTOR_RIGHT * kernelDecayTau, nextDeconvPeak_t)

	WaveStats/M=1/Q/R=(peak_start_search, peak_end_search) sweepDataOffFilt
	variable boxSize   = 10
	variable ampFactor = 0.25
	if(kernelAmp > 0)
		threshold = sweepDataOffFilt(baseline_t) + ampFactor * (V_max - sweepDataOffFilt(baseline_t))
		FindPeak/B=(boxSize)/M=(threshold)/Q/R=(peak_start_search, peak_end_search) sweepDataOffFilt

		if(!V_flag)
			peak_t = V_PeakLoc
			peak   = V_PeakVal
		else
			range = 2 * DimDelta(sweepDataOffFilt, ROWS)
			WaveStats/M=1/Q/R=(peakX[index] - range, peakX[index] + range) sweepDataOffFilt
			peak_t = peakX[index]
			peak   = V_avg
		endif
	elseif(kernelAmp < 0)
		threshold = sweepDataOffFilt(baseline_t) + ampFactor * (V_min - sweepDataOffFilt(baseline_t))
		FindPeak/B=(boxSize)/N/M=(threshold)/Q/R=(peak_start_search, peak_end_search) sweepDataOffFilt

		if(!V_flag)
			peak_t = V_PeakLoc
			peak   = V_PeakVal
		else
			range = 2 * DimDelta(sweepDataOffFilt, ROWS)
			WaveStats/M=1/Q/R=(peakX[index] - range, peakX[index] + range) sweepDataOffFilt
			peak_t = peakX[index]
			peak   = V_avg
		endif
	else
		ASSERT(0, "Can't handle kernelAmp of zero")
	endif

	ASSERT(IsFinite(peak_t), "peak_t is not finite")
	ASSERT(IsFinite(peak), "peak is not finite")

	return [peak_t, peak]
End

static Function [variable baseline_t, variable baseline] PSX_CalculateEventBaseline(WAVE sweepDataOffFilt, variable peak_t_prev, variable deconvPeak_t, variable kernelAmp, variable kernelRiseTau, variable prevDeconvPeak_t)

	variable range, start
	string str

	start = max(deconvPeak_t - PSX_BASELINE_RANGE_FACTOR * kernelRiseTau, min(peak_t_prev, prevDeconvPeak_t))

	// the end of the search window for the baseline time is the deconvolved peak time of the current event
	WaveStats/M=1/Q/R=(start, deconvPeak_t) sweepDataOffFilt

	if(kernelAmp > 0)
		baseline_t = V_minloc
	elseif(kernelAmp < 0)
		baseline_t = V_maxloc
	else
		sprintf str, "Can't handle kernelAmp of: %g\r", kernelAmp
		ASSERT(0, str)
	endif

	range = PSX_BASELINE_NUM_POINTS_AVERAGE * DimDelta(sweepDataOffFilt, ROWS)
	WaveStats/M=1/Q/R=(baseline_t - range, baseline_t + range) sweepDataOffFilt
	baseline = V_avg

	ASSERT(isFinite(baseline), "basline is not finite")

	return [baseline_t, baseline]
End

static Function [variable peak, variable peak_t, variable baseline, variable baseline_t, variable amplitude] PSX_CalculateEventProperties(WAVE peakX, WAVE peakY, WAVE sweepDataOffFilt, variable peak_t_prev, variable kernelAmp, variable kernelRiseTau, variable kernelDecayTau, variable index)

	variable deconvPeak_t, prevdeconvPeak_t

	deconvPeak_t = peakX[index]
	if(index == 0)
		prevdeconvPeak_t = 0
	else
		prevdeconvPeak_t = peakX[index - 1]
	endif

	[baseline_t, baseline] = PSX_CalculateEventBaseline(sweepDataOffFilt, peak_t_prev, deconvPeak_t, kernelAmp, kernelRiseTau, prevdeconvPeak_t)
	[peak_t, peak]         = PSX_CalculateEventPeak(peakX, peakY, sweepDataOffFilt, baseline_t, kernelAmp, kernelRiseTau, kernelDecayTau, index, peak_t_prev, prevdeconvPeak_t)

	amplitude = peak - baseline

	return [peak, peak_t, baseline, baseline_t, amplitude]
End

/// @brief Analyze the peaks
static Function [WAVE/D peakX, WAVE/D peakY] PSX_AnalyzePeaks(WAVE sweepDataOffFiltDeconv, WAVE sweepDataOffFilt, WAVE sweepData, WAVE/Z peakXUnfiltered, WAVE/Z peakYUnfiltered, variable maxTauFactor, variable kernelAmp, variable kernelRiseTau, variable kernelDecayTau, WAVE riseTimeParams, WAVE psxEvent, WAVE eventFit)

	variable i, numCrossings, deconvPeak, deconvPeak_t, peak, peak_t, baseline, baseline_t, amplitude, iei
	variable peak_t_prev = -Inf // sets the previous peak time to the start of the range

	// we need to first throw away events with invalid amplitude so that
	// we can then calculate the distance to the neighbour in peakX[i + 1] below

	[WAVE peakX, WAVE peakY] = PSX_FilterEventsKernelAmpSign(peakXUnfiltered, peakYUnfiltered, sweepDataOffFilt, kernelAmp, kernelRiseTau, kernelDecayTau, psxEvent)
	WaveClear peakXUnfiltered, peakYUnfiltered

	if(!WaveExists(peakX) || !WaveExists(peakY))
		Redimension/N=(0, -1) psxEvent, eventFit

		return [$"", $""]
	endif

	numCrossings = DimSize(peakX, ROWS)
	Redimension/N=(numCrossings, -1) psxEvent, eventFit

	for(i = 0; i < numCrossings; i += 1)

		deconvPeak_t = peakX[i]
		deconvPeak   = peakY[i]

		[peak, peak_t, baseline, baseline_t, amplitude] = PSX_CalculateEventProperties(peakX, peakY, sweepDataOffFilt,                         \
		                                                                               peak_t_prev, kernelAmp, kernelRiseTau, kernelDecayTau, i)

		if(i == 0)
			iei = NaN
		else
			iei = peak_t - psxEvent[i - 1][%peak_t]
		endif

		psxEvent[i][%index]        = i
		psxEvent[i][%deconvPeak]   = deconvPeak
		psxEvent[i][%deconvPeak_t] = deconvPeak_t
		psxEvent[i][%peak]         = peak
		psxEvent[i][%peak_t]       = peak_t
		psxEvent[i][%baseline]     = baseline
		psxEvent[i][%baseline_t]   = baseline_t
		psxEvent[i][%amplitude]    = amplitude
		psxEvent[i][%iei]          = iei

		peak_t_prev = peak_t
	endfor

	// safe defaults
	psxEvent[][%$"Event manual QC call"] = PSX_UNDET
	psxEvent[][%$"Fit manual QC call"]   = PSX_UNDET
	psxEvent[][%$"Fit result"]           = 0

	Make/FREE/D/N=0 sweepDataDiff
	Differentiate/EP=1 sweepDataOffFilt/D=sweepDataDiff

	// Also adds "Slew Rate" and "Slew Rate Time"
	Multithread psxEvent[][%$"Onset Time"] = PSX_CalculateOnsetTime(sweepDataDiff, psxEvent, kernelAmp,          \
	                                                                riseTimeParams[%$"Differentiate Threshold"], \
	                                                                p)

	Multithread psxEvent[][%$"Onset"] = GetInterpolatedYValue(sweepDataOffFilt, psxEvent[p][%$"Onset Time"])

	Multithread psxEvent[][%$"Rise Time"] = PSX_CalculateRiseTimeWrapper(sweepDataOffFilt, psxEvent, kernelAmp, \
	                                                                     riseTimeParams[%$"Lower Threshold"],   \
	                                                                     riseTimeParams[%$"Upper Threshold"],   \
	                                                                     p)

	Multithread psxEvent[][%$"Rise"] = GetInterpolatedYValue(sweepDataOffFilt, psxEvent[p][%$"Rise Time"])

	Make/FREE/N=(DimSize(psxEvent, ROWS)) indexHelper
	indexHelper[] = PSX_FitEventDecay(sweepDataOffFilt, psxEvent, maxTauFactor, eventFit, p)

	return [peakX, peakY]
End

static Function PSX_GetGoodTau(WAVE psxEvent)

	string key

	key = CA_PSXEventGoodTauRange(psxEvent)

	WAVE/ZZ/D result = CA_TryFetchingEntryFromCache(key)

	if(!WaveExists(result))
		Make/FREE/D result = {PSX_GetGoodTauImpl(psxEvent)}

		CA_StoreEntryIntoCache(key, result, options = CA_OPTS_NO_DUPLICATE)
	endif

	return result[0]
End

// @brief Returns a good tau which does capture a lot of the tau events
static Function PSX_GetGoodTauImpl(WAVE psxEvent)

	variable numEvents, err, xVal, idx, tau

	idx = FindDimLabel(psxEvent, COLS, "tau")
	Duplicate/FREE/RMD=[][idx] psxEvent, tauWithNaN

	WAVE/Z taus = ZapNaNs(tauWithNaN)

	if(!WaveExists(taus))
		return PSX_DEFAULT_X_START_OFFSET
	endif

	WaveStats/Q taus

	tau = V_avg + PSX_TAU_CALC_FACTOR * V_sdev

	if(IsFinite(tau))
		return tau
	endif

	return PSX_DEFAULT_X_START_OFFSET
End

/// @brief Return the x-axis range useful for displaying and extracting a single event
static Function [variable first, variable last] PSX_GetSingleEventRange(WAVE psxEvent, WAVE sweepDataOffFilt, variable index)

	variable numEvents, offset, onset, baseline

	numEvents = DimSize(psxEvent, ROWS)

	index = limit(index, 0, numEvents - 1)

	offset = PSX_GetGoodTau(psxEvent)

	onset    = psxEvent[index][%$"Onset Time"]
	baseline = psxEvent[index][%baseline_t]

	if(!IsNaN(onset))
		first = min(onset, baseline)
	else
		first = baseline
	endif

	if(index == (numEvents - 1))
		last = min(first + offset, IndexToScale(sweepDataOffFilt, DimSize(sweepDataOffFilt, ROWS) - 1, ROWS))
	else
		last = min(first + offset, psxEvent[index + 1][%baseline_t])
	endif

	ASSERT(first <= last, "range must have first < last")

	return [first, last]
End

/// @brief Return the x-axis range for single event fitting
///
/// x-zero is taken from sweepData
static Function [variable start, variable stop] PSX_GetEventFitRange(WAVE sweepDataOffFilt, WAVE psxEvent, variable eventIndex)

	variable calcLength, maxLength, decayTau

	start = psxEvent[eventIndex][%peak_t]

	decayTau  = JWN_GetNumberFromWaveNote(psxEvent, SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/psxKernel/decayTau")
	maxLength = PSX_FIT_RANGE_FACTOR * decayTau
	ASSERT(isFinite(maxLength), "Failed to retrieve finite decay tau")

	if(eventIndex == (DimSize(psxEvent, ROWS) - 1))
		stop = start + maxLength
	else
		stop = min(start + 5 * decayTau, psxEvent[eventIndex + 1][%baseline_t]) // min(psxEvent[eventIndex + 1][%peak_t] * PSX_FIT_RANGE_PERC, psxEvent[eventIndex + 1][%baseline_t])
	endif

	stop = min(stop, IndexToScale(sweepDataOffFilt, DimSize(sweepDataOffFilt, ROWS), ROWS))

	if(start > stop)
		return [NaN, NaN]
	endif

	return [start, stop]
End

/// @brief Return the decay coefficient tau by fitting the filtered and
/// offsetted sweep data with an offsetted exponential
///
/// \rst
///
/// dblexp_XOffset: :math:`y = K0 + K1 \cdot exp(-(x - x0) / K2) + K3 * exp(-(x - x0) / K4)`
///
/// \endrst
static Function PSX_FitEventDecay(WAVE sweepDataOffFilt, WAVE psxEvent, variable maxTauFactor, WAVE/WAVE eventFit, variable eventIndex)

	variable startTime, endTime, err, weightedTau, slowTau, fastTau, fitRange, overrideTau
	string comboKey

	[startTime, endTime] = PSX_GetEventFitRange(sweepDataOffFilt, psxEvent, eventIndex)

	if(IsNaN(startTime) && IsNaN(endTime))
		psxEvent[eventIndex][%$"Fit manual QC call"] = PSX_REJECT
		psxEvent[eventIndex][%$"Fit result"]         = PSX_DECAY_FIT_INVALID_RANGE_ERROR
		psxEvent[eventIndex][%weightedTau]           = NaN
		psxEvent[eventIndex][%slowTau]               = NaN
		psxEvent[eventIndex][%fastTau]               = NaN

		return NaN
	endif

	DFREF currDFR = GetDataFolderDFR()
	SetDataFolder NewFreeDataFolder()

	// require a converging exponential
	Make/FREE/T constraints = {"K2 > 0"}

	Make/FREE/D/N=5 coefWave

	AssertOnAndClearRTError()
	CurveFit/Q/N=1/NTHR=1/M=0/W=2 dblexp_XOffset, kwCWave=coefWave, sweepDataOffFilt(startTime, endTime)/D/C=constraints; err = GetRTError(1)

	WAVE fit = MakeWaveFree($"fit__free_")

	SetDataFolder currDFR
	// weighted tau computed from double exponential fit
	[fastTau, slowTau] = MinMax(coefWave[2], coefWave[4])
	weightedTau        = ((coefWave[1] * slowTau + coefWave[3] * fastTau) / (coefWave[1] + coefWave[3]))

#ifdef AUTOMATED_TESTING
	WAVE/Z overrideResults = GetOverrideResults()

	if(WaveExists(overrideResults))
		comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)

		err = !overrideResults[eventIndex][%$comboKey][%$"Fit Result"]
		ASSERT(IsFinite(err), "err needs to be finite")

		overrideTau = overrideResults[eventIndex][%$comboKey][%Tau]

		if(!IsNaN(overrideTau))
			weightedTau = overrideTau
		endif
	endif
#endif // AUTOMATED_TESTING

	if(err)
		psxEvent[eventIndex][%$"Fit manual QC call"] = PSX_REJECT
		psxEvent[eventIndex][%$"Fit result"]         = -err
		psxEvent[eventIndex][%weightedTau]           = NaN
		psxEvent[eventIndex][%slowTau]               = NaN
		psxEvent[eventIndex][%fastTau]               = NaN

		return NaN
	endif

	fitRange = endTime - startTime

	if((IsFinite(weightedTau) && weightedTau > (maxTauFactor * fitRange)) || fastTau <= 0 || SlowTau <= 0 || weightedTau <= 0)
		psxEvent[eventIndex][%$"Fit manual QC call"] = PSX_REJECT
		psxEvent[eventIndex][%$"Fit result"]         = PSX_DECAY_FIT_ERROR
		psxEvent[eventIndex][%weightedTau]           = NaN
		psxEvent[eventIndex][%slowTau]               = NaN
		psxEvent[eventIndex][%fastTau]               = NaN

		return NaN
	endif

	ChangeFreeWaveName(fit, "expoffset_fit_event_" + num2str(eventIndex))

	ASSERT(WaveExists(fit), "Expected fit wave")
	eventFit[eventIndex]                         = fit
	psxEvent[eventIndex][%$"Fit result"]         = 1
	psxEvent[eventIndex][%$"Fit manual QC call"] = PSX_UNDET
	psxEvent[eventIndex][%weightedTau]           = weightedTau
	psxEvent[eventIndex][%slowTau]               = slowTau
	psxEvent[eventIndex][%fastTau]               = fastTau
End

/// @brief Create the override results 2D wave
///
/// ROWS:
///  - event number
///
/// COLS:
///  - combination
///
/// LAYERS:
/// - 0: Fit result, see GetPSXEventWaveAsFree
/// - 1: Replacement tau, the default of NaN means don't override
/// - 2: Override sign check in PSX_AnalyzePeaks (0 failing, 1 passing), the default of NaN means don't override
static Function/WAVE PSX_CreateOverrideResults(variable numEvents, WAVE/T combos)

	variable numCombos

	KillOrMoveToTrash(wv = GetOverrideResults())

	numCombos = DimSize(combos, ROWS)

	Make/D/N=(numEvents, numCombos, 3) root:overrideResults/WAVE=wv
	SetDimensionLabels(wv, TextWaveToList(combos, ";"), COLS)
	SetDimensionLabels(wv, "Fit Result;Tau;KernelAmpSignQC", LAYERS)

	wv[] = NaN

	return wv
End

/// @return 0 on success, 1 otherwise
static Function PSX_OperationSweepGathering(string graph, WAVE/WAVE psxKernelDataset, variable parameterJsonID, WAVE sweepFilter, WAVE deconvFilter, variable readIndex, variable writeIndex, WAVE/WAVE output)

	string key, comboKey, psxParametersAnalyzePeaks, cacheKey
	variable realOrderSweep, realOrderDeconv

	key = PSX_GenerateKey("psxKernelFFT", readIndex)
	WAVE psxKernelFFT = psxKernelDataset[%$key]

	key = PSX_GenerateKey("sweepData", readIndex)
	WAVE sweepData = psxKernelDataset[%$key]

	[WAVE selectData, WAVE range] = SFH_ParseToSelectDataWaveAndRange(sweepData)
	ASSERT(WaveExists(selectData) && WaveExists(range), "Could not recreate select/range wave")
	comboKey = PSX_GenerateComboKey(graph, selectData, range)

	psxParametersAnalyzePeaks = PSX_GetPSXParameters(parameterJSONID, PSX_CACHE_KEY_ANALYZE_PEAKS)
	cacheKey                  = CA_PSXAnalyzePeaks(comboKey, psxParametersAnalyzePeaks)
	WAVE/Z/WAVE psxAnalyzePeaksFromCache = CA_TryFetchingEntryFromCache(cacheKey)

	if(WaveExists(psxAnalyzePeaksFromCache))

		if(DimSize(psxAnalyzePeaksFromCache, ROWS) == 0)
			return 1
		endif

		WAVE sweepDataOffFilt       = psxAnalyzePeaksFromCache[%sweepDataOffFilt]
		WAVE sweepDataOffFiltDeconv = psxAnalyzePeaksFromCache[%sweepDataOffFiltDeconv]
		realOrderSweep  = WaveRef(psxAnalyzePeaksFromCache[%realOrderSweep])[0]
		realOrderDeconv = WaveRef(psxAnalyzePeaksFromCache[%realOrderDeconv])[0]
	else
		[realOrderSweep, realOrderDeconv, WAVE sweepDataOffFilt, WAVE sweepDataOffFiltDeconv] = PSX_Analysis(sweepData, psxKernelFFT, sweepFilter, deconvFilter)

		if(!WaveExists(sweepDataOffFilt) || !WaveExists(sweepDataOffFiltDeconv))
			Make/FREE/WAVE/N=(0) psxAnalyzePeaks
		else
			Make/FREE/WAVE/N=(4) psxAnalyzePeaks
			SetDimensionLabels(psxAnalyzePeaks, "sweepDataOffFilt;sweepDataOffFiltDeconv;realOrderSweep;realOrderDeconv", ROWS)
			psxAnalyzePeaks[%sweepDataOffFilt]       = sweepDataOffFilt
			psxAnalyzePeaks[%sweepDataOffFiltDeconv] = sweepDataOffFiltDeconv

			Make/FREE pkg = {realOrderSweep}
			psxAnalyzePeaks[%realOrderSweep] = pkg

			Make/FREE pkg = {realOrderDeconv}
			psxAnalyzePeaks[%realOrderDeconv] = pkg
		endif

		CA_StoreEntryIntoCache(cacheKey, psxAnalyzePeaks)

		if(DimSize(psxAnalyzePeaks, ROWS) == 0)
			return 1
		endif
	endif

	key           = PSX_GenerateKey("sweepData", writeIndex)
	output[%$key] = sweepData

	JWN_SetNumberInWaveNote(sweepDataOffFilt, "maxOrder", sweepFilter[%$"Filter Order"])
	JWN_SetNumberInWaveNote(sweepDataOffFilt, "realOrder", realOrderSweep)
	key           = PSX_GenerateKey("sweepDataOffFilt", writeIndex)
	output[%$key] = sweepDataOffFilt

	JWN_SetNumberInWaveNote(sweepDataOffFiltDeconv, "maxOrder", deconvFilter[%$"Filter Order"])
	JWN_SetNumberInWaveNote(sweepDataOffFiltDeconv, "realOrder", realOrderDeconv)
	key           = PSX_GenerateKey("sweepDataOffFiltDeconv", writeIndex)
	output[%$key] = sweepDataOffFiltDeconv

	return 0
End

/// @brief Implementation of psx operation
static Function PSX_OperationImpl(string graph, variable parameterJSONID, string id, variable peakThresh, variable maxTauFactor, WAVE riseTimeParams, variable kernelAmp, variable kernelRiseTau, variable kernelDecayTau, variable index, WAVE/WAVE output)

	string comboKey, key, psxOperationKey, psxParametersEvents

	key = PSX_GenerateKey("sweepData", index)
	WAVE sweepData = output[%$key]

	key = PSX_GenerateKey("sweepDataOffFilt", index)
	WAVE sweepDataOffFilt = output[%$key]

	key = PSX_GenerateKey("sweepDataOffFiltDeconv", index)
	WAVE sweepDataOffFiltDeconv = output[%$key]

	[WAVE selectData, WAVE range] = SFH_ParseToSelectDataWaveAndRange(sweepData)
	ASSERT(WaveExists(selectData) && WaveExists(range), "Could not recreate select/range wave")
	comboKey = PSX_GenerateComboKey(graph, selectData, range)

	psxParametersEvents = PSX_GetPSXParameters(parameterJSONID, PSX_CACHE_KEY_EVENTS)
	psxOperationKey     = CA_PSXOperationKey(comboKey, psxParametersEvents)
	WAVE/Z/WAVE psxOperationFromCache = CA_TryFetchingEntryFromCache(psxOperationKey)

	if(WaveExists(psxOperationFromCache))
		WAVE/Z/D peakX    = psxOperationFromCache[%peakX]
		WAVE/Z/D peakY    = psxOperationFromCache[%peakY]
		WAVE/Z   psxEvent = psxOperationFromCache[%psxEvent]
		WAVE/Z   eventFit = psxOperationFromCache[%eventFit]
	else
		[WAVE peakXUnfiltered, WAVE peakYUnfiltered] = PSX_FindPeaks(sweepDataOffFiltDeconv, peakThresh)

		WAVE psxEvent = GetPSXEventWaveAsFree()
		WAVE eventFit = GetPSXEventFitWaveAsFree()

		JWN_SetWaveNoteFromJSON(psxEvent, parameterJsonID, release = 0)

		JWN_SetStringInWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE, comboKey)
		JWN_SetStringInWaveNote(psxEvent, PSX_X_DATA_UNIT, WaveUnits(sweepData, ROWS))
		JWN_SetStringInWaveNote(psxEvent, PSX_Y_DATA_UNIT, WaveUnits(sweepData, -1))

		[WAVE peakX, WAVE peakY] = PSX_AnalyzePeaks(sweepDataOffFiltDeconv, sweepDataOffFilt, \
		                                            sweepData,                                \
		                                            peakXUnfiltered, peakYUnfiltered,         \
		                                            maxTauFactor, kernelAmp, kernelRiseTau,   \
		                                            kernelDecayTau, riseTimeParams,           \
		                                            psxEvent, eventFit)

		Make/FREE/WAVE/N=(4) psxOperation
		SetDimensionLabels(psxOperation, "peakX;peakY;psxEvent;eventFit", ROWS)
		psxOperation[%peakX]    = peakX
		psxOperation[%peakY]    = peakY
		psxOperation[%psxEvent] = psxEvent
		psxOperation[%eventFit] = eventFit

		CA_StoreEntryIntoCache(psxOperationKey, psxOperation)
	endif

	if(!WaveExists(peakX) || !WaveExists(peakY))
		WaveClear psxEvent, eventFit

		printf "Could not find any events for combination: \"%s\"\r", comboKey
		ControlWindowToFront()
	endif

	WAVE/Z psxEventFromCache = PSX_LoadEventsFromCache(comboKey, psxParametersEvents)

	if(WaveExists(psxEventFromCache))
		WAVE/Z psxEventCandidate = UpgradePSXEventWave(psxEventFromCache)
	else
		// no cached psxEvent data exists
		// look into the results wave
		WAVE/Z psxEventContainer   = PSX_GetEventContainerFromResults(id)
		WAVE/Z psxEventFromResults = PSX_FilterEventContainer(psxEventContainer, comboKey)

		if(WaveExists(psxEventFromResults))
			WAVE/Z psxEventCandidate = UpgradePSXEventWave(psxEventFromResults)
		endif
	endif

	if(WaveExists(psxEventCandidate)                               \
	   && DimSize(peakX, ROWS) == DimSize(psxEventCandidate, ROWS) \
	   && DimSize(peakY, ROWS) == DimSize(psxEventCandidate, ROWS))
		WAVE psxEvent = psxEventCandidate
	endif

	key           = PSX_GenerateKey("peakX", index)
	output[%$key] = peakX

	key           = PSX_GenerateKey("peakY", index)
	output[%$key] = peakY

	key           = PSX_GenerateKey("psxEvent", index)
	output[%$key] = psxEvent

	key           = PSX_GenerateKey("eventFit", index)
	output[%$key] = eventFit
End

/// @brief Generate the dimension label for the output wave reference waves
///
/// Used for `psx` and `psxKernel` as both hold
/// `#PSX_KERNEL_OUTPUTWAVES_PER_ENTRY` and `#PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY`
/// entries per input range/sweep combination.
static Function/S PSX_GenerateKey(string name, variable index)

	return name + "_" + num2istr(index)
End

/// @brief Return the PSX kernel from the cache or create it
static Function/WAVE PSX_GetPSXKernel(variable riseTau, variable decayTau, variable amp, variable numPoints, variable dt, WAVE range)

	string key

	key = CA_PSXKernelOperationKey(riseTau, decayTau, amp, numPoints, dt, range)

	WAVE/Z/WAVE result = CA_TryFetchingEntryFromCache(key)

	if(WaveExists(result))
		return result
	endif

	[WAVE psx_kernel, WAVE kernel_fft] = PSX_CreatePSXKernel(riseTau, decayTau, amp, numPoints, dt)

	if(!WaveExists(psx_kernel) || !WaveExists(kernel_fft))
		Make/FREE/WAVE/N=0 result
	else
		Make/FREE/WAVE result = {psx_kernel, kernel_fft}
	endif

	CA_StoreEntryIntoCache(key, result)

	return result
End

/// Create the psx_kernel waves
///
/// @param riseTau      time constant
/// @param decayTau      time constant
/// @param amp       amplitude [no unit]
/// @param numPoints number of data points
/// @param dt        time constant for normalisation
///
/// from Ken Burke's deconvolution code
///
/// The time units are abitrary but fixed for all three components.
static Function [WAVE kernel, WAVE kernelFFT] PSX_CreatePSXKernel(variable riseTau, variable decayTau, variable amp, variable numPoints, variable dt)

	variable riseTau_p, decayTau_p, kernel_window, amp_prime

	riseTau_p     = riseTau / dt
	decayTau_p    = decayTau / dt
	kernel_window = decayTau_p * 4
	amp_prime     = (decayTau_p / riseTau_p)^(riseTau_p / (riseTau_p - decayTau_p)) // normalization factor

	if(kernel_window > numPoints)
		return [$"", $""]
	endif

	Make/FREE/N=(kernel_window) timeIndex = p
	SetScale/P x, 0, dt, timeIndex

	Make/FREE/N=(kernel_window) kernel = (amp / amp_prime) * (-exp(-timeIndex / riseTau_p) + exp(-timeIndex / decayTau_p))
	SetScale/P x, 0, dt, kernel

	// no window function on purpose
	WAVE kernelFFT = DoFFT(kernel, padSize = numPoints)

	return [kernel, kernelFFT]
End

/// @brief Return the data/index/marker/comboKeys of the events matching the given state and property
static Function [WAVE/D results, WAVE eventIndex, WAVE marker, WAVE/T comboKeys] PSX_GetStatsResults(WAVE/WAVE allEvents, variable state, string prop)

	string stateType, propLabel
	variable numEntries, hasData

	strswitch(prop)
		case "amp":
			propLabel = "amplitude"
			break
		case "peak":
			propLabel = "peak"
			break
		case "peaktime":
			propLabel = "peak_t"
			break
		case "deconvpeak":
			propLabel = "deconvpeak"
			break
		case "deconvpeaktime":
			propLabel = "deconvpeak_t"
			break
		case "baseline":
			propLabel = "baseline"
			break
		case "baselinetime":
			propLabel = "baseline_t"
			break
		case "xinterval":
			propLabel = "iei"
			break
		case "slowtau":
			propLabel = "slowTau"
			break
		case "fasttau":
			propLabel = "fastTau"
			break
		case "weightedtau":
			propLabel = "weightedTau"
			break
		case "estate":
			propLabel = "Event manual QC call"
			break
		case "fstate":
			propLabel = "Fit manual QC call"
			break
		case "fitresult":
			propLabel = "Fit result"
			break
		case "slewrate":
			propLabel = "Slew Rate"
			break
		case "slewratetime":
			propLabel = "Slew Rate Time"
			break
		case "onsettime":
			propLabel = "Onset Time"
			break
		case "onset":
			propLabel = "Onset"
			break
		case "risetime":
			propLabel = "Rise Time"
			break
		case "rise":
			propLabel = "Rise"
			break
		default:
			ASSERT(0, "Impossible prop: " + prop)
	endswitch

	// use the correct event/fit state for the property
	strswitch(propLabel)
		case "amplitude":
		case "peak":
		case "peak_t":
		case "deconvPeak":
		case "deconvPeak_t":
		case "baseline":
		case "baseline_t":
		case "iei":
		case "Event manual QC call":
		case "Slew Rate":
		case "Slew Rate Time":
		case "Rise Time":
		case "Onset Time":
			stateType = "Event manual QC call"
			break
		case "Fit result":
		case "slowtau":
		case "fasttau":
		case "weightedtau":
		case "Fit manual QC call":
			stateType = "Fit manual QC call"
			break
		default:
			ASSERT(0, "Unknown propLabel: " + propLabel)
	endswitch

	Make/FREE/N=0 allEventIndex, allMarkers
	Make/FREE/N=0/D allResults
	Make/FREE/T/N=0 allComboKeys

	Make/D/FREE/N=0 results
	Make/FREE/N=0 marker, eventIndex
	Make/FREE/N=0/T comboKeys

	for(WAVE events : allEvents)
		WAVE/Z indizes = FindIndizes(events, var = state, colLabel = stateType, prop = PROP_MATCHES_VAR_BIT_MASK)

		if(!WaveExists(indizes))
			continue
		endif

		numEntries = Dimsize(indizes, ROWS)

		Redimension/N=(numEntries) results, marker, eventIndex, comboKeys

		if(!cmpstr(propLabel, "iei") && numEntries >= 2)
			// recalculate the iei as that might have changed due to in-between events being not selected
			Multithread results[0, numEntries - 1] = events[indizes[p]][%peak_t] - ((p >= 1) ? events[indizes[p - 1]][%peak_t] : NaN)
		else
			Multithread results[] = events[indizes[p]][%$propLabel]
		endif

		Multithread eventIndex[] = events[indizes[p]][%index]
		Multithread marker[] = PSX_SelectMarker(events[indizes[p]][%$stateType])

		Make/FREE/T/N=(numEntries) comboKeys = JWN_GetStringFromWaveNote(events, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)

		Concatenate/FREE/NP=(ROWS) {eventIndex}, allEventIndex
		Concatenate/FREE/NP=(ROWS)/T {comboKeys}, allComboKeys
		Concatenate/FREE/NP=(ROWS) {marker}, allMarkers
		Concatenate/FREE/NP=(ROWS) {results}, allResults

		if(!hasData)
			Note/K allEvents, note(events)
			hasData = 1
		endif
	endfor

	if(!hasData)
		return [$"", $"", $"", $""]
	endif

	return [allResults, allEventIndex, allMarkers, allComboKeys]
End

/// @brief Build the dimension label used for the sweep equivalence wave
static Function/S PSX_BuildSweepEquivKey(variable chanType, variable chanNr)

	string str

	sprintf str, "ChanType%d_ChanNr%d", chanType, chanNr

	return str
End

/// @brief Return the quartett of channel number, channel type, sweep number and map index from the sweep equivalence wave located in the given channelNumberType and column coordinates
static Function [variable chanNr, variable chanType, variable sweepNo, variable mapIndex] PSX_GetSweepEquivKeyAndValue(WAVE/T sweepEquiv, variable channelNumberType, variable sweepIndex)

	string str, chanTypeStr, chanNrStr, entry, sweepNoStr, mapIndexStr

	str = GetDimLabel(sweepEquiv, ROWS, channelNumberType)
	ASSERT(strlen(str) > 0, "Unexpected empty channelNumberType label")

	SplitString/E="ChanType([[:digit:]]+)_ChanNr([[:digit:]]+)" str, chanTypeStr, chanNrStr

	chanType = str2num(chanTypeStr)
	chanNr   = str2num(chanNrStr)

	entry = sweepEquiv[channelNumberType][sweepIndex]

	SplitString/E="(?i)SweepNo([[:digit:]]+)_MapIndex([[:digit:]]+|NaN)" entry, sweepNoStr, mapIndexStr

	sweepNo  = str2num(sweepNoStr)
	mapIndex = str2num(mapIndexStr)

	return [chanNr, chanType, sweepNo, mapIndex]
End

/// @brief Build the column data used for the sweep equivalence wave
static Function/S PSX_BuildSweepEquivValue(variable sweepNo, variable mapIndex)

	string str

	sprintf str, "SweepNo%d_MapIndex%g", sweepNo, mapIndex

	return str
End

/// @brief Generate the equivalence classes of selectData
///
/// All selections which have the same channel number and type are in one equivalence class.
///
/// The returned 2D wave has row labels from PSX_BuildSweepEquivKey() for the
/// channel type/number and the sweep numbers in the columns.
static Function [WAVE/T sweepEquiv, WAVE/WAVE sweepEquivRanges] PSX_GenerateSweepEquiv(WAVE/WAVE selectDataCompArray)

	variable numSelectComp, numSelected, idx, i, j, nextFreeRow, maxCol, col, isSingleRange
	string key

	ASSERT(IsWaveRefWave(selectDataCompArray), "Expected a wave reference wave for selectDataCompArray")

	numSelectComp = DimSize(selectDataCompArray, ROWS)
	ASSERT(numSelectComp > 0, "Expected at least one entry in selectDataCompArray")

	Make/N=(MINIMUM_WAVE_SIZE, MINIMUM_WAVE_SIZE)/FREE=1/T sweepEquiv
	Make/N=(MINIMUM_WAVE_SIZE, MINIMUM_WAVE_SIZE)/FREE=1/WAVE sweepEquivRanges

	for(i = 0; i < numSelectComp; i += 1)
		WAVE/WAVE selectDataComp = selectDataCompArray[i]
		ASSERT(IsWaveRefWave(selectDataComp), "Expected a wave reference wave for selectDataComp")

		WAVE      selectData = selectDataComp[%SELECTION]
		WAVE/WAVE range      = selectDataComp[%RANGE]
		ASSERT(IsWaveRefWave(range), "Range must be a wave reference wave")

		isSingleRange = DimSize(range, ROWS) == 1

		if(!isSingleRange)
			SFH_ASSERT(DimSize(range, ROWS) == numSelected, "Number of ranges is not equal number of selections.")
		endif

		numSelected = DimSize(selectData, ROWS)
		for(j = 0; j < numSelected; j += 1)
			key = PSX_BuildSweepEquivKey(selectData[j][%CHANNELTYPE], selectData[j][%CHANNELNUMBER])
			idx = FindDimLabel(sweepEquiv, ROWS, key)

			if(idx == -2)
				EnsureLargeEnoughWave(sweepEquiv, dimension = ROWS, indexShouldExist = nextFreeRow)

				SetDimLabel ROWS, nextFreeRow, $key, sweepEquiv
				idx          = nextFreeRow
				nextFreeRow += 1
			endif

			FindValue/TXOP=4/TEXT=""/RMD=[idx][] sweepEquiv
			if(V_col >= 0)
				col = V_col
			else
				col = DimSize(sweepEquiv, COLS)
				EnsureLargeEnoughWave(sweepEquiv, dimension = COLS, indexShouldExist = col)
			endif

			maxCol               = max(maxCol, col)
			sweepEquiv[idx][col] = PSX_BuildSweepEquivValue(selectData[j][%SWEEP], selectData[j][%SWEEPMAPINDEX])

			EnsureLargeEnoughWave(sweepEquivRanges, dimension = ROWS, indexShouldExist = idx)
			EnsureLargeEnoughWave(sweepEquivRanges, dimension = COLS, indexShouldExist = col)

			WAVE/Z setRange = range[isSingleRange ? 0 : i]
			sweepEquivRanges[idx][col] = setRange
		endfor
	endfor

	ASSERT(nextFreeRow > 0, "Could not build sweep equivalence classes")

	Redimension/N=(nextFreeRow, maxCol + 1) sweepEquiv, sweepEquivRanges

	return [sweepEquiv, sweepEquivRanges]
End

/// @brief Check that the 2xN wave allResolvedRanges has only
///        non-intersecting ranges
static Function PSX_CheckResolvedRanges(WAVE allResolvedRanges)

	if(DimSize(allResolvedRanges, COLS) == 0)
		return NaN
	endif

	MatrixOp/FREE allResolvedRangesTransp = allResolvedRanges^t

	SFH_ASSERT(!AreIntervalsIntersecting(allResolvedRangesTransp), "Can't work with multiple intersecting ranges")
End

/// @brief Helper function of the `psxStats` operation
static Function/WAVE PSX_OperationStatsImpl(string graph, string id, WAVE/WAVE selectDataCompArray, string prop, string stateAsStr, string postProc)

	string propLabelAxis, comboKey
	variable numEquivChannelNumberTypes, numEquivSweeps, i, j, k, index, sweepNo, chanNr, chanType
	variable state, numRanges, lowerBoundary, upperBoundary, temp, err, mapIndex
	variable refMarker, idx

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX_STATS, MINIMUM_WAVE_SIZE)

	// create equivalence classes where chanNr/chanType are the same and only the sweep number differs
	[WAVE/T selectDataEquiv, WAVE/WAVE selectDataEquivRanges] = PSX_GenerateSweepEquiv(selectDataCompArray)

	numEquivChannelNumberTypes = DimSize(selectDataEquiv, ROWS)
	numEquivSweeps             = DimSize(selectDataEquiv, COLS)

	WAVE/Z eventContainerFromResults = PSX_GetEventContainerFromResults(id)
	WAVE/Z eventContainer            = PSX_GetEventContainer(graph, requestID = id)

	Make/FREE/WAVE/N=(MINIMUM_WAVE_SIZE) allEvents

	// iteration order: different chanType/chanNr (equivalence classes), sweepNo
	for(i = 0; i < numEquivChannelNumberTypes; i += 1)
		for(j = 0; j < numEquivSweeps; j += 1)

			[chanNr, chanType, sweepNo, mapIndex] = PSX_GetSweepEquivKeyAndValue(selectDataEquiv, i, j)

			if(!IsValidSweepNumber(sweepNo))
				break
			endif

			WAVE singleSelectData = SFH_NewSelectDataWave(1, 1)

			singleSelectData[0][%SWEEP]         = sweepNo
			singleSelectData[0][%CHANNELNUMBER] = chanNr
			singleSelectData[0][%CHANNELTYPE]   = chanType
			singleSelectData[0][%SWEEPMAPINDEX] = mapIndex

			WAVE ranges = selectDataEquivRanges[i][j]

			[WAVE resolvedRanges, WAVE/T epochRangeNames] = SFH_GetNumericRangeFromEpochFromSingleSelect(graph, singleSelectData, ranges)

			if(!WaveExists(resolvedRanges))
				continue
			endif

			PSX_CheckResolvedRanges(resolvedRanges)

			numRanges = DimSize(resolvedRanges, COLS)
			for(k = 0; k < numRanges; k += 1)
				Duplicate/FREE/RMD=[*][k] resolvedRanges, range

				if(WaveExists(epochRangeNames))
					Make/T/FREE rangeText = {epochRangeNames[k]}
					WAVE rangeAlt = rangeText
				else
					WAVE rangeAlt = range
				endif

				comboKey = PSX_GenerateComboKey(graph, singleSelectData, rangeAlt)

				WAVE/Z events = PSX_FilterEventContainer(eventContainer, comboKey)

				if(!WaveExists(events))
					// prefer data from graph over results data
					WAVE/Z events = PSX_FilterEventContainer(eventContainerFromResults, comboKey)
				endif

				if(!WaveExists(events))
					// still nothing let's skip it
					continue
				endif

				EnsureLargeEnoughWave(allEvents, indexShouldExist = idx)
				allEvents[idx] = events
				idx           += 1
				WaveClear events
			endfor
		endfor

		Redimension/N=(idx) allEvents

		SFH_ASSERT(DimSize(allEvents, ROWS) > 0, "Could not find any PSX events for all given combinations.")

		strswitch(prop)
			case "amp":
				propLabelAxis = "Amplitude" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			case "peak":
				propLabelAxis = "Event" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			case "peaktime":
				propLabelAxis = "Event time" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "deconvpeak":
				propLabelAxis = "Deconvoluted peak" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			case "deconvpeaktime":
				propLabelAxis = "Deconvoluted peak time" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "baseline":
				propLabelAxis = "Baseline" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			case "baselinetime":
				propLabelAxis = "Baseline time" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "xinterval":
				propLabelAxis = "Event interval" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "slowtau":
				propLabelAxis = "Slow tau" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "fasttau":
				propLabelAxis = "Fast tau" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "weightedtau":
				propLabelAxis = "Weighted tau" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "estate":
				propLabelAxis = "Event manual QC" + " (enum)"
				break
			case "fstate":
				propLabelAxis = "Fit manual QC" + " (enum)"
				break
			case "fitresult":
				propLabelAxis = "Fit result" + " (0/1)"
				break
			case "slewrate":
				propLabelAxis = "Slew Rate" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			case "slewratetime":
				propLabelAxis = "Slew Rate time" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "onsettime":
				propLabelAxis = "Onset time" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "onset":
				propLabelAxis = "Onset" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			case "risetime":
				propLabelAxis = "Rise time" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_X_DATA_UNIT) + ")"
				break
			case "rise":
				propLabelAxis = "Rise" + " (" + JWN_GetStringFromWaveNote(allEvents[0], PSX_Y_DATA_UNIT) + ")"
				break
			default:
				ASSERT(0, "Impossible prop: " + prop)
		endswitch

		if(!cmpstr(stateAsStr, "every"))
			WAVE allStates = PSX_GetStates()
		else
			Make/FREE allStates = {PSX_ParseState(stateAsStr)}
		endif

		for(state : allStates)

			[WAVE resultsRaw, WAVE eventIndex, WAVE marker, WAVE/T comboKeys] = PSX_GetStatsResults(allEvents, state, prop)

			if(!WaveExists(resultsRaw))
				continue
			endif

			strswitch(postProc)
				case "nothing":
					WAVE/D results = resultsRaw

					JWN_SetWaveInWaveNote(results, SF_META_XVALUES, eventIndex)
					break
				case "stats":
					WAVE/Z resultsRawClean = ZapNaNs(resultsRaw)

					if(!WaveExists(resultsRawClean))
						continue
					endif

					WaveStats/Q/M=2 resultsRawClean

					Make/FREE/D results = {V_avg, NaN, V_adev, V_sdev, V_skew, V_kurt, NaN, NaN, NaN, NaN, NaN}
					SetDimensionLabels(results, PSX_STATS_LABELS, ROWS)

					StatsQuantiles/Q/Z resultsRawClean
					MakeWaveFree($"W_StatsQuantiles")

					if(!V_Flag)
						results[%$"Median"] = V_Median
						results[%$"Lower Quartile"] = V_Q25
						results[%$"Upper Quartile"] = V_Q75
						results[%$"Inter-quartile range"] = V_IQR
						results[%$"Median absolute deviation"] = V_MAD
						results[%$"Most frequent value"] = V_Mode
					endif

					WAVE/T statsLabels = ListToTextWave(PSX_STATS_LABELS, ";")
					JWN_SetWaveInWaveNote(results, SF_META_XVALUES, statsLabels)
					SetDimensionLabels(results, PSX_STATS_LABELS, ROWS)

					// resize markers
					Redimension/N=(DimSize(results, ROWS)) marker
					refMarker = marker[0]
					marker[]  = refMarker

					break
				case "nonfinite":
					// map:
					// -inf -> -1
					// NaN  ->  0
					// +inf -> +1
					// finite -> NaN
					Duplicate/FREE resultsRaw, results
					Multithread results[] = resultsRaw[p] == -Inf ? -1 : (IsNaN(resultsRaw[p]) ? 0 : ((resultsRaw[p] == +Inf) ? +1 : NaN))

					WAVE/Z resultsClean = ZapNaNs(results)

					if(!WaveExists(resultsClean))
						continue
					endif

					eventIndex[] = IsFinite(results[p]) ? eventIndex[p] : NaN
					marker[]     = IsFinite(results[p]) ? marker[p] : NaN
					comboKeys[]  = SelectString(IsFinite(results[p]), "", comboKeys[p])

					WAVE markerClean     = ZapNaNs(marker)
					WAVE eventIndexClean = ZapNaNs(eventIndex)
					RemoveTextWaveEntry1D(comboKeys, "", all = 1)

					// y-data will be eventIndex, and x the numeric categories of non-finiteness
					WAVE marker  = markerClean
					WAVE results = eventIndexClean
					WAVE xValues = resultsClean

					Redimension/D results

					JWN_SetWaveInWaveNote(results, SF_META_XVALUES, xValues)

					break
				case "count":
					MatrixOP/FREE results = numRows(resultsRaw)
					break
				case "hist":
					Make/FREE/N=0/D results

					// truncate the input data to get usable histogram bins
					// using allEvents assumes that the same psxKernel was used for
					// all input events, which sounds reasonable.
					if(!cmpstr(prop, "tau") || !cmpstr(prop, "amp"))
						if(!cmpstr(prop, "tau"))
							lowerBoundary = 0
							upperBoundary = PSX_STATS_TAU_FACTOR * JWN_GetNumberFromWaveNote(allEvents, SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/psxKernel/decayTau")
							ASSERT(IsFinite(upperBoundary) && upperBoundary > 0, "Upper boundary for tau must be finite and positive")
						elseif(!cmpstr(prop, "amp"))
							temp          = PSX_STATS_AMP_FACTOR * JWN_GetNumberFromWaveNote(allEvents, SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/psxKernel/amp")
							lowerBoundary = -abs(temp)
							upperBoundary = +abs(temp)
							ASSERT(IsFinite(lowerBoundary) && IsFinite(upperBoundary), "Lower/Upper boundary for amp must be finite")
						endif

						resultsRaw[] = LimitWithReplace(resultsRaw[p], lowerBoundary, upperBoundary, NaN)
					endif

					WAVE/Z resultsRawClean = ZapNaNs(resultsRaw)

					if((!WaveExists(resultsRawClean) && WaveExists(resultsRaw))        \
					   || (DimSize(resultsRawClean, ROWS) != DimSize(resultsRaw, ROWS)))
						if(!AlreadyCalledOnce(CO_PSX_CLIPPED_STATS))
							printf "psxStats removed out-of-range input data for histogram generation.\r"
							ControlWindowToFront()
						endif
					endif

					if(!WaveExists(resultsRawClean))
						continue
					endif

					Histogram/DP/B=5/DEST=results resultsRawClean
					break
				case "log10":
					MatrixOp/FREE results = log(resultsRaw)

					JWN_SetWaveInWaveNote(results, SF_META_XVALUES, eventIndex)
					break
				default:
					ASSERT(0, "Impossible postProc state")
			endswitch

			// passing in sweepNo is not correct as we combine data from multiple sweeps
			// but we need it to be set to something valid so that the headstage colors work
			// we assume therefore that all sweeps use the same active HS/AD/DAC settings
			JWN_SetNumberInWaveNote(results, SF_META_SWEEPNO, sweepNo)
			JWN_SetNumberInWaveNote(results, SF_META_CHANNELTYPE, chanType)
			JWN_SetNumberInWaveNote(results, SF_META_CHANNELNUMBER, chanNr)
			JWN_SetNumberInWaveNote(results, SF_META_SWEEPMAPINDEX, mapIndex)

			ASSERT(DimSize(results, ROWS) <= DimSize(marker, ROWS), "results wave got larger unexpectedly")
			Redimension/N=(DimSize(results, ROWS)) marker, comboKeys

			JWN_SetNumberInWaveNote(results, SF_META_TRACE_MODE, TRACE_DISPLAY_MODE_MARKERS)
			JWN_SetWaveInWaveNote(results, SF_META_MOD_MARKER, marker)
			JWN_CreatePath(results, SF_META_USER_GROUP + PSX_JWN_COMBO_KEYS_NAME)
			JWN_SetWaveInWaveNote(results, SF_META_USER_GROUP + PSX_JWN_COMBO_KEYS_NAME, comboKeys)

			JWN_CreatePath(results, SF_META_USER_GROUP + PSX_JWN_STATS_POST_PROC)
			JWN_SetStringInWaveNote(results, SF_META_USER_GROUP + PSX_JWN_STATS_POST_PROC, postProc)

			JWN_SetNumberInWaveNote(results, SF_META_SHOW_LEGEND, 0)

			EnsureLargeEnoughWave(output, indexShouldExist = index)
			output[index] = results
			index        += 1
		endfor
	endfor

	Redimension/N=(index) output

	// PSX_MouseEventSelection works for "nothing" and "log10" post processing

	// we assume here that all event waves have the same X/Y data units
	strswitch(postProc)
		case "nothing":
			JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, "Event")
			JWN_SetStringInWaveNote(output, SF_META_YAXISLABEL, propLabelAxis)
			break
		case "stats":
			JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, "Statistical properties of " + LowerStr(propLabelAxis))
			break
		case "nonfinite":
			JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, "Non-finite values of " + LowerStr(propLabelAxis))

			Make/FREE/T nonFiniteTickLabels = {num2str(-Inf), num2str(NaN), num2str(+Inf)}
			JWN_SetWaveInWaveNote(output, SF_META_XTICKLABELS, nonFiniteTickLabels)
			JWN_SetWaveInWaveNote(output, SF_META_XTICKPOSITIONS, {-1, 0, 1})
			break
		case "count":
			JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, "NA")
			JWN_SetStringInWaveNote(output, SF_META_YAXISLABEL, "Count")
			break
		case "hist":
			JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, propLabelAxis)
			JWN_SetStringInWaveNote(output, SF_META_YAXISLABEL, "Event count")
			break
		case "log10":
			JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, "Event")
			JWN_SetStringInWaveNote(output, SF_META_YAXISLABEL, "Log10 " + LowerStr(propLabelAxis))
			break
		default:
			ASSERT(0, "Impossible state")
	endswitch

	return output
End

threadsafe static Function PSX_CalculateRiseTimeWrapper(WAVE sweepDataOffFilt, WAVE psxEvent, variable kernelAmp, variable lowerThreshold, variable upperThreshold, variable index)

	variable error, xStart, xEnd, yStart, yEnd, riseTime
	string comboKey

	// deconvPeak is defined in the deconvoluted wave,
	// so we can't use %deconvPeak as y-value
	xStart = psxEvent[index][%$"Onset Time"]
	yStart = IsNaN(xStart) ? NaN : sweepDataOffFilt(xStart)

	xEnd = psxEvent[index][%peak_t]
	yEnd = psxEvent[index][%peak]

	[riseTime, error] = PSX_CalculateRiseTime(sweepDataOffFilt, xStart, xEnd, yStart, yEnd, lowerThreshold, upperThreshold, kernelAmp)

#ifdef DEBUGGING_ENABLED
	if(error)
		comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)

		printf "comboKey: %s, x: [%g, %g], y: [%g, %g], index: %d, thresholds: [%g, %g], risetime: %g\r", comboKey, xStart, xEnd, yStart, yEnd, index, lowerThreshold, upperThreshold, risetime
	endif
#endif // DEBUGGING_ENABLED

	return riseTime
End

threadsafe static Function [variable riseTime, variable error] PSX_CalculateRiseTime(WAVE data, variable xStart, variable xEnd, variable yStart, variable yEnd, variable lowerThreshold, variable upperThreshold, variable kernelAmp)

	variable dY, xlt, xupt, lowerLevel, upperLevel

	if(IsNaN(xStart))
		return [NaN, 1]
	endif

	dY = abs(yStart - yEnd)

	lowerLevel = min(yStart, yEnd) + lowerThreshold * dY
	upperLevel = min(yStart, yEnd) + upperThreshold * dY

	riseTime = NaN
	xlt      = NaN
	xupt     = NaN

	FindLevel/R=(xStart, xEnd)/Q data, lowerLevel

	if(!V_flag)
		xlt = V_levelX
	else
		error = 1
	endif

	FindLevel/R=(xStart, xEnd)/Q data, upperLevel

	if(!V_flag)
		xupt = V_levelX
	else
		error = 1
	endif

	ASSERT_TS(kernelAmp != 0 && IsFinite(kernelAmp), "kernelAmp must be finite and not zero")
	riseTime = (xlt - xupt) * sign(kernelAmp) * (-1)

	return [riseTime, error]
End

threadsafe static Function PSX_CalculateOnsetTime(WAVE sweepDataDiff, WAVE psxEvent, variable kernelAmp, variable diffThreshPerc, variable index)

	variable slewRate, slewRate_t, level, baseline_t, peak_t
	string msg

	peak_t     = psxEvent[index][%peak_t]
	baseline_t = psxEvent[index][%baseline_t]

	WaveStats/Q/M=1/R=(peak_t, baseline_t) sweepDataDiff
	if(kernelAmp > 0)
		slewRate   = V_max
		slewRate_t = V_maxLoc
	elseif(kernelAmp < 0)
		slewRate   = V_min
		slewRate_t = V_minLoc
	else
		ASSERT_TS(0, "Unsupported case: kernelAmp being zero")
	endif

	psxEvent[index][%$"Slew Rate"]      = slewRate
	psxEvent[index][%$"Slew Rate Time"] = slewRate_t

	level = diffThreshPerc * (slewRate - sweepDataDiff(baseline_t))

#ifdef DEBUGGING_ENABLED
	sprintf msg, "comboKey = %s\r", JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)
	DEBUGPRINT_TS(msg)
	sprintf msg, "index = %d, peak_t = %g, baseline_t = %g, slew rate = %g, slew rate time = %g\r", index, peak_t, baseline_t, slewRate, slewRate_t
	DEBUGPRINT_TS(msg)
	sprintf msg, "level = %g, [%g, %g]\r", level, slewRate_t, baseline_t
	DEBUGPRINT_TS(msg)
#endif // DEBUGGING_ENABLED

	// search backwards in time
	FindLevel/R=(slewRate_t, baseline_t)/Q sweepDataDiff, level

	if(V_flag)
		return NaN
	endif

	return V_levelX
End

/// @brief Return all possible fit/event states
///
/// @param withAllState [optional, defaults to false] choose to include #PSX_ALL (true) or not (false)
static Function/WAVE PSX_GetStates([variable withAllState])

	if(ParamIsDefault(withAllState))
		withAllState = 0
	else
		withAllState = !!withAllState
	endif

	ASSERT(PSX_UNDET == PSX_LAST, "state wave is incomplete")

	if(withAllState)
		Make/FREE states = {PSX_ACCEPT, PSX_REJECT, PSX_UNDET, PSX_ALL}
	else
		Make/FREE states = {PSX_ACCEPT, PSX_REJECT, PSX_UNDET}
	endif

	return states
End

static Function PSX_ParseState(string state)

	strswitch(state)
		case "Accept":
			return PSX_ACCEPT
		case "Reject":
			return PSX_REJECT
		case "Undetermined":
			return PSX_UNDET
		case "All":
			return PSX_ACCEPT | PSX_REJECT | PSX_UNDET
		default:
			ASSERT(0, "Impossible state")
	endswitch
End

Function/S PSX_StateToString(variable state)

	switch(state)
		case PSX_ACCEPT:
			return "Accept"
		case PSX_REJECT:
			return "Reject"
		case PSX_UNDET:
			return "Undetermined"
		case PSX_ALL:
			return "All"
		default:
			ASSERT(0, "invalid state")
	endswitch
End

Function/S PSX_FitResultToString(variable fitResult)

	if(fitResult == 1)
		return "Success"
	elseif(fitResult > -10000 && fitResult < 0)
		// CurveFitError codes, IP errors are also positive
		return UpperCaseFirstChar(GetErrMessage(abs(fitResult)))
	elseif(fitResult == PSX_DECAY_FIT_ERROR)
		return "Too large tau"
	elseif(fitResult == PSX_DECAY_FIT_INVALID_RANGE_ERROR)
		return "Invalid fit range"
	endif

	BUG("Unknown fitResult")
	return "Unknown fitResult: " + num2str(fitResult)
End

static Function PSX_UpdateAllEventGraph(string win, [variable forceSingleEventUpdate, variable forceAverageUpdate, variable forceBlockIndexUpdate, variable forceSingleEventOffsetUpdate])

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	if(ParamIsDefault(forceSingleEventUpdate))
		forceSingleEventUpdate = 0
	else
		forceSingleEventUpdate = !!forceSingleEventUpdate
	endif

	if(ParamIsDefault(forceAverageUpdate))
		forceAverageUpdate = 0
	else
		forceAverageUpdate = !!forceAverageUpdate
	endif

	if(ParamIsDefault(forceBlockIndexUpdate))
		forceBlockIndexUpdate = 0
	else
		forceBlockIndexUpdate = !!forceBlockIndexUpdate
	endif

	if(ParamIsDefault(forceSingleEventOffsetUpdate))
		forceSingleEventOffsetUpdate = 0
	else
		forceSingleEventOffsetUpdate = !!forceSingleEventOffsetUpdate
	endif

	if(forceBlockIndexUpdate)
		PSX_UpdateBlockIndizes(win)
	endif

	if(forceSingleEventOffsetUpdate)
		PSX_UpdateOffsetInAllEventGraph(win)
	endif

	PSX_UpdateHideStateInAllEventGraph(win)
	PSX_AdaptColorsInAllEventGraph(win, forceSingleEventUpdate = forceSingleEventUpdate, forceAverageUpdate = forceAverageUpdate)
End

/// @brief Update the single event graph
///
/// The passed event index is from the *current* combo.
static Function PSX_UpdateSingleEventGraph(string win, variable index)

	string extSingleGraph, msg
	variable first, last

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)

	WAVE/WAVE eventFit = GetPSXEventFitWaveFromDFR(comboDFR)

	if(!(index >= 0 && index < DimSize(eventFit, ROWS)))
		return NaN
	endif

	PSX_UpdateDisplayedFit(comboDFR, index)

	extSingleGraph = PSX_GetSingleEventGraph(win)

	PSX_UpdateSingleEventTextbox(extSingleGraph, eventIndex = index)

	WAVE psxEvent         = GetPSXEventWaveFromDFR(comboDFR)
	WAVE sweepDataOffFilt = GetPSXSweepDataOffFiltWaveFromDFR(comboDFR)

	[first, last] = PSX_GetSingleEventRange(psxEvent, sweepDataOffFilt, index)

	WAVE singleEventFit = GetPSXSingleEventFitWaveFromDFR(comboDFR)

	if(DimSize(singleEventFit, ROWS) > 0 && HasOneValidEntry(singleEventFit))
		// ensure that the fit is shown
		first = min(first, leftx(singleEventFit))
		last  = max(last, rightx(singleEventFit))
	endif

	sprintf msg, "comboIndex %g, index %g", PSX_GetComboIndexFromDFR(comboDFR), index
	DEBUGPRINT(msg)

	SetAxis/W=$extSingleGraph bottom, first, last
	SetAxis/W=$extSingleGraph/A=2 left
End

/// @brief Update the displayed fit in the single event graph
static Function PSX_UpdateDisplayedFit(DFREF comboDFR, variable index)

	WAVE/WAVE eventFit = GetPSXEventFitWaveFromDFR(comboDFR)

	WAVE/Z singleEventFitFree = eventFit[index]

	WAVE singleEventFit = GetPSXSingleEventFitWaveFromDFR(comboDFR)

	if(WaveExists(singleEventFitFree))
		Redimension/N=(DimSize(singleEventFitFree, ROWS)) singleEventFit
		singleEventFit[] = singleEventFitFree[p]
		CopyScales/P singleEventFitFree, singleEventFit
	else
		FastOp singleEventFit = (NaN)
	endif
End

static Function PSX_UpdateOffsetInAllEventGraph(string win)

	string extAllGraph, specialEventPanel
	variable i, numEvents, offsetMode, first, last, xOffset

	extAllGraph = PSX_GetAllEventGraph(win)

	if(!WindowExists(extAllGraph))
		return NaN
	endif

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	DFREF     workDFR      = PSX_GetWorkingFolder(win)
	WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	if(!WaveExists(comboFolders))
		return NaN
	endif

	specialEventPanel = PSX_GetSpecialPanel(win)

	offsetMode = GetPopupMenuIndex(specialEventPanel, "popupmenu_event_offset")

	for(DFREF comboDFR : comboFolders)
		WAVE psxEvent = GetPSXEventWaveFromDFR(comboDFR)
		numEvents = DimSize(psxEvent, ROWS)

		WAVE sweepDataOffFilt = GetPSXSweepDataOffFiltWaveFromDFR(comboDFR)

		DFREF singleEventDFR = GetPSXSingleEventFolder(comboDFR)

		for(i = 0; i < numEvents; i += 1)
			WAVE/Z/SDFR=singleEventDFR singleEvent = $GetIndexedObjNameDFR(singleEventDFR, COUNTOBJECTS_WAVES, i)
			ASSERT(WaveExists(singleEvent), "Non-existing single event wave")

			[first, last] = PSX_GetSingleEventRange(psxEvent, sweepDataOffFilt, i)

			Duplicate/O/R=(first, last) sweepDataOffFilt, singleEvent

			switch(offsetMode)
				case PSX_HORIZ_OFFSET_ONSET:
					xOffset = IsFinite(psxEvent[i][%$"Onset Time"]) ? (first - psxEvent[i][%$"Onset Time"]) : 0
					break
				case PSX_HORIZ_OFFSET_PEAK:
					xOffset = first - psxEvent[i][%peak_t]
					break
				case PSX_HORIZ_OFFSET_SLEW:
					xOffset = first - psxEvent[i][%$"Slew Rate Time"]
					break
				default:
					ASSERT(0, "Invalid offset mode")
			endswitch

			SetScale/P x, xOffset, DimDelta(singleEvent, ROWS), singleEvent
		endfor
	endfor
End

/// @brief Update trace colors in all event graph
///
/// This needs to be done every time an event changes its state.
///
/// @param win                     window
/// @param forceAverageUpdate      [optional, defaults to false] perform an average
///                                wave update regardless if required or not.
/// @param forceSingleEventUpdate [optional, defaults to false] update every single event trace regardless of its old state
static Function PSX_AdaptColorsInAllEventGraph(string win, [variable forceAverageUpdate, variable forceSingleEventUpdate])

	string extAllGraph, trace, stateType
	variable i, numWaves, stateMatchPattern, numCombos, stateColumn
	variable idx, averageUpdateRequired, numSingleEventTraces

	if(ParamIsDefault(forceAverageUpdate))
		forceAverageUpdate = 0
	else
		forceAverageUpdate = !!forceAverageUpdate
	endif

	if(ParamIsDefault(forceSingleEventUpdate))
		forceSingleEventUpdate = 0
	else
		forceSingleEventUpdate = !!forceSingleEventUpdate
	endif

	extAllGraph = PSX_GetAllEventGraph(win)

	if(!WindowExists(extAllGraph))
		return NaN
	endif

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	DFREF workDFR = PSX_GetWorkingFolder(win)

	WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	if(!WaveExists(comboFolders))
		return NaN
	endif

	numCombos = DimSize(comboFolders, ROWS)

	[WAVE/T keys, WAVE/T values] = PSX_GetTraceSelectionWaves(win, PSX_TUD_TYPE_SINGLE)

	// two indizes are used here:
	// i: index to iterate over trace user data waves (traceNames and XXXFromTraces)
	// indexMapper[i]: psx event index used inside a specific combo (psxEventRefWave and psxColorsRefWave)

	// all indexed by i
	WAVE/Z/T traceNames = TUD_GetUserDataAsWave(extAllGraph, "tracename", keys = keys, values = values)
	ASSERT(WaveExists(traceNames), "Expected at least one entry")

	WAVE/T hideTracesFromTraces   = TUD_GetUserDataAsWave(extAllGraph, PSX_TUD_TRACE_HIDDEN_KEY, keys = keys, values = values)
	WAVE/T eventStateFromTraces   = TUD_GetUserDataAsWave(extAllGraph, PSX_TUD_EVENT_STATE_KEY, keys = keys, values = values)
	WAVE/T fitStateFromTraces     = TUD_GetUserDataAsWave(extAllGraph, PSX_TUD_FIT_STATE_KEY, keys = keys, values = values)
	WAVE/T eventIndexFromTraces   = TUD_GetUserDataAsWave(extAllGraph, PSX_TUD_EVENT_INDEX_KEY, keys = keys, values = values)
	WAVE/T comboIndizesFromTraces = TUD_GetUserDataAsWave(extAllGraph, PSX_TUD_COMBO_INDEX, keys = keys, values = values)
	numSingleEventTraces = DimSize(eventIndexFromTraces, ROWS)

	// wave reference wave with psxEvents wave indexed by *comboIndex*
	// the waves therein must be indexed via indexMapper[i]
	Make/N=(numCombos)/FREE/WAVE psxEventRefWave = GetPSXEventWaveFromDFR(comboFolders[p])
	Make/N=(numCombos)/FREE/WAVE psxColorsRefWave = GetPSXEventColorsWaveFromDFR(comboFolders[p])

	WAVE checkboxActive = PSX_GetCheckboxStatesFromSpecialPanel(win, PSX_TUD_TYPE_SINGLE)

	stateMatchPattern = PSX_GetStateMatchPattern(checkboxActive)

	// all indexed by i
	Make/FREE/N=(numSingleEventTraces) hideTracesNew, eventStateNew, fitStateNew, differentHideState, differentEventState, indexMapper
	Make/FREE/N=(numSingleEventTraces, 4) colorsNew

	MultiThread indexMapper = str2num(eventIndexFromTraces[p])

	stateColumn = FindDimLabel(psxEventRefWave[0], COLS, "Event manual QC call")
	MultiThread eventStateNew = WaveRef(psxEventRefWave, row = str2num(comboIndizesFromTraces[p]))[indexMapper[p]][stateColumn]

	stateColumn = FindDimLabel(psxEventRefWave[0], COLS, "Fit manual QC call")
	MultiThread fitStateNew = WaveRef(psxEventRefWave, row = str2num(comboIndizesFromTraces[p]))[indexMapper[p]][stateColumn]

	stateType = PSX_GetStateTypeFromSpecialPanel(win)

	strswitch(stateType)
		case PSX_TUD_FIT_STATE_KEY:
			WAVE   stateNew = fitStateNew
			WAVE/T stateOld = fitStateFromTraces
			break
		case PSX_TUD_EVENT_STATE_KEY:
			WAVE   stateNew = eventStateNew
			WAVE/T stateOld = eventStateFromTraces
			break
		default:
			ASSERT(0, "Invalid state type")
	endswitch

	[WAVE acceptColors, WAVE rejectColors, WAVE undetColors] = PSX_GetEventColors()

	MultiThread hideTracesNew[] = (stateNew[p] & stateMatchPattern) == 0
	MultiThread colorsNew[][] = PSX_SelectColor(stateNew[p], acceptColors, rejectColors, undetColors)[q]

	if(forceSingleEventUpdate)

		ACC_HideTracesAndColor(extAllGraph, traceNames, numSingleEventTraces, hideTracesNew, colorsNew)

		WAVE indexHelper = hideTracesNew
		indexHelper[] = TUD_SetUserDataFromWaves(extAllGraph, traceNames[i],                                                    \
		                                         {PSX_TUD_FIT_STATE_KEY, PSX_TUD_EVENT_STATE_KEY, PSX_TUD_TRACE_HIDDEN_KEY},    \
		                                         {num2str(fitStateNew[p]), num2str(eventStateNew[p]), num2str(hideTracesNew[p])})

	else
		MultiThread differentHideState = (str2num(hideTracesFromTraces[p]) != hideTracesNew[p])
		MultiThread differentEventState = (str2num(stateOld[p]) != stateNew[p])

		for(i = 0; i < numSingleEventTraces; i += 1)
			if(!differentHideState[i] && !differentEventState[i])
				// nothing to do
				continue
			endif

			trace = traceNames[i]

			// printf "Trace %s changed, differentHideState %d, differentEventState %d, new state %s\r", trace, differentHideState[i], differentEventState[i], PSX_StateToString(stateNew[i])

			if(differentHideState[i] && differentEventState[i])
				averageUpdateRequired = 1

				ModifyGraph/W=$extAllGraph hideTrace($trace)=(hideTracesNew[i]), rgb($trace)=(colorsNew[i][0], colorsNew[i][1], colorsNew[i][2], colorsNew[i][3])

				TUD_SetUserDataFromWaves(extAllGraph, trace,                                                            \
				                         {PSX_TUD_FIT_STATE_KEY, PSX_TUD_EVENT_STATE_KEY, PSX_TUD_TRACE_HIDDEN_KEY},    \
				                         {num2str(fitStateNew[i]), num2str(eventStateNew[i]), num2str(hideTracesNew[i])})

			elseif(differentHideState[i])
				ModifyGraph/W=$extAllGraph hideTrace($trace)=(hideTracesNew[i])

				TUD_SetUserDataFromWaves(extAllGraph, trace,         \
				                         {PSX_TUD_TRACE_HIDDEN_KEY}, \
				                         {num2str(hideTracesNew[i])})
			elseif(differentEventState[i])
				averageUpdateRequired = 1

				WAVE color = PSX_SelectColor(stateNew[i], acceptColors, rejectColors, undetColors)

				ModifyGraph/W=$extAllGraph rgb($trace)=(colorsNew[i][0], colorsNew[i][1], colorsNew[i][2], colorsNew[i][3])

				TUD_SetUserDataFromWaves(extAllGraph, trace,                                 \
				                         {PSX_TUD_FIT_STATE_KEY, PSX_TUD_EVENT_STATE_KEY},   \
				                         {num2str(fitStateNew[i]), num2str(eventStateNew[i])})
			else
				ASSERT(0, "Impossible case")
			endif
		endfor
	endif

	if(averageUpdateRequired || forceAverageUpdate)
		PSX_UpdateAverageTraces(win, comboIndizesFromTraces, stateNew, indexMapper, comboFolders)
	endif
End

/// @brief Update the contents of the average waves for the all event graph
static Function PSX_UpdateAverageTraces(string win, WAVE/T comboIndizesFromTraces, WAVE stateNew, WAVE indexMapper, WAVE/DF comboFolders)

	variable i, idx, numEvents, eventState, start, stop
	variable acceptIndex, rejectIndex, undetIndex, extractStartAbs, extractStopAbs, fitStartAbs
	string extAllGraph, name, path

	extAllGraph = PSX_GetAllEventGraph(win)

	numEvents = DimSize(stateNew, ROWS)

	Make/WAVE/FREE/N=(numEvents) contAverageAll, contAverageAccept, contAverageReject, contAverageUndet
	Make/FREE=1/D/N=(numEvents) eventOnsetTime, eventPeakTime, eventStopTime, eventKernelAmp

	for(i = 0; i < numEvents; i += 1)
		// i: index of the displayed events across multiple combos
		// idx: index in a single combo
		idx = indexMapper[i]

		DFREF comboDFR = comboFolders[str2num(comboIndizesFromTraces[i])]

		DFREF singleEventDFR = GetPSXSingleEventFolder(comboDFR)

		name = PSX_FormatSingleEventWaveName(idx)

		WAVE/SDFR=singleEventDFR singleEvent = $name

		WAVE sweepDataOffFilt = GetPSXSweepDataOffFiltWaveFromDFR(comboDFR)
		WAVE psxEvent         = GetPSXEventWaveFromDFR(comboDFR)

		// single event waves are zeroed in x-direction to extractStartAbs
		[extractStartAbs, extractStopAbs] = PSX_GetSingleEventRange(psxEvent, sweepDataOffFilt, idx)
		eventStopTime[i]                  = extractStopAbs - extractStartAbs
		eventOnsetTime[i]                 = psxEvent[idx][%$"Onset Time"] - extractStartAbs
		eventPeakTime[i]                  = psxEvent[idx][%peak_t] - extractStartAbs

		path              = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_KERNEL
		eventKernelAmp[i] = JWN_GetNumberFromWaveNote(psxEvent, path + "/amp")

		switch(stateNew[i])
			case PSX_ACCEPT:
				contAverageAccept[acceptIndex] = singleEvent
				acceptIndex                   += 1
				break
			case PSX_REJECT:
				contAverageReject[rejectIndex] = singleEvent
				rejectIndex                   += 1
				break
			case PSX_UNDET:
				contAverageUndet[undetIndex] = singleEvent
				undetIndex                  += 1
				break
			default:
				ASSERT(0, "impossible state")
		endswitch

		contAverageAll[i] = singleEvent
	endfor

	DFREF averageDFR = PSX_GetAverageFolder(win)

	PSX_UpdateAverageWave(contAverageAccept, acceptIndex, averageDFR, PSX_ACCEPT)
	PSX_FitAverage(win, averageDFR, eventOnsetTime, eventPeakTime, eventStopTime, eventKernelAmp, stateNew, PSX_ACCEPT)

	PSX_UpdateAverageWave(contAverageReject, rejectIndex, averageDFR, PSX_REJECT)
	PSX_FitAverage(win, averageDFR, eventOnsetTime, eventPeakTime, eventStopTime, eventKernelAmp, stateNew, PSX_REJECT)

	PSX_UpdateAverageWave(contAverageUndet, undetIndex, averageDFR, PSX_UNDET)
	PSX_FitAverage(win, averageDFR, eventOnsetTime, eventPeakTime, eventStopTime, eventKernelAmp, stateNew, PSX_UNDET)

	PSX_UpdateAverageWave(contAverageAll, numEvents, averageDFR, PSX_ALL)
	PSX_FitAverage(win, averageDFR, eventOnsetTime, eventPeakTime, eventStopTime, eventKernelAmp, stateNew, PSX_ALL)
End

/// @brief Helper function to update the average waves for the all event graph
static Function PSX_UpdateAverageWave(WAVE/WAVE sourceWaves, variable numFilledSourceWaves, DFREF averageDFR, variable state)

	Redimension/N=(numFilledSourceWaves) sourceWaves
	WAVE average = GetPSXAverageWave(averageDFR, state)
	if(numFilledSourceWaves > 0)
		CalculateAverage(sourceWaves, GetWavesDataFolderDFR(average), NameOfWave(average), skipCRC = 1, writeSourcePaths = 0)
	else
		FastOp average = (NaN)
	endif
End

static Function/DF PSX_GetAverageFolder(string win)

	if(PSX_GetRestrictEventsToCurrentCombo(win))
		return PSX_GetCurrentComboFolder(win)
	endif

	return PSX_GetWorkingFolder(win)
End

Function PSX_UpdateInfoButtonHelp(string win, WAVE/T help, variable state)

	string ctrl

	ctrl = "button_fit_results_" + LowerStr(PSX_StateToString(state))

	UpdateInfoButtonHelp(win, ctrl, help)
End

Function PSX_IsFitEnabled(string win, variable state)

	string ctrl

	ctrl = "checkbox_events_fit_" + LowerStr(PSX_StateToString(state))

	return GetCheckBoxState(win, ctrl)
End

Function PSX_FilterFitAverageParameters(WAVE input, WAVE newState, variable state, [variable requireFiniteResult])

	variable numEvents = DimSize(newState, ROWS)

	if(ParamIsDefault(requireFiniteResult))
		requireFiniteResult = 0
	else
		requireFiniteResult = !!requireFiniteResult
	endif

	Make/FREE/N=(numEvents) result = (newState[p] & state) ? input[p] : NaN

	WAVE/Z resultClean = ZapNaNs(result)
	if(WaveExists(resultClean))
		return mean(resultClean)
	endif

	ASSERT(!requireFiniteResult, "Could not find any events with finite " + NameOfWave(input))

	return Inf
End

/// @brief Compute and store fitted average traces for a given event state
///
/// Fits average, rise, and decay components of events marked with the specified state.
/// If fitting is disabled via GUI checkbox, outputs are set to NaN.
///
/// @param win               Name of the calling window (used to access GUI settings)
/// @param averageDFR        Data folder reference containing the average waves
/// @param eventOnsetTime    Wave of event onset times
/// @param eventPeakTime     Wave of event peak times
/// @param eventStopTime     Wave of event stop times
/// @param eventKernelAmp    Wave of event amplitudes (used to infer polarity)
/// @param newState          Wave containing per-event classification bit flags
/// @param state             Bit flag representing the target event state (e.g., PSX_ACCEPT)
static Function PSX_FitAverage(string win, DFREF averageDFR, WAVE eventOnsetTime, WAVE eventPeakTime, WAVE eventStopTime, WAVE eventKernelAmp, WAVE newState, variable state)

	string specialEventPanel, str, htmlStr, rawCode, browser, msg, fitFunc
	variable err, numAveragePoints, start, stop, meanStopTime, meanOnsetTime, meanPeakTime, meanKernelAmp
	variable xStart, xEnd, yStart, yEnd, riselowerThreshold, riseAndDecayUpperThreshold
	variable extrema, extrema_t, edge, riseStart, riseStop, decayStart, decayStop, wTau, backwardEdge

	WAVE AverageFit      = GetPSXAverageFitWaveFromDFR(averageDFR, state)
	WAVE RiseAverageFit  = GetPSXRiseAverageFitWaveFromDFR(averageDFR, state)
	WAVE DecayAverageFit = GetPSXDecayAverageFitWaveFromDFR(averageDFR, state)

	specialEventPanel = PSX_GetSpecialPanel(win)

	Make/T/FREE help = {PSX_AVERAGE_FIT_RESULT_DEFAULT_HELP}
	PSX_UpdateInfoButtonHelp(specialEventPanel, help, state)

	if(!PSX_IsFitEnabled(specialEventPanel, state))
		FastOp AverageFit = (NaN)
		FastOp RiseAverageFit = (NaN)
		FastOp DecayAverageFit = (NaN)
		return NaN
	endif

	WAVE average = GetPSXAverageWave(averageDFR, state)
	numAveragePoints = DimSize(average, ROWS)

	if(numAveragePoints == 0 || !HasOneValidEntry(average))
		FastOp AverageFit = (NaN)
		FastOp RiseAverageFit = (NaN)
		FastOp DecayAverageFit = (NaN)
		return NaN
	endif

	Redimension/N=(numAveragePoints) AverageFit, RiseAverageFit, DecayAverageFit
	FastOp AverageFit = (NaN)
	FastOp RiseAverageFit = (NaN)
	FastOp DecayAverageFit = (NaN)
	CopyScales average, AverageFit, RiseAverageFit, DecayAverageFit

	meanOnsetTime = PSX_FilterFitAverageParameters(eventOnsetTime, newState, state)
	meanStopTime = PSX_FindDominantStopTimePeak(eventStopTime, newState, state, eventKernelAmp,  binwidth = 0.1, showplot = 1)
//	meanStopTime = PSX_FindDominantStopTimePeak(eventStopTime, newState, state)
	meanKernelAmp = PSX_FilterFitAverageParameters(eventKernelAmp, newState, state, requireFiniteResult = 1)
	meanPeakTime  = PSX_FilterFitAverageParameters(eventPeakTime, newState, state, requireFiniteResult = 1)

	WaveStats/M=1/Q average

	if(meanKernelAmp > 0)
		extrema      = V_max
		extrema_t    = V_maxLoc
		edge         = FINDLEVEL_EDGE_INCREASING
		backwardEdge = FINDLEVEL_EDGE_DECREASING
	elseif(meanKernelAmp < 0)
		extrema      = V_min
		extrema_t    = V_minLoc
		edge         = FINDLEVEL_EDGE_DECREASING
		backwardEdge = FINDLEVEL_EDGE_INCREASING
	else
		ASSERT(0, "Invalid kernel amp")
	endif

	riselowerThreshold         = GetSetVariable(specialEventPanel, "setvar_fit_start_amplitude") * PERCENT_TO_ONE
	riseAndDecayUpperThreshold = 0.9
//	FindLevel/EDGE=(edge)/Q average, (riselowerThreshold * extrema)
	variable onsetX = PSX_CalculateOnsetTimeFromAvg(average, meanKernelAmp, meanOnsetTime, meanPeakTime)
	assert(!isNaN(onsetX), "onset time calculation must cannot be Nan")
	variable level = (riseLowerThreshold * (extrema - average(onsetX))	) + average(onsetX)
	FindLevel/EDGE=(edge)/r=(extrema_t, onsetX)/Q average, level
	riseStart = V_LevelX
	FindLevel/EDGE=(edge)/Q average, (riseAndDecayUpperThreshold * extrema)
	riseStop = V_levelX

	FindLevel/EDGE=(backwardEdge)/R=(Inf, 0)/Q average, (riseAndDecayUpperThreshold * extrema)
	decayStart = V_levelX

	decayStop = min(IndexToScale(average, DimSize(average, ROWS) - 1, ROWS), meanStopTime)

	AssertOnAndClearRTError()

	Make/FREE/T/N=(11, 2) InputAvg, InputRise, InputDecay

	Make/FREE/D/N=5 coefWave
	Make/FREE/T coeffNames = {"y0", "A", "tau1", "tau2", "X0"}
	CurveFit/M=0/Q/N=2 dblexp_peak, kwCWave=coefWave, average(riseStart, decayStop)/D=AverageFit; err = GetRTError(1)

	InputAvg[0][0, 1] = {{"Function"}, {"dblexp_peak"}}
	InputAvg[1][0, 1] = {{"ChiSq"}, {num2strHighPrec(V_chiSq)}}
	InputAvg[2, 6][0] = coeffNames[p - 2]
	InputAvg[2, 6][1] = num2strHighPrec(coefWave[p - 2])
	InputAvg[7][0, 1] = {{"Maximum"}, {num2strHighPrec(WaveMax(AverageFit))}}
	InputAvg[8][0, 1] = {{"State source"}, {PSX_GetStateTypeFromSpecialPanel(win)}}
	InputAvg[9][0, 1] = {{"Current combo"}, {ToTrueFalse(PSX_GetrestrictEventsToCurrentCombo(win))}}

	Make/FREE/D/N=5 coefWave
	Make/FREE/T coeffNames = {"y0", "A1", "tau1", "A2", "tau2"}
	CurveFit/M=0/Q/N=1 dblexp_XOffset, kwCWave=coefWave, average(riseStart, riseStop)/D=RiseAverageFit; err = GetRTError(1)

	wTau = ((coefWave[1] * coefWave[2] + coefWave[3] * coefWave[4]) / (coefWave[1] + coefWave[3]))

	InputRise[0][0, 1]  = {{"Function"}, {"dblexp_XOffset rise"}}
	InputRise[1][0, 1]  = {{"ChiSq"}, {num2strHighPrec(V_chiSq)}}
	InputRise[2, 6][0]  = coeffNames[p - 2]
	InputRise[2, 6][1]  = num2strHighPrec(coefWave[p - 2])
	InputRise[7][0, 1]  = {{"Maximum"}, {num2strHighPrec(WaveMax(RiseAverageFit))}}
	InputRise[8][0, 1]  = {{"weighted tau"}, {num2strHighPrec(wTau)}}
	InputRise[9][0, 1]  = {{"State source"}, {PSX_GetStateTypeFromSpecialPanel(win)}}
	InputRise[10][0, 1] = {{"Current combo"}, {ToTrueFalse(PSX_GetrestrictEventsToCurrentCombo(win))}}

	Make/FREE/D/N=5 coefWave
	Make/FREE/T coeffNames = {"y0", "A1", "tau1", "A2", "tau2"}
	CurveFit/M=0/Q/N=1 dblexp_XOffset, kwCWave=coefWave, average(decayStart, decayStop)/D=DecayAverageFit; err = GetRTError(1)

	wTau = ((coefWave[1] * coefWave[2] + coefWave[3] * coefWave[4]) / (coefWave[1] + coefWave[3]))

	InputDecay[0][0, 1]  = {{"Function"}, {"dblexp_XOffset decay"}}
	InputDecay[1][0, 1]  = {{"ChiSq"}, {num2strHighPrec(V_chiSq)}}
	InputDecay[2, 6][0]  = coeffNames[p - 2]
	InputDecay[2, 6][1]  = num2strHighPrec(coefWave[p - 2])
	InputDecay[7][0, 1]  = {{"Maximum"}, {num2strHighPrec(WaveMax(DecayAverageFit))}}
	InputDecay[8][0, 1]  = {{"weighted tau"}, {num2strHighPrec(wTau)}}
	InputDecay[9][0, 1]  = {{"State source"}, {PSX_GetStateTypeFromSpecialPanel(win)}}
	InputDecay[10][0, 1] = {{"Current combo"}, {ToTrueFalse(PSX_GetrestrictEventsToCurrentCombo(win))}}

	sprintf msg, "Fit in the range [%g, %g] finished with %d (%s)\r", riseStart, decayStop, err, GetErrMessage(err)
	DEBUGPRINT(msg)

	if(err)
		return NaN
	endif

	Concatenate/NP/FREE {InputAvg, InputRise, InputDecay}, input

	PSX_UpdateInfoButtonHelp(specialEventPanel, input, state)

	browser = SFH_GetBrowserForFormulaGraph(win)
	PSX_StoreIntoResultsWave(browser, SFH_RESULT_TYPE_PSX_MISC, input, "accepted average fit results")

	WAVE AverageFitResults = GetPSXAverageFitResultsWaveFromDFR(averageDFR, state)
	Redimension/N=(0, -1) AverageFitResults

	Concatenate/NP=(ROWS) {InputAvg, InputRise, InputDecay}, AverageFitResults
End

//// @brief Return most frequent stop time peak, ignoring edge bins and bins < decayTau. Falls back to 2×decayTau.
/// @param stopTimes     Wave of event stop times (with kernel decayTau in wave note)
/// @param newState      Bitmask wave of per-event state
/// @param state         Target state value (e.g., PSX_ACCEPT)
/// @param [binWidth]    Histogram bin width (default = 0.1)
/// @param [showPlot]    Whether to display the histogram (default = 0)
Function PSX_FindDominantStopTimePeak(WAVE stopTimes, WAVE newState, variable state, WAVE psxKernel [, variable binWidth, variable showPlot])

	variable i, n = DimSize(stopTimes, ROWS)
	variable count = 0

	if(ParamIsDefault(binWidth))
		binWidth = 0.1
	endif
	if(ParamIsDefault(showPlot))
		showPlot = 0
	endif

	// Step 1: Filter stopTimes by state
	Make/FREE/D/N=(n) tmp = NaN
	for(i = 0; i < n; i += 1)
		if((newState[i] & state) && IsFinite(stopTimes[i]))
			tmp[count] = stopTimes[i]
			count += 1
		endif
	endfor

	if(count == 0)
		if(showPlot)
			Print "No valid stop times for selected state."
		endif
		return NaN
	endif

	Redimension/N=(count) tmp

	// Step 2: Bin setup
	variable minVal = WaveMin(tmp)
	variable maxVal = WaveMax(tmp)

	if(minVal == maxVal)
		if(showPlot)
			Print "All stop times identical. Using ", minVal
		endif
		return minVal
	endif

	variable nBins = ceil((maxVal - minVal) / binWidth)
	if(nBins < 5)
		if(showPlot)
			Print "Too few bins. Returning NaN."
		endif
		return NaN
	endif

	// Step 3: Create histogram
	KillWaves/Z root:PSX_hist, root:PSX_histX
	Make/o/D/N=(nBins) root:PSX_hist, root:PSX_histX
	WAVE hist = root:PSX_hist
	WAVE histX = root:PSX_histX

	Histogram/B={minVal, binWidth, nBins}/DEST=hist tmp
	histX[] = minVal + binWidth * (p + 0.5)
	Smooth 3, hist

	// Step 4: Optional plot
	if(showPlot)
//		Display/K=1/N=PSX_StopTimeHistogram
		
		if (!WindowExists("PSX_StopTimeHistogram"))  // 1 = graph window
			Display/N=PSX_StopTimeHistogram
		else
			DoWindow/F PSX_StopTimeHistogram  // Bring to front if already exists
//			AppendToGraph/W=PSX_StopTimeHistogram stopTimes vs stopTimeHist
		endif
		
		AppendToGraph/W=PSX_StopTimeHistogram hist vs histX
		ModifyGraph mode=4, lsize=2, rgb=(0,0,65535)
		ModifyGraph grid=1, mirror=1, axThick=1.5
		Label bottom "Stop Time"
		Label left "Event Count"
		SetAxis/A
	endif

	// Step 5: Try to find decayTau
	variable decayTau = GetKernelDecayTau()
	variable validTau = IsFinite(decayTau)

	// Step 6: Find max internal peak above decayTau
	variable peakMaxVal = -Inf, maxIdx = -1
	for(i = 1; i < nBins - 1; i += 1)
		if(validTau && histX[i] < (2*decayTau))
			continue
		endif
		if(hist[i] > peakMaxVal)
			peakMaxVal = hist[i]
			maxIdx = i
		endif
	endfor

	// Step 7: Return result
	if(maxIdx >= 0)
		if(showPlot)
			Print "Dominant peak at ", histX[maxIdx], " (passes decayTau filter)"
		endif
		return histX[maxIdx]
	endif

	// Step 8: Fallback
	if(validTau)
		if(showPlot)
			Print "No peak ≥ decayTau found. Fallback to 2 × decayTau = ", 2 * decayTau
		endif
		return 2 * decayTau
	else
		if(showPlot)
			Print "No peak found. DecayTau not available. Returning NaN."
		endif
		return NaN
	endif
End


static Function PSX_StoreIntoResultsWave(string browser, variable resultType, WAVE data, string name)

	string lastBrowser
	string rawCode = NONE

	WAVE/T formulaGraphs = SFH_GetFormulaGraphs()

	if(DimSize(formulaGraphs, ROWS) > 1)
		WAVE/T textualResultsValues = GetLogbookWaves(LBT_RESULTS, LBN_TEXTUAL_VALUES)
		lastBrowser = GetLastSettingTextIndep(textualResultsValues, NaN, "Sweep Formula browser", UNKNOWN_MODE)

		if(cmpstr(browser, lastBrowser))
			// don't add an entry as the last entry was from another sweepbrowser/formula graph
			printf "There are multiple sweep/databrowsers open but only one instance can write into the results wave.\r"
			printf "The last instance to write was \"%s\".\r", lastBrowser
			ControlWindowToFront()
			return NaN
		endif
	endif

	if(IsWaveRefWave(data))
		WAVE/WAVE container = data
	else
		Make/N=1/WAVE/FREE container = {data}
	endif

	[WAVE/T keys, WAVE/T values] = SFH_CreateResultsWaveWithCode(browser, rawCode,        \
	                                                             resultType = resultType, \
	                                                             data = container,        \
	                                                             name = name)

	ED_AddEntriesToResults(values, keys, SWEEP_FORMULA_PSX)
End

static Function/S PSX_GetPSXParameters(variable jsonID, variable cacheKeyType)

	string   psxParameters
	variable subJsonID

	subJsonID = JSON_GetJSON(jsonID, SF_META_USER_GROUP + PSX_JWN_PARAMETERS, ignoreErr = 1)

	switch(cacheKeyType)
		case PSX_CACHE_KEY_EVENTS:
		case PSX_CACHE_KEY_ANALYZE_PEAKS:
			// do nothing
			break
		default:
			ASSERT(0, "Unknown cache key type")
	endswitch

	psxParameters = JSON_Dump(subJsonID, indent = -1)
	ASSERT(!IsEmpty(psxParameters), "Could not dump the psx parameters")

	JSON_Release(subJsonID)

	return psxParameters
End

static Function PSX_StoreEventsIntoCache(WAVE psxEvent)

	string cacheKey, comboKey, psxParameters
	variable jsonID

	comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)
	jsonID   = JWN_GetWaveNoteAsJSON(psxEvent)
	ASSERT(jsonID >= 0, "Invalid JSON document")
	psxParameters = PSX_GetPSXParameters(jsonID, PSX_CACHE_KEY_EVENTS)
	JSON_Release(jsonID)
	cacheKey = CA_PSXEventsKey(comboKey, psxParameters)

	CA_StoreEntryIntoCache(cacheKey, psxEvent)
End

static Function/WAVE PSX_LoadEventsFromCache(string comboKey, string psxParameters)

	string key

	key = CA_PSXEventsKey(comboKey, psxParameters)

	WAVE/Z psxEvent = CA_TryFetchingEntryFromCache(key)

	if(!WaveExists(psxEvent))
		return $""
	endif

	WAVE/Z psxEventUpgraded = UpgradePSXEventWave(psxEvent)

	return psxEventUpgraded
End

/// @brief Return the trace user data keys/values wave for the given trace type
///
/// @param win          Window
/// @param traceType    One of @ref AllEventGraphTraceType
/// @param respectBlock [optional, defaults to true] Restrict the traces to the currently selected block
static Function [WAVE/T keys, WAVE/T values] PSX_GetTraceSelectionWaves(string win, string traceType, [variable respectBlock])

	string comboKey, blockIndexAsStr, specialEventPanel
	variable numEntries

	if(ParamIsDefault(respectBlock))
		respectBlock = 1
	else
		respectBlock = !!respectBlock
	endif

	if(PSX_GetRestrictEventsToCurrentCombo(win))
		DFREF comboDFR = PSX_GetCurrentComboFolder(win)
		comboKey = PSX_GetComboKeyFromDFR(comboDFR)

		Make/FREE/T keys = {PSX_TUD_TYPE_KEY, PSX_TUD_COMBO_KEY}
		Make/FREE/T values = {traceType, comboKey}
	else
		strswitch(traceType)
			case PSX_TUD_TYPE_SINGLE:
				Make/FREE/T keys = {PSX_TUD_TYPE_KEY}
				Make/FREE/T values = {traceType}
				break
			case PSX_TUD_TYPE_AVERAGE:
				// only gather the gobal average waves
				Make/FREE/T keys = {PSX_TUD_TYPE_KEY, PSX_TUD_COMBO_KEY}
				Make/FREE/T values = {traceType, PSX_TUD_AVERAGE_ALL_COMBO_KEY}
				break
			default:
				ASSERT(0, "Invalid state type")
		endswitch
	endif

	if(respectBlock && !cmpstr(traceType, PSX_TUD_TYPE_SINGLE))
		specialEventPanel = PSX_GetSpecialPanel(win)
		blockIndexAsStr   = GetPopupMenuString(specialEventPanel, "popup_block")

		numEntries = DimSize(keys, ROWS)
		Redimension/N=(numEntries + 1) keys, values
		keys[numEntries]   = PSX_TUD_BLOCK_INDEX
		values[numEntries] = blockIndexAsStr
	endif

	return [keys, values]
End

/// @brief Update the hide state of all traces in the all event graph
static Function PSX_UpdateHideStateInAllEventGraph(string win)

	string extAllGraph

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	extAllGraph = PSX_GetAllEventGraph(win)

	// hide all traces
	ModifyGraph/W=$extAllGraph hideTrace=1

	PSX_UpdateHideStateInAllEventGraphImpl(win, PSX_TUD_TYPE_SINGLE)
	PSX_UpdateHideStateInAllEventGraphImpl(win, PSX_TUD_TYPE_AVERAGE)
End

static Function PSX_UpdateHideStateInAllEventGraphImpl(string win, string traceType)

	variable numEntries, stateMatchPattern, allSelected
	string extAllGraph, stateType, comboKey

	WAVE states = PSX_GetStates(withAllState = 1)

	[WAVE/T keys, WAVE/T values] = PSX_GetTraceSelectionWaves(win, traceType)

	WAVE checkboxActive = PSX_GetCheckboxStatesFromSpecialPanel(win, traceType)

	stateMatchPattern = PSX_GetStateMatchPattern(checkboxActive)

	extAllGraph = PSX_GetAllEventGraph(win)

	WAVE/Z/T traceNames = TUD_GetUserDataAsWave(extAllGraph, "tracename", keys = keys, values = values)
	ASSERT(WaveExists(traceNames), "Expected at least one entry")

	numEntries = DimSize(traceNames, ROWS)

	stateType = PSX_GetStateTypeFromSpecialPanel(win)

	WAVE/T currentState = TUD_GetUserDataAsWave(extAllGraph, stateType, keys = keys, values = values)

	allSelected = checkboxActive[%all]

	Make/FREE/N=(numEntries) hideState
	MultiThread/NT=(numEntries < 128) hideState[] = !(((str2num(currentState[p]) == PSX_ALL) ? allSelected : (stateMatchPattern & str2num(currentState[p]))))

	ACC_HideTracesPerTrace(extAllGraph, traceNames, numEntries, hideState)

	Make/FREE/N=(numEntries) indexHelper

	indexHelper[] = TUD_SetUserData(extAllGraph, traceNames[p], PSX_TUD_TRACE_HIDDEN_KEY, num2str(hideState))
End

static Function PSX_UpdateBlockIndizes(string win)

	string extAllGraph, comboKey
	variable numBlocks
	variable numEntries, i, blockSize, first, last

	extAllGraph = PSX_GetAllEventGraph(win)
	numBlocks   = PSX_CalculateNumberOfBlocks(win)

	[WAVE/T keys, WAVE/T values] = PSX_GetTraceSelectionWaves(extAllGraph, PSX_TUD_TYPE_SINGLE, respectBlock = 0)

	WAVE/Z/T traceNames = TUD_GetUserDataAsWave(extAllGraph, "tracename", keys = keys, values = values)
	ASSERT(WaveExists(traceNames), "Expected at least one entry")

	numEntries = DimSize(traceNames, ROWS)

	Make/FREE/N=(numEntries) indexHelper

	if(numEntries > numBlocks)
		blockSize = floor(numEntries / numBlocks)
	else
		blockSize = 1
	endif

	for(i = 0; i < numBlocks; i += 1)
		first = i * blockSize

		if(i == (numBlocks - 1))
			// take the rest of the events into the last block
			last = numEntries - 1
		else
			last = (i + 1) * blockSize - 1
		endif

		indexHelper[first, last] = TUD_SetUserData(extAllGraph, traceNames[p], PSX_TUD_BLOCK_INDEX, num2str(i))

		if(last >= (numEntries - 1))
			// assigned all events
			// update numBlocks
			numBlocks = i + 1
			break
		endif
	endfor

	PSX_WriteBlockNumberAsUserData(win, numBlocks)
End

static Function PSX_WriteBlockNumberAsUserData(string win, variable numBlocks)

	string specialEventPanel
	variable selectedBlock, lastValidBlock

	specialEventPanel = PSX_GetSpecialPanel(win)

	SetControlUserData(specialEventPanel, "popup_block", PSX_UD_NUM_BLOCKS, num2istr(numBlocks))

	// check to see if a now invalid block is selected
	selectedBlock = str2num(GetPopupMenuString(specialEventPanel, "popup_block"))
	WAVE availableBlocks = ListToNumericWave(PSX_GetAllEventBlockNumbers(win), ";")

	lastValidBlock = WaveMax(availableBlocks)

	if(selectedBlock > lastValidBlock)
		PGC_SetAndActivateControl(specialEventPanel, "popup_block", val = lastValidBlock)
	endif
End

static Function PSX_CalculateNumberOfBlocks(string win)

	string specialEventPanel
	variable blockSize, numBlocks

	specialEventPanel = PSX_GetSpecialPanel(win)
	blockSize         = GetSetVariable(specialEventPanel, "setvar_event_block_size")
	ASSERT(blockSize > 0 && blockSize <= 100, "Invalid block size")

	numBlocks = ceil(100 / blockSize)

	return numBlocks
End

Function/S PSX_GetAllEventBlockNumbers(string win)

	string   specialEventPanel
	variable numBlocks

	specialEventPanel = PSX_GetSpecialPanel(win)
	numBlocks         = str2num(GetUserData(specialEventPanel, "popup_block", PSX_UD_NUM_BLOCKS))
	ASSERT(IsInteger(numBlocks) && numBlocks > 0, "Invalid block size")

	return BuildList("%d", 0, 1, numBlocks)
End

/// @brief Return a bit pattern to match fit/event state
///
/// @param active Wave with at least 3 entries denoting which states are active
static Function PSX_GetStateMatchPattern(WAVE active)

	ASSERT(PSX_LAST == 0x04, "Code needs adaptation")

	return (active[%accept] ? PSX_ACCEPT : 0) | (active[%reject] ? PSX_REJECT : 0) | (active[%undetermined] ? PSX_UNDET : 0)
End

/// @brief Add the total number of required traces to the all event graph
///
/// The number of average waves is 4 due to the number of different states, see @ref PSXStates.
///
/// - Single event traces for all combinations
/// - 4 average waves plus 3 waves for the accepted fits for *each* combination
/// - 4 average waves plus 3 waves for the accepted fits for the global average across all combinations
static Function PSX_AppendTracesToAllEventGraph(string win)

	variable i, numEvents, state, idx, comboIndex
	string trace, extAllGraph, comboKey

	extAllGraph = PSX_GetAllEventGraph(win)

	WAVE states = PSX_GetStates(withAllState = 1)

	[WAVE acceptColors, WAVE rejectColors, WAVE undetColors] = PSX_GetEventColors()

	DFREF     workDFR      = PSX_GetWorkingFolder(win)
	WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	if(!WaveExists(comboFolders))
		return NaN
	endif

	Make/FREE/T traceUserDataKeys = {PSX_TUD_EVENT_INDEX_KEY, PSX_TUD_FIT_STATE_KEY, PSX_TUD_EVENT_STATE_KEY, PSX_TUD_TRACE_HIDDEN_KEY, PSX_TUD_TYPE_KEY, PSX_TUD_COMBO_KEY, PSX_TUD_BLOCK_INDEX, PSX_TUD_COMBO_INDEX}

	for(DFREF comboDFR : comboFolders)

		WAVE eventColors = GetPSXEventColorsWaveFromDFR(comboDFR)

		WAVE psxEvent = GetPSXEventWaveFromDFR(comboDFR)
		numEvents = DimSize(psxEvent, ROWS)

		comboKey   = PSX_GetComboKeyFromDFR(comboDFR)
		comboIndex = PSX_GEtComboIndexFromDFR(comboDFR)

		DFREF singleEventDFR = GetPSXSingleEventFolder(comboDFR)

		for(i = 0; i < numEvents; i += 1)
			WAVE/Z/SDFR=singleEventDFR singleEvent = $GetIndexedObjNameDFR(singleEventDFR, COUNTOBJECTS_WAVES, i)
			ASSERT(WaveExists(singleEvent), "Non-existing single event wave")

			trace = GetTraceNamePrefix(idx)
			AppendToGraph/W=$extAllGraph/C=(eventColors[i][0], eventColors[i][1], eventColors[i][2], eventColors[i][3]) singleEvent/TN=$trace

			TUD_SetUserDataFromWaves(extAllGraph, trace,                                                                                                                                                                         \
			                         traceUserDataKeys,                                                                                                                                                                          \
			                         {num2str(psxEvent[i][%index]), num2str(psxEvent[i][%$"Fit manual QC call"]), num2str(psxEvent[i][%$"Event manual QC call"]), "0", PSX_TUD_TYPE_SINGLE, comboKey, "NaN", num2str(comboIndex)})

			idx += 1
		endfor

		idx = PSX_AppendAverageTraces(extAllGraph, comboDFR, "", idx, comboKey, comboIndex, traceUserDataKeys, states, acceptColors, rejectColors, undetColors)
	endfor

	idx = PSX_AppendAverageTraces(extAllGraph, workDFR, PSX_GLOBAL_AVERAGE_SUFFIX, idx, PSX_TUD_AVERAGE_ALL_COMBO_KEY, PSX_TUD_AVERAGE_ALL_COMBO_INDEX, traceUserDataKeys, states, acceptColors, rejectColors, undetColors)
End

static Function/S PSX_GetAverageTraceName(variable idx, string basename, variable comboIndex, string traceSuffix)

	string trace

	sprintf trace, "%s_%s%s%s", GetTraceNamePrefix(idx), basename, SelectString(IsFinite(comboIndex), "", "_ComboIndex" + num2str(comboIndex)), traceSuffix

	return trace
End

/// @brief Helper function to append the average traces to the all event graph
static Function PSX_AppendAverageTraces(string extAllGraph, DFREF averageDFR, string traceSuffix, variable idx, string comboKey, variable comboIndex, WAVE traceUserDataKeys, WAVE states, WAVE acceptColors, WAVE rejectColors, WAVE undetColors)

	variable state
	string trace, stateAsString, nameTemplate

	for(state : states)

		if(state == PSX_ALL)
			Make/FREE/N=4 colors = {1, 1, 1, 1}
		else
			Make/FREE/N=4 colors = PSX_SelectColor(state, acceptColors, rejectColors, undetColors)[p]
		endif

		WAVE average = GetPSXAverageWave(averageDFR, state)
		trace = PSX_GetAverageTraceName(idx, NameOfWave(average), comboIndex, traceSuffix)

		// don't use any transparency for the average
		AppendToGraph/W=$extAllGraph/C=(colors[0], colors[1], colors[2]) average/TN=$trace

		TUD_SetUserDataFromWaves(extAllGraph, trace,                                                                                     \
		                         traceUserDataKeys,                                                                                      \
		                         {"NaN", num2str(state), num2str(state), "0", PSX_TUD_TYPE_AVERAGE, comboKey, "NaN", num2str(comboIndex)})

		idx += 1

		stateAsString = PSX_StateToString(state)

		// averageFit
		WAVE averageFit = GetPSXAverageFitWaveFromDFR(averageDFR, state)

		nameTemplate = stateAsString + "_AverageFit"
		trace        = PSX_GetAverageTraceName(idx, nameTemplate, comboIndex, traceSuffix)

		AppendToGraph/W=$extAllGraph averageFit/TN=$trace

		TUD_SetUserDataFromWaves(extAllGraph, trace,                                                                                     \
		                         traceUserDataKeys,                                                                                      \
		                         {"NaN", num2str(state), num2str(state), "0", PSX_TUD_TYPE_AVERAGE, comboKey, "NaN", num2str(comboIndex)})

		idx += 1

		// riseAverageFit
		WAVE riseAverageFit = GetPSXRiseAverageFitWaveFromDFR(averageDFR, state)

		nameTemplate = stateAsString + "_RiseAverageFit"
		trace        = PSX_GetAverageTraceName(idx, nameTemplate, comboIndex, traceSuffix)

		AppendToGraph/W=$extAllGraph riseAverageFit/TN=$trace

		TUD_SetUserDataFromWaves(extAllGraph, trace,                                                                                     \
		                         traceUserDataKeys,                                                                                      \
		                         {"NaN", num2str(state), num2str(state), "0", PSX_TUD_TYPE_AVERAGE, comboKey, "NaN", num2str(comboIndex)})

		idx += 1

		// decayAverageFit
		WAVE decayAverageFit = GetPSXDecayAverageFitWaveFromDFR(averageDFR, state)

		nameTemplate = stateAsString + "_DecayAverageFit"
		trace        = PSX_GetAverageTraceName(idx, nameTemplate, comboIndex, traceSuffix)

		AppendToGraph/W=$extAllGraph decayAverageFit/TN=$trace

		TUD_SetUserDataFromWaves(extAllGraph, trace,                                                                                     \
		                         traceUserDataKeys,                                                                                      \
		                         {"NaN", num2str(state), num2str(state), "0", PSX_TUD_TYPE_AVERAGE, comboKey, "NaN", num2str(comboIndex)})

		idx += 1
	endfor

	return idx
End

/// @brief Return the event index where cursor A is currently placed in the psx plot
///
/// @return event index of the current combination or NaN if there is no psx plot or valid cursor position
static Function PSX_GetCurrentEventIndex(string win)

	string psxGraph, info

	psxGraph = PSX_GetPSXGraph(win)
	info     = PSX_GetCursorInfo(psxGraph)

	if(IsEmpty(info))
		return NaN
	endif

	return NumberByKey("POINT", info)
End

/// @brief Update the textbox in the single event graph
static Function PSX_UpdateSingleEventTextbox(string win, [variable eventIndex])

	string yUnit, trace, extSingleGraph, info, graph, str

	extSingleGraph = PSX_GetSingleEventGraph(win)

	if(!WindowExists(extSingleGraph))
		return NaN
	endif

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	if(ParamIsDefault(eventIndex))
		eventIndex = PSX_GetCurrentEventIndex(win)

		if(IsNaN(eventIndex))
			return NaN
		endif
	endif

	trace = StringFromList(0, TraceNameList(extSingleGraph, ";", 0))
	WAVE wv = TraceNameToWaveRef(extSingleGraph, trace)
	yUnit = WaveUnits(wv, -1)

	if(IsEmpty(yUnit))
		yUnit = "NA"
	endif

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)
	WAVE  psxEvent = GetPSXEventWaveFromDFR(comboDFR)

	Make/FREE/T/N=(10, 2) input

	input[0][0] = {"Event State:", "Fit State:", "Fit Result:", "Event:", "Deconv Peak:", "Peak:", "Baseline:", "IeI:", "Amp (rel.):", "Slow tau:", "Fast tau:", "Weighted tau:", "Onset time:", "Rise time:"}
	input[0][1] = {PSX_StateToString(psxEvent[eventIndex][%$"Event manual QC call"]),        \
	               PSX_StateToString(psxEvent[eventIndex][%$"Fit manual QC call"]),          \
	               PSX_FitResultToString(psxEvent[eventIndex][%$"Fit Result"]),              \
	               num2istr(eventIndex),                                                     \
	               num2str(psxEvent[eventIndex][%deconvPeak_t], "%8.02f") + " [ms]",         \
	               num2str(psxEvent[eventIndex][%peak_t], "%8.02f") + " [ms]",               \
	               num2str(psxEvent[eventIndex][%baseline_t], "%8.02f") + " [ms]",           \
	               num2str(psxEvent[eventIndex][%iei], "%8.02f") + " [ms]",                  \
	               num2str(psxEvent[eventIndex][%amplitude], "%8.02f") + " [" + yUnit + "]", \
	               num2str(psxEvent[eventIndex][%slowTau], "%8.02f") + " [ms]",              \
	               num2str(psxEvent[eventIndex][%fastTau], "%8.02f") + " [ms]",              \
	               num2str(psxEvent[eventIndex][%weightedTau], "%8.02f") + " [ms]",          \
	               num2str(psxEvent[eventIndex][%$"Onset Time"], "%8.02f") + " [ms]",        \
	               num2str(psxEvent[eventIndex][%$"Rise Time"], "%8.02f") + " [ms]"}

	str = "\F'Consolas'" + FormatTextWaveForLegend(input)

	WAVE/Z annoInfo = GetAnnotationInfo(extSingleGraph)

	Textbox/W=$extSingleGraph/C/N=description/X=61/Y=-6/A=LB str

	if(WaveExists(annoInfo))
		RestoreAnnotationPositions(extSingleGraph, annoInfo)
	endif
End

/// @brief Return the cursor info of cursor A from the psxGraph
///
/// Checks also that the cursor is on the expected trace
static Function/S PSX_GetCursorInfo(string psxGraph)

	string info, trace
	variable index

	info = CsrInfo(A, psxGraph)

	if(IsEmpty(info))
		return ""
	endif

	trace = StringByKey("TNAME", info)

	if(cmpstr(trace, PSX_CURSOR_TRACE))
		return ""
	endif

	return info
End

/// @brief Adjust the axis ranges of the psx graph so that the cursor is visible
///
/// @param win           window
/// @param leftIndex     event index to bring in axis range
/// @param constantWidth determine if the covered x-axis range should stay constant or not
/// @param rightIndex    [optional, defaults to none] additional event index to bring in x-axis range
static Function PSX_CenterCursor(string win, variable leftIndex, variable constantWidth, [variable rightIndex])

	variable left, right, leftBorder, rightBorder, range

	constantWidth = !!constantWidth

	if(ParamIsDefault(rightIndex))
		rightIndex = leftIndex
	else
		ASSERT(constantWidth == 0, "Can not be combined with constant width")
		ASSERT(rightIndex > leftIndex, "Invalid index ordering as rightIndex must be larger than leftIndex")
	endif

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)

	WAVE refWave = GetPSXPeakXWaveFromDFR(comboDFR)

	leftBorder  = refWave[0] - PSX_PLOT_DEFAULT_X_RANGE / 2
	rightBorder = refWave[Inf] + PSX_PLOT_DEFAULT_X_RANGE / 2

	// keep the x-axis range constant if requested
	if(constantWidth)
		GetAxis/Q/W=$win bottom
		range = V_max - V_min

		if(!IsFinite(range) || range == 0)
			range = PSX_PLOT_DEFAULT_X_RANGE
		endif
	else
		range = PSX_PLOT_DEFAULT_X_RANGE
	endif

	leftIndex  = limit(leftIndex, 0, DimSize(refWave, ROWS) - 1)
	rightIndex = limit(rightIndex, 0, DimSize(refWave, ROWS) - 1)

	left  = limit(refWave[leftIndex] - range / 2, leftBorder, rightBorder)
	right = limit(refWave[rightIndex] + range / 2, leftBorder, rightBorder)

	SetAxis/W=$win/A=0 bottom, left, right

	SetAxis/W=$win/A=2 leftOffFilt
	SetAxis/W=$win/A=2 leftOffFiltDeconv

	DoUpdate/W=$win
End

/// @brief Move the cursor A to the event `index + direction`
///
/// The window `win` can either be the `psx` graph or one of the `psxStats` graphs.
/// The function wraps around on both ends and selects the previous/next combo if required.
///
/// @return event index (clipped)
static Function PSX_MoveCursor(string win, string trace, variable index, variable direction)

	variable waveSize, comboIndex, numCombos, newComboIndex, minWrapAround, maxWrapAround
	string mainWindow

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)

	WAVE/Z yWave = TraceNameToWaveRef(win, trace)
	ASSERT(WaveExists(yWave), "Missing wave for trace")

	waveSize = DimSize(yWave, ROWS)

	minWrapAround = direction < 0 && index == 0
	maxWrapAround = direction > 0 && index == (waveSize - 1)

	if(minWrapAround || maxWrapAround)

		DFREF     workDFR      = PSX_GetWorkingFolder(win)
		WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)
		ASSERT(WaveExists(comboFolders), "Missing comboFolders")

		comboIndex    = PSX_GetCurrentComboIndex(win)
		numCombos     = DimSize(comboFolders, ROWS)
		newComboIndex = mod(comboIndex + direction + numCombos, numCombos)

		mainWindow = GetMainWindow(win)
		PGC_SetAndActivateControl(mainWindow, "listbox_select_combo", val = newComboIndex)

		DoUpdate

		WAVE/Z yWave = TraceNameToWaveRef(win, trace)
		ASSERT(WaveExists(yWave), "Missing wave for trace")

		waveSize = DimSize(yWave, ROWS)

		if(minWrapAround)
			index = waveSize - 1
		elseif(maxWrapAround)
			index = 0
		endif

		PSX_MoveCursorHelper(win, trace, index)

		return index
	endif

	index = limit(index + direction, 0, waveSize - 1)
	PSX_MoveCursorHelper(win, trace, index)

	return index
End

Function PSX_MoveCursorHelper(string win, string trace, variable index)

	Cursor/W=$win/P A, $trace, index
End

/// @brief Move and center cursor
///
/// @sa PSX_MoveCursor
/// @sa PSX_CenterCursor
static Function PSX_MoveAndCenterCursor(string win, variable index, [variable direction, variable constantWidth])

	if(ParamIsDefault(direction))
		direction = 0
	else
		ASSERT(IsFinite(direction), "Invalid direction")
	endif

	if(ParamIsDefault(constantWidth))
		constantWidth = 1
	else
		ASSERT(IsFinite(constantWidth), "Invalid constantWidth")
	endif

	index = PSX_MoveCursor(win, PSX_CURSOR_TRACE, index, direction)

	PSX_CenterCursor(win, index, constantWidth)
	PSX_UpdateSingleEventGraph(win, index)
End

/// @brief Get the keyboard direction stored in user data in the psx graph
static Function PSX_GetKeyboardDirection(string psxGraph)

	return str2num(GetUserData(psxGraph, "", USER_DATA_KEYBOARD_DIR))
End

/// @brief Set the keyboard direction in user data in the psx graph
static Function PSX_SetKeyboardDirection(string psxGraph, variable direction)

	SetWindow $psxGraph, userdata($USER_DATA_KEYBOARD_DIR)=num2str(direction)
End

/// @brief Get the move direction as +/- 1 from the keyboard direction
static Function PSX_GetMoveDirection(string psxGraph)

	variable direction

	direction = PSX_GetKeyboardDirection(psxGraph)

	switch(direction)
		case PSX_KEYBOARD_DIR_RL:
			return -1
		case PSX_KEYBOARD_DIR_LR:
			return +1
		default:
			ASSERT(0, "Unsupported direction")
	endswitch
End

/// @brief Return the appropriate color wave for the given fit/event state
threadsafe static Function/WAVE PSX_SelectColor(variable state, WAVE acceptColors, WAVE rejectColors, WAVE undetColors)

	switch(state)
		case PSX_ACCEPT:
			return acceptColors
		case PSX_REJECT:
			return rejectColors
		case PSX_UNDET:
			return undetColors
		default:
			ASSERT_TS(0, "Invalid state")
	endswitch
End

/// @brief Return a marker for the given fit/event state
threadsafe static Function PSX_SelectMarker(variable state)

	switch(state)
		case PSX_ACCEPT:
			return PSX_MARKER_ACCEPT
		case PSX_REJECT:
			return PSX_MARKER_REJECT
		case PSX_UNDET:
			return PSX_MARKER_UNDET
		default:
			ASSERT_TS(0, "Invalid state")
	endswitch
End

/// @brief Update all event related waves
///
/// One of `val` or `toggle` has to be supplied.
///
/// If neither `index` nor `indizes` is supplied all event indizes are set.
///
/// @param win        window
/// @param val        [optional] new state, one of @ref PSXStates
/// @param index      [optional] event index to set
/// @param toggle     [optional] switch event state from accepted <-> rejected
/// @param indizes    [optional] event indizes to set
/// @param writeState [optional, defaults to true] set the event state itself
/// @param stateType  [optional, defaults to #PSX_STATE_EVENT] one of @ref PSXStateTypes
/// @param comboIndex [optional, defaults to listbox selection] select/range combination to update the events for
static Function PSX_UpdateEventWaves(string win, [variable val, variable index, variable toggle, WAVE/Z indizes, variable writeState, variable stateType, variable comboIndex])

	variable start, stop, idx, stateCol0, stateCol1, oldStateCol, checkCol0, checkCol1
	string bsPanel, browser

	if(ParamIsDefault(comboIndex))
		DFREF comboDFR = PSX_GetCurrentComboFolder(win)
	else
		DFREF workDFR = PSX_GetWorkingFolder(win)

		DFREF comboDFR = GetPSXFolderForCombo(workDFR, comboIndex)
	endif

	ASSERT(DataFolderExistsDFR(comboDFR), "Missing combo folder")

	if(ParamIsDefault(stateType))
		stateType = PSX_STATE_EVENT
	else
		ASSERT(stateType == PSX_STATE_EVENT || stateType == PSX_STATE_FIT || stateType == PSX_STATE_BOTH, "Invalid state type")
	endif

	if(ParamIsDefault(toggle))
		toggle = 0
	else
		toggle = !!toggle
	endif

	if(ParamIsDefault(val))
		// safe default
		val = NaN
	endif

	if(ParamIsDefault(writeState))
		writeState = 1
	else
		writeState = !!writeState
	endif

	if(ParamIsDefault(index) && ParamIsDefault(indizes))
		start = 0
		stop  = Inf
	elseif(!ParamIsDefault(index))
		start = index
		stop  = index
	elseif(!ParamIsDefault(indizes))
		ASSERT(DimSize(indizes, COLS) <= 1, "Expected 1D wave")
		start = NaN
		stop  = NaN
	endif

	WAVE eventColors = GetPSXEventColorsWaveFromDFR(comboDFR)
	WAVE eventMarker = GetPSXEventMarkerWaveFromDFR(comboDFR)
	WAVE psxEvent    = GetPSXEventWaveFromDFR(comboDFR)

	// stateColX is the psxEvent column we want to read/write
	// checkColX denotes if there is a corresponding check column which
	// determines if the stateColX is allowed to be written. NaN if not available.
	switch(stateType)
		case PSX_STATE_EVENT:
			checkCol0   = NaN
			stateCol0   = FindDimLabel(psxEvent, COLS, "Event manual QC call")
			stateCol1   = NaN
			oldStateCol = stateCol0
			break
		case PSX_STATE_FIT:
			checkCol0   = FindDimLabel(psxEvent, COLS, "Fit result")
			stateCol0   = FindDimLabel(psxEvent, COLS, "Fit manual QC call")
			checkCol1   = NaN
			stateCol1   = NaN
			oldStateCol = stateCol0
			break
		case PSX_STATE_BOTH:
			checkCol0   = NaN
			stateCol0   = FindDimLabel(psxEvent, COLS, "Event manual QC call")
			checkCol1   = FindDimLabel(psxEvent, COLS, "Fit result")
			stateCol1   = FindDimLabel(psxEvent, COLS, "Fit manual QC call")
			oldStateCol = stateCol0
			break
		default:
			ASSERT(0, "Unknown state type")
	endswitch

	if(toggle)
		switch(psxEvent[index][oldStateCol])
			case PSX_UNDET:
				val = PSX_ACCEPT
				break
			case PSX_ACCEPT:
				val = PSX_REJECT
				break
			case PSX_REJECT:
				val = PSX_UNDET
				break
			default:
				ASSERT(0, "Unknown state")
		endswitch
	endif

	if(writeState)
		ASSERT(val == PSX_ACCEPT || val == PSX_REJECT || val == PSX_UNDET, "Invalid new event state")
	endif

	[WAVE acceptColors, WAVE rejectColors, WAVE undetColors] = PSX_GetEventColors()

	if(IsNaN(start) && IsNaN(stop))
		for(idx : indizes)
			if(writeState)

				if(IsNaN(checkCol0) || psxEvent[idx][checkCol0] == 1)
					psxEvent[idx][stateCol0] = val
				endif

				if(IsFinite(stateCol1))
					if(IsNaN(checkCol1) || psxEvent[idx][checkCol1] == 1)
						psxEvent[idx][stateCol1] = val
					endif
				endif
			endif

			Multithread eventColors[idx][] = PSX_SelectColor(psxEvent[p][%$"Event manual QC call"], acceptColors, rejectColors, undetColors)[q]
		endfor

		/// @todo Multithread does not work with index waves
		eventMarker[indizes] = PSX_SelectMarker(psxEvent[p][%$"Event manual QC call"])
	else
		if(writeState)
			psxEvent[start, stop][stateCol0] = (IsNaN(checkCol0) || psxEvent[p][checkCol0] == 1) ? val : psxEvent[p][stateCol0]

			if(IsFinite(stateCol1))
				psxEvent[start, stop][stateCol1] = (IsNaN(checkCol1) || psxEvent[p][checkCol1] == 1) ? val : psxEvent[p][stateCol1]
			endif
		endif

		Multithread eventMarker[start, stop] = PSX_SelectMarker(psxEvent[p][%$"Event manual QC call"])
		MultiThread eventColors[start, stop][] = PSX_SelectColor(psxEvent[p][%$"Event manual QC call"], acceptColors, rejectColors, undetColors)[q]
	endif

	PSX_UpdateSingleEventTextbox(win)

	if(writeState)
		PSX_AdaptColorsInAllEventGraph(win)
	endif

	PSX_StoreEventsIntoCache(psxEvent)
End

/// @brief Return RGBA waves with the colors for the three event states
static Function [WAVE acceptColors, WAVE rejectColors, WAVE undetColors] PSX_GetEventColors()

	Make/FREE acceptColors = {PSX_COLOR_ACCEPT_R, PSX_COLOR_ACCEPT_G, PSX_COLOR_ACCEPT_B, 0.2 * 65535}
	Make/FREE rejectColors = {PSX_COLOR_REJECT_R, PSX_COLOR_REJECT_G, PSX_COLOR_REJECT_B, 0.2 * 65535}
	Make/FREE undetColors = {PSX_COLOR_UNDET_R, PSX_COLOR_UNDET_G, PSX_COLOR_UNDET_B, 0.2 * 65535}
End

static Function/S PSX_GetDevice(string graph, variable sweepNo, variable mapIndex)

	string device

	WAVE textualValues = SFH_GetLabNoteBookForSweep(graph, sweepNo, mapIndex, LBN_TEXTUAL_VALUES)

	// Introduced in 7e903ed8 (GetSweepSettingsTextWave: Add device as entry, 2023-01-03)
	device = GetLastSettingTextIndep(textualValues, sweepNo, "Device", DATA_ACQUISITION_MODE)

	if(!IsEmpty(device))
		return device
	endif

	if(BSP_IsDataBrowser(graph))
		return BSP_GetDevice(graph)
	endif

	WAVE/T sweepMap = SB_GetSweepMap(graph)
	return sweepMap[mapIndex][%Device]
End

/// @brief Generate the unique combination key made up from `selectData` and `range`
///
/// This is used in the results wave, the listbox for selection and is attached
/// to the wave note of `psxEvent`.
static Function/S PSX_GenerateComboKey(string graph, WAVE selectData, WAVE range)

	variable sweepNo, channel, chanType, mapIndex, isDataBrowser
	string device, key, rangeStr, experiment

	isDataBrowser = BSP_IsDataBrowser(graph)

	ASSERT(DimSize(selectData, ROWS) == 1, "Expected selectData with only one entry")

	sweepNo  = selectData[0][%SWEEP]
	channel  = selectData[0][%CHANNELNUMBER]
	chanType = selectData[0][%CHANNELTYPE]
	mapIndex = selectData[0][%SWEEPMAPINDEX]

	WAVE numericalValues = SFH_GetLabNoteBookForSweep(graph, sweepNo, mapIndex, LBN_NUMERICAL_VALUES)

	device = PSX_GetDevice(graph, sweepNo, mapIndex)

	ASSERT(!IsEmpty(device), "Could not find the device of the given selectData")

	if(IsNumericWave(range))
		sprintf rangeStr, "%g, %g", range[0], range[1]
	elseif(IsTextWave(range))
		ASSERT(DimSize(range, ROWS) == 1, "Expected only a single epoch in the textual range")
		WAVE/T rangeText = range
		rangeStr = rangeText[0]
	else
		ASSERT(0, "Unexpected wave type")
	endif

	if(isDataBrowser)
		experiment = GetExperimentName()
	else
		WAVE/T sweepMap = SB_GetSweepMap(graph)
		experiment = sweepMap[mapIndex][%FileName]
	endif

	ASSERT(!IsEmpty(experiment), "Could not find the experiment of the given selectData")

	sprintf key, "Range[%s], Sweep [%d], Channel [%s%d], Device [%s], Experiment [%s]", rangeStr, sweepNo, StringFromList(chanType, XOP_CHANNEL_NAMES), channel, device, experiment
	ASSERT(strsearch(key, ":", 0) == -1, "Can't use a colon")

	return key
End

/// @brief Return a datafolder reference wave with all psx combination folders
static Function/WAVE PSX_GetAllCombinationFolders(DFREF workDFR)

	string list

	if(!DataFolderExistsDFR(workDFR))
		// no psx operation was executed
		return $""
	endif

	list = GetListOfObjects(workDFR, "^combo_[[:digit:]]+$", typeflag = COUNTOBJECTS_DATAFOLDER, fullPath = 1, exprType = MATCH_REGEXP)

	if(IsEmpty(list))
		return $""
	endif

	Make/FREE/DF/N=(ItemsInList(list)) folders = $StringFromList(p, list)

	return folders
End

/// @brief Return the psxEvent container wave for the given graph
static Function/WAVE PSX_GetEventContainer(string graph, [string requestID])

	string key, win, id, refID
	variable check

	if(ParamIsDefault(requestID))
		check = 0
	else
		check = 1
	endif

	win = SFH_GetFormulaGraphForBrowser(graph)

	if(IsEmpty(win))
		// no psx operation active
		return $""
	endif

	DFREF workDFR = PSX_GetWorkingFolder(win)

	WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	if(!WaveExists(comboFolders))
		return $""
	endif

	Make/WAVE/FREE/N=(DimSize(comboFolders, ROWS)) eventContainer = GetPSXEventWaveFromDFR(comboFolders[p])

	id = PSX_CheckForUniqueIDs(workDFR)

	if(check && cmpstr(id, requestID))
		return $""
	endif

	JWN_SetStringInWaveNote(eventContainer, "/id", id)

	return eventContainer
End

/// @brief Return the psxEvent container from the results wave for the given id
static Function/WAVE PSX_GetEventContainerFromResults(string id)

	string entry, name
	variable idx, hasValidWave

	WAVE/T textualResultsValues = GetLogbookWaves(LBT_RESULTS, LBN_TEXTUAL_VALUES)

	name  = SFH_FormatResultsKey(SFH_RESULT_TYPE_PSX_EVENTS, id)
	entry = GetLastSettingTextIndep(textualResultsValues, NaN, name, UNKNOWN_MODE)

	if(IsEmpty(entry))
		return $""
	endif

	WAVE/Z/WAVE container = JSONToWave(entry)
	ASSERT(WaveExists(container), "Could not parse stored results as JSON")

	for(WAVE/Z psxEvent : container)
		ASSERT(WaveExists(psxEvent), "Missing psxEvent")

		WAVE/Z psxEventUpgraded = UpgradePSXEventWave(psxEvent)

		if(WaveExists(psxEventUpgraded))
			hasValidWave = 1
		endif

		container[idx] = psxEventUpgraded
		idx           += 1
	endfor

	ASSERT(idx > 0, "Expected at least one entry in container")

	if(hasValidWave)
		return container
	endif

	return $""
End

static Function/WAVE PSX_FilterEventContainer(WAVE/Z/WAVE eventContainer, string refComboKey)

	string comboKey

	if(!WaveExists(eventContainer))
		return $""
	endif

	for(WAVE psxEvent : eventContainer)

		comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)
		if(!cmpstr(comboKey, refComboKey))
			// correct data
			return psxEvent
		endif
	endfor

	return $""
End

/// @brief Return the psx graph
///
/// Searches all subwindows of `win`.
static Function/S PSX_GetPSXGraph(string win)

	string elem, ud, mainWindow

	mainWindow = GetMainWindow(win)
	WAVE/T windows = ListToTextWave(GetAllWindows(mainWindow), ";")

	for(elem : windows)

		ud = GetUserData(elem, "", PSX_USER_DATA_TYPE)
		if(!cmpstr(ud, PSX_USER_DATA_PSX))
			return elem
		endif
	endfor

	ASSERT(0, "Could not find an psx graph as part of the window hierarchy")
End

/// @brief Return the name of the possibly non-existing stats subwindow
static Function/S PSX_GetPSXStatsGraph(string win)

	return GetMainWindow(win) + "#Graph1"
End

static Function/WAVE PSX_GetEventsInsideAxisRange(string win, string traceName, variable first, variable last, WAVE xCrds)

	WAVE data = TraceNameToWaveRef(win, traceName)

	Make/FREE/N=(DimSize(xCrds, ROWS)) subMatches = (data(xCrds[p]) >= first && data(xCrds[p]) <= last) ? p : NaN

	return subMatches
End

/// @brief Return the combo key from the combo datafolder
static Function/S PSX_GetComboKeyFromDFR(DFREF comboDFR)

	WAVE psxEvent = GetPSXEventWaveFromDFR(comboDFR)

	return JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)
End

/// @brief Return the ID from the combo datafolder
static Function/S PSX_GetIDFromDFR(DFREF comboDFR)

	string path

	WAVE psxEvent = GetPSXEventWaveFromDFR(comboDFR)

	path = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX + "/id"
	return JWN_GetStringFromWaveNote(psxEvent, path)
End

static Function/WAVE PSX_GetSpecialEventPanelCheckboxes(string specialEventPanel)

	return ListToTextWave(ControlNameList(specialEventPanel, ";", "checkbox*"), ";")
End

static Function/WAVE PSX_GetSpecialEventPanelPopups(string specialEventPanel)

	// ignore popup_block as that needs special handling on restore
	return ListToTextWave(ControlNameList(specialEventPanel, ";", "popupmenu*"), ";")
End

/// @brief Store the PSX panel GUI state in the window user data of `browser`
static Function PSX_StoreGuiState(string win, string browser)

	variable jsonID, childID, latestPanelVersion
	string specialEventPanel, mainWindow, ctrl, extAllGraph

	extAllGraph       = PSX_GetAllEventGraph(win)
	specialEventPanel = PSX_GetSpecialPanel(win)

	latestPanelVersion = HasPanelLatestVersion(win, PSX_PLOT_PANEL_VERSION)

	if(!latestPanelVersion                \
	   || IsEmpty(browser)                \
	   || !WindowExists(browser)          \
	   || !WindowExists(extAllGraph)      \
	   || !WindowExists(specialEventPanel))
		return NaN
	endif

	jsonID = JSON_New()

	JSON_SetVariable(jsonID, "/version", PSX_GUI_SETTINGS_VERSION)

	JSON_AddTreeObject(jsonID, "/specialEventPanel/axesRanges")
	JSON_AddTreeObject(jsonID, "/mainPanel")

	WAVE/T checkboxes = PSX_GetSpecialEventPanelCheckboxes(specialEventPanel)

	for(ctrl : checkboxes)
		JSON_SetVariable(jsonID, "/specialEventPanel/" + ctrl, GetCheckBoxState(specialEventPanel, ctrl))
	endfor

	WAVE/T popups = PSX_GetSpecialEventPanelPopups(specialEventPanel)

	for(ctrl : popups)
		JSON_SetVariable(jsonID, "/specialEventPanel/" + ctrl, GetPopupMenuIndex(specialEventPanel, ctrl))
	endfor

	JSON_SetVariable(jsonID, "/specialEventPanel/popup_block", GetPopupMenuIndex(specialEventPanel, "popup_block"))
	JSON_SetVariable(jsonID, "/specialEventPanel/setvar_event_block_size", GetSetVariable(specialEventPanel, "setvar_event_block_size"))
	JSON_SetVariable(jsonID, "/specialEventPanel/setvar_fit_start_amplitude", GetSetVariable(specialEventPanel, "setvar_fit_start_amplitude"))

	mainWindow = GetMainWindow(win)

	WAVE/T checkboxes = PSX_GetSpecialEventPanelCheckboxes(mainWindow)

	for(ctrl : checkboxes)
		JSON_SetVariable(jsonID, "/mainPanel/" + ctrl, GetCheckBoxState(mainWindow, ctrl))
	endfor

	JSON_SetVariable(jsonID, "/mainPanel/listbox_select_combo", GetListBoxSelRow(mainWindow, "listbox_select_combo"))

	WAVE axesProps = GetAxesProperties(extAllGraph)
	childID = JSON_Parse(WaveToJSON(axesProps))
	JSON_AddTreeObject(jsonID, "/specialEventPanel/axesProps")
	JSON_SetJSON(jsonID, "/specialEventPanel/axesProps", childID)
	JSON_Release(childID)

	SetWindow $browser, userdata($PSX_GUI_SETTINGS_PSX)=JSON_Dump(jsonID)
	JSON_Release(jsonID)
End

/// @brief Restore the PSX panel GUI state from the window user data of `browser`
static Function PSX_RestoreGuiState(string win)

	string browser, specialEventPanel, mainWindow, ctrl, jsonDoc, extAllGraph, allBlocks, popMenu
	variable jsonID, lastActiveCombo, selectedBlock, lastBlock

	browser = SFH_GetBrowserForFormulaGraph(win)

	jsonDoc = GetUserData(browser, "", PSX_GUI_SETTINGS_PSX)
	jsonID  = JSON_Parse(jsonDoc, ignoreErr = 1)

	if(!JSON_IsValid(jsonID))
		// no valid GUI settings found
		return NaN
	endif

	if(JSON_GetVariable(jsonID, "/version") != PSX_GUI_SETTINGS_VERSION)
		// stored data too old, ignore it
		return NaN
	endif

	specialEventPanel = PSX_GetSpecialPanel(win)

	WAVE/T controls = PSX_GetSpecialEventPanelCheckboxes(specialEventPanel)

	for(ctrl : controls)
		SetCheckBoxState(specialEventPanel, ctrl, JSON_GetVariable(jsonID, "/specialEventPanel/" + ctrl))
	endfor

	SetSetVariable(specialEventPanel, "setvar_event_block_size", JSON_GetVariable(jsonID, "/specialEventPanel/setvar_event_block_size"))
	SetSetVariable(specialEventPanel, "setvar_fit_start_amplitude", JSON_GetVariable(jsonID, "/specialEventPanel/setvar_fit_start_amplitude"))

	SetPopupMenuIndex(specialEventPanel, "popup_block", JSON_GetVariable(jsonID, "/specialEventPanel/popup_block"))

	WAVE/T popups = PSX_GetSpecialEventPanelPopups(specialEventPanel)

	for(popMenu : popups)
		SetPopupMenuIndex(specialEventPanel, popMenu, JSON_GetVariable(jsonID, "/specialEventPanel/" + popMenu))
	endfor

	mainWindow = GetMainWindow(win)
	WAVE/T controls = PSX_GetSpecialEventPanelCheckboxes(mainWindow)

	for(ctrl : controls)
		SetCheckBoxState(mainWindow, ctrl, JSON_GetVariable(jsonID, "/mainPanel/" + ctrl))
	endfor

	lastActiveCombo = JSON_GetVariable(jsonID, "/mainPanel/listbox_select_combo")

	DFREF workDFR      = PSX_GetWorkingFolder(win)
	WAVE  comboListBox = GetPSXComboListBox(workDFR)

	PGC_SetAndActivateControl(mainWindow, "listbox_select_combo", val = limit(lastActiveCombo, 0, DimSize(comboListBox, ROWS) - 1))

	WAVE axesProps = JSONToWave(jsonDoc, path = "/specialEventPanel/axesProps")

	extAllGraph = PSX_GetAllEventGraph(win)

	SetAxesProperties(extAllGraph, axesProps)

	JSON_Release(jsonID)
End

/// @brief Return the currently in the listbox selected combination folder
static Function/DF PSX_GetCurrentComboFolder(string win)

	variable comboIndex
	string   mainWindow

	mainWindow = GetMainWindow(win)

	if(!ControlExists(mainWindow, "listbox_select_combo"))
		return $""
	endif

	DFREF workDFR = PSX_GetWorkingFolder(mainWindow)
	comboIndex = PSX_GetCurrentComboIndex(mainWindow)

	return GetPSXFolderForCombo(workDFR, comboIndex)
End

/// @brief Return the current combo index as selected in the listbox
static Function PSX_GetCurrentComboIndex(string win)

	string mainWindow

	mainWindow = GetMainWindow(win)

	return GetListBoxSelRow(mainWindow, "listbox_select_combo")
End

/// @brief Return the combo index for the given comboKey
static Function PSX_GetComboIndexForComboKey(string win, string comboKey)

	variable i

	DFREF workDFR = PSX_GetWorkingFolder(win)

	WAVE/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	for(DFREF comboDFR : comboFolders)

		if(!cmpstr(PSX_GetComboKeyFromDFR(comboDFR), comboKey))
			return i
		endif

		i += 1
	endfor

	ASSERT(0, "Could not find a combo folder")
End

/// @brief Return the combo index from the given comboDFR
///
/// The combo folder is created by GetPSXFolderForCombo()
static Function PSX_GetComboIndexFromDFR(DFREF comboDFR)

	string path, comboIndexStr
	variable comboIndex

	path = GetDataFolder(1, comboDFR)

	SplitString/E="combo_([[:digit:]]+):$" path, comboIndexStr
	ASSERT(V_Flag == 1, "Unexpected number of matches")

	comboIndex = str2num(comboIndexStr)
	ASSERT(IsInteger(comboIndex), "Expected an integer combo index")

	return comboIndex
End

/// @brief Write all psx data from results in the combination folders
///
/// Takes care of existing combination data due to other `psx` calls in the same code.
///
/// @return Number of combinations without event data
static Function PSX_MoveWavesToDataFolders(DFREF workDFR, WAVE/Z/WAVE results, variable offset, variable numCombos)

	variable i, idx, numEvents, psxEventJSON, numFailures
	string key

	for(i = 0; i < numCombos; i += 1)

		key = PSX_GenerateKey("peakX", i)
		WAVE/Z resultsPeakX = results[%$key][1]

		key = PSX_GenerateKey("peakY", i)
		WAVE/Z resultsPeakY = results[%$key][1]

		if(!WaveExists(resultsPeakX) || !WaveExists(resultsPeakY))
			numFailures += 1
			continue
		endif

		DFREF dfr = GetPSXFolderForCombo(workDFR, offset + idx)
		idx += 1

		MoveWave resultsPeakX, dfr:peakX
		WAVE/SDFR=dfr peakX

		MoveWave resultsPeakY, dfr:peakY
		WAVE/SDFR=dfr peakY

		key = PSX_GenerateKey("sweepData", i)
		MoveWave results[%$key][1], dfr:sweepData
		WAVE/SDFR=dfr sweepData

		key = PSX_GenerateKey("sweepDataOffFilt", i)
		MoveWave results[%$key][1], dfr:sweepDataOffFilt
		WAVE/SDFR=dfr sweepDataOffFilt

		key = PSX_GenerateKey("sweepDataOffFiltDeconv", i)
		MoveWave results[%$key][1], dfr:sweepDataOffFiltDeconv
		WAVE/SDFR=dfr sweepDataOffFiltDeconv

		ASSERT(DimSize(peakX, ROWS) == DimSize(peakY, ROWS), "Mismatched peak sizes")

		key = PSX_GenerateKey("psxEvent", i)
		MoveWave results[%$key][1], dfr:psxEvent
		WAVE/SDFR=dfr psxEvent

		numEvents = DimSize(psxEvent, ROWS)

		key = PSX_GenerateKey("eventFit", i)
		MoveWave results[%$key][1], dfr:eventFit

		WAVE/SDFR=dfr eventFit

		WAVE eventColors = GetPSXEventColorsWaveAsFree(numEvents)
		MoveWave eventColors, dfr:eventColors

		WAVE eventMarker = GetPSXEventMarkerWaveAsFree(numEvents)
		MoveWave eventMarker, dfr:eventMarker

		Duplicate peakY, dfr:peakYAtFilt/WAVE=peakYAtFilt
		peakYAtFilt[] = sweepDataOffFilt(peakX[p])

		WAVE eventLabelsDeconv = GetPSXEventLabelsAsFree(numEvents, PSX_FREE_AXIS_DECONV)
		MoveWave eventLabelsDeconv, dfr

		WAVE eventTicksDeconv = GetPSXEventTicksAsFree(numEvents, PSX_FREE_AXIS_DECONV)
		MoveWave eventTicksDeconv, dfr
		eventTicksDeconv[] = psxEvent[p][%deconvPeak_t]

		WAVE eventLabelsPeak = GetPSXEventLabelsAsFree(numEvents, PSX_FREE_AXIS_PEAK)
		MoveWave eventLabelsPeak, dfr

		WAVE eventTicksPeak = GetPSXEventTicksAsFree(numEvents, PSX_FREE_AXIS_PEAK)
		MoveWave eventTicksPeak, dfr
		eventTicksPeak[] = psxEvent[p][%peak_t]

		WAVE eventLabelsBaseline = GetPSXEventLabelsAsFree(numEvents, PSX_FREE_AXIS_BASELINE)
		MoveWave eventLabelsBaseline, dfr

		WAVE eventTicksBaseline = GetPSXEventTicksAsFree(numEvents, PSX_FREE_AXIS_BASELINE)
		MoveWave eventTicksBaseline, dfr
		eventTicksBaseline[] = psxEvent[p][%baseline_t]

		PSX_CreateSingleEventWaves(dfr, psxEvent, sweepDataOffFilt)

		// create all waves which need to exist for combo changing
		WAVE singleEventFit = GetPSXSingleEventFitWaveFromDFR(dfr)
	endfor

	PSX_CheckForUniqueIDs(workDFR)

	return numFailures
End

static Function/S PSX_CheckForUniqueIDs(DFREF workDFR)

	variable checkID

	WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	if(!WaveExists(comboFolders))
		return ""
	endif

	Make/FREE/T/N=(DimSize(comboFolders, ROWS)) ids = PSX_GetIDFromDFR(comboFolders[p])

	WAVE/T uniqueIDs = GetUniqueEntries(ids)

	SFH_ASSERT(DimSize(uniqueIDs, ROWS) == 1, "Can't use different IDs for psx in one browser")

	return uniqueIDs[0]
End

/// @brief Extract a single wave for each event from sweepDataOffFilt
static Function PSX_CreateSingleEventWaves(DFREF comboDFR, WAVE psxEvent, WAVE sweepDataOffFilt)

	variable i, numEvents, first, last, offset
	string name

	numEvents = DimSize(psxEvent, ROWS)

	DFREF singleEventDFR = GetPSXSingleEventFolder(comboDFR)

	for(i = 0; i < numEvents; i += 1)

		[first, last] = PSX_GetSingleEventRange(psxEvent, sweepDataOffFilt, i)

		Duplicate/FREE/R=(first, last) sweepDataOffFilt, singleEvent

		Note/K singleEvent

		name = PSX_FormatSingleEventWaveName(i)

		MoveWave singleEvent, singleEventDFR:$name
	endfor
End

/// @brief Generate a wave name for single event waves
static Function/S PSX_FormatSingleEventWaveName(variable i)

	string name

	sprintf name, "SE%0*d", (ceil(log(PSX_MAX_NUM_EVENTS)) + 1), i

	return name
End

static Function PSX_EventGraphSuppressUpdate(string win)

	return GetCheckboxState(GetMainWindow(win), "checkbox_suppress_update") == 1
End

Function/S PSX_GetEventStateNames()

	return PSX_TUD_EVENT_STATE_KEY + ";" + PSX_TUD_FIT_STATE_KEY
End

Function/S PSX_GetAverageFitAcceptNames()

	return "dblexp_peak;dblexp_XOffset"
End

static Function/S PSX_GetUIControlHelp()

	return "<html><pre>"                                                                                              + \
	       "The following keyboard shortcuts work for either the psx or the psxstats graphs.\r"                       + \
	       "All of them require that the cursor A is located on an event, which is by default\r"                      + \
	       "the case for the psx graph. The current direction for automatic advancement defaults to left-to-right.\r" + \
	       ""                                                                                                         + \
	       "    ↑ (up): Accept the current event, changing both event and fit state to accept,\r"                     + \
	       "            and advance the cursor to the next event in the current direction\r"                          + \
	       "    ↓ (down): Reject the current event, changing both event and fit state to reject,\r"                   + \
	       "              and advance the cursor to the next event in the current direction\r"                        + \
	       "    → (right): Move the cursor to the next event on the right\r"                                          + \
	       "    ← (left): Move the cursor to the previous event on the left\r"                                        + \
	       "    (space): Toggle the event and fit state of the current event without any movement\r"                  + \
	       "    r: Reverse the current direction\r"                                                                   + \
	       "    c: Center the x-axis around the current event\r"                                                      + \
	       "    e: Toggle the event state\r"                                                                          + \
	       "    f: Toggle the fit state\r"                                                                            + \
	       "    z: Accept the event state but reject the fit state\r"                                                 + \
	       "</pre><html>"
End

/// @brief Create the PSX graph together with all subwindows (all event graph, single event graph)
///
/// This is only called for the very first `psx` operation output, subsequent
/// `psx` operation outputs are just added as additional combos.
static Function PSX_CreatePSXGraphAndSubwindows(string win, string graph, STRUCT SF_PlotMetaData &plotMetaData)

	string mainWin, extSubWin, extSingleGraph, extAllGraph

	mainWin = GetMainWindow(win)

	PSX_ApplyMacroToExistingPanel(mainWin, "PSXPanel")

	AddVersionToPanel(mainWin, PSX_PLOT_PANEL_VERSION)

	DFREF workDFR  = PSX_GetWorkingFolder(win)
	DFREF comboDFR = GetPSXFolderForCombo(workDFR, 0)

	// make space on the left hand side
	DefineGuide/W=$mainWin customLeft={FL, 0.15, FR}
	WAVE combos = GetPSXComboListBox(workDFR)
	ListBox listbox_select_combo, win=$mainWin, mode=2, selRow=0, listWave=combos, helpWave=combos

	WAVE peakX                  = GetPSXPeakXWaveFromDFR(comboDFR)
	WAVE peakY                  = GetPSXPeakYWaveFromDFR(comboDFR)
	WAVE peakYAtFilt            = GetPSXPeakYAtFiltWaveFromDFR(comboDFR)
	WAVE sweepData              = GetPSXSweepDataWaveFromDFR(comboDFR)
	WAVE sweepDataOffFilt       = GetPSXSweepDataOffFiltWaveFromDFR(comboDFR)
	WAVE sweepDataOffFiltDeconv = GetPSXSweepDataOffFiltDeconvWaveFromDFR(comboDFR)

	[STRUCT RGBColor color] = SF_GetTraceColor(graph, plotMetaData.opStack, sweepData, $"")

	AppendToGraph/W=$win/C=(color.red, color.green, color.blue)/L=leftOffFilt sweepDataOffFilt
	AppendToGraph/W=$win/L=leftOffFilt peakYAtFilt vs peakX

	AppendToGraph/W=$win/C=(color.red, color.green, color.blue)/L=leftOffFiltDeconv sweepDataOffFiltDeconv
	AppendToGraph/W=$win/L=leftOffFiltDeconv peakY vs peakX

	ModifyGraph/W=$win msize(peakY)=10, msize(peakYAtFilt)=10

	ModifyGraph/W=$win axisEnab(leftOffFilt)={0.51, 1}, lblPos(leftOffFilt)=70, freePos(leftOffFilt)=0
	ModifyGraph/W=$win axisEnab(leftOffFiltDeconv)={0, 0.49}, lblPos(leftOffFiltDeconv)=70, freePos(leftOffFiltDeconv)=0

	PSX_MarkGraphForPSX(win)

	WAVE eventColors = GetPSXEventColorsWaveFromDFR(comboDFR)
	WAVE eventMarker = GetPSXEventMarkerWaveFromDFR(comboDFR)

	PSX_AppendVisualizationAxis(win, PSX_FREE_AXIS_DECONV)
	PSX_AppendVisualizationAxis(win, PSX_FREE_AXIS_PEAK)
	PSX_AppendVisualizationAxis(win, PSX_FREE_AXIS_BASELINE)

	ModifyGraph/W=$win zColor(peakYAtFilt)={eventColors, *, *, directRGB, 0}
	ModifyGraph/W=$win mode(peakYAtFilt)=3
	ModifyGraph/W=$win zmrkNum(peakYAtFilt)={eventMarker}

	ModifyGraph/W=$win zColor(peakY)={eventColors, *, *, directRGB, 0}
	ModifyGraph/W=$win mode(peakY)=3
	ModifyGraph/W=$win zmrkNum(peakY)={eventMarker}

	extSingleGraph = PSX_GetSingleEventGraph(win)
	extSubWin      = PSX_GetSpecialPanel(win)

	PopupMenu popup_block, win=$extSubWin, value=#("PSX_GetAllEventBlockNumbers(\"" + win + "\")")

	AppendToGraph/W=$extSingleGraph/C=(color.red, color.green, color.blue) sweepDataOffFilt
	AppendToGraph/W=$extSingleGraph peakYAtFilt vs peakX
	SetAxis/A=2/W=$extSingleGraph left

	ModifyGraph/W=$extSingleGraph zColor(peakYAtFilt)={eventColors, *, *, directRGB, 0}
	ModifyGraph/W=$extSingleGraph mode(peakYAtFilt)=3
	ModifyGraph/W=$extSingleGraph zmrkNum(peakYAtFilt)={eventMarker}
	ModifyGraph/W=$extSingleGraph msize(peakYAtFilt)=10

	WAVE singleEventFit = GetPSXSingleEventFitWaveFromDFR(comboDFR)
	AppendToGraph/W=$extSingleGraph/C=(21845, 21845, 21845) singleEventFit

	NVAR JSONid = $GetSettingsJSONid()
	PS_InitCoordinates(JSONid, extSubWin, extSubWin)
End

static Function/WAVE PSX_GetColorsForFreeAxis(string axis)

	string list

	strswitch(axis)
		case PSX_FREE_AXIS_BASELINE:
			list = PSX_COLORS_BASELINE
			break
		case PSX_FREE_AXIS_DECONV:
			list = PSX_COLORS_DECONV
			break
		case PSX_FREE_AXIS_PEAK:
			list = PSX_COLORS_PEAK
			break
		default:
			ASSERT(0, "Invalid axis type")
	endswitch

	WAVE wv = ListToNumericWave(list, ",")

	return wv
End

/// @brief Appends a free axis overlayed with the bottom axis name
static Function PSX_AppendVisualizationAxis(string win, string axis)

	NewFreeAxis/W=$win/O/T $axis
	ModifyFreeAxis/W=$win/Z $axis, master=bottom
	ModifyGraph/W=$win grid($axis)=1
	ModifyGraph/W=$win tick($axis)=3
	ModifyGraph/W=$win lblPos($axis)=43
	ModifyGraph/W=$win noLabel($axis)=2
	ModifyGraph/W=$win freePos($axis)={0, kwFraction}
	ModifyGraph/W=$win nticks($axis)=0

	WAVE RGBcolors = PSX_GetColorsForFreeAxis(axis)
	ModifyGraph/W=$win gridRGB($axis)=(RGBcolors[0], RGBcolors[1], RGBcolors[2])

	Label/W=$win $axis, "\\u#2"
End

/// @brief Mark `win` as being an psx graph
static Function PSX_MarkGraphForPSX(string win)

	SetWindow $win, userData($PSX_USER_DATA_TYPE)=PSX_USER_DATA_PSX
End

/// @brief Apply plot properties which have to be reapplied on every combo index change
static Function PSX_ApplySpecialPlotProperties(string win)

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)

	PSX_ApplySpecialPlotPropertiesImpl(win, comboDFR, PSX_FREE_AXIS_DECONV, "checkbox_show_deconv_lines")
	PSX_ApplySpecialPlotPropertiesImpl(win, comboDFR, PSX_FREE_AXIS_BASELINE, "checkbox_show_baseline_lines")
	PSX_ApplySpecialPlotPropertiesImpl(win, comboDFR, PSX_FREE_AXIS_PEAK, "checkbox_show_peak_lines")
End

static Function PSX_ApplySpecialPlotPropertiesImpl(string win, DFREF comboDFR, string name, string checkBoxControl)

	variable enabled
	string panel, psxGraph

	panel    = GetMainWindow(win)
	psxGraph = PSX_GetPSXGraph(win)

	enabled = GetCheckboxState(panel, checkBoxControl)

	WAVE eventLabels = GetPSXEventLabelsFromDFR(comboDFR, name)
	WAVE eventTicks  = GetPSXEventTicksFromDFR(comboDFR, name)

	if(enabled)
		ModifyGraph/W=$psxGraph userticks($name)={eventTicks, eventLabels}
	else
		ModifyGraph/W=$psxGraph userticks($name)=0, nticks($name)=0
	endif
End

/// @brief Read the user JWN from results and create a legend from all operation parameters
static Function PSX_AddLegend(string win, WAVE/WAVE results)

	variable jsonID, value, type, i, j, numOperations, numParameters, numRows
	string line, op, param, prefix, opNice, mainWindow, jsonPathOp, jsonPathParam
	string str, containerSep
	string sep = ", "

	jsonID = JWN_GetWaveNoteAsJSON(results)

	Make/T/FREE/N=(1, 0) input

	WAVE/T operations = JSON_GetKeys(jsonID, SF_META_USER_GROUP + PSX_JWN_PARAMETERS)
	numOperations = DimSize(operations, ROWS)

	Redimension/N=(-1, numOperations) input

	for(i = 0; i < numOperations; i += 1)
		op     = operations[i]
		opNice = op + ": "

		jsonPathOp = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + op
		WAVE/T parameters = JSON_GetKeys(jsonID, jsonPathOp)
		numParameters = DimSize(parameters, ROWS)

		Redimension/N=(max(DimSize(input, ROWS), numParameters), -1) input

		for(j = 0; j < numParameters; j += 1)
			param = parameters[j]

			if(j == 0)
				prefix = opNice
			else
				prefix = PadString("", strlen(opNice), 0x20)
			endif

			jsonPathParam = jsonPathOp + "/" + param
			type          = JSON_GetType(jsonID, jsonPathParam)

			switch(type)
				case JSON_NUMERIC:
					value = JSON_GetVariable(jsonID, jsonPathParam)
					sprintf line, "%s: %g", param, value
					break
				case JSON_STRING:
					str = JSON_GetString(jsonID, jsonPathParam)
					sprintf line, "%s: %s", param, str
					break
				case JSON_ARRAY:
					WAVE/Z/T wvText = JSON_GetTextWave(jsonID, jsonPathParam, ignoreErr = 1)
					if(WaveExists(wvText))
						str = TextWaveToList(wvText, sep)
						WaveClear wvText
					else
						if(!cmpstr(param, "range"))
							WAVE/WAVE container = JWN_GetWaveRefNumericFromWaveNote(results, jsonPathParam)
							containerSep = "; "
						else
							WAVE wv = JSON_GetWave(jsonID, jsonPathParam, waveMode = 1)
							Make/FREE/WAVE container = {wv}
							containerSep = ""
						endif

						str = ""
						for(WAVE wv : container)
							ASSERT(IsNumericWave(wv), "Expected numeric wave")
							// NumericWaveToList outputs in column-major order but we want row-major
							MatrixOp/FREE dest = wv^t
							str += NumericWaveToList(dest, sep, trailSep = 0) + containerSep
						endfor

						str = RemoveEnding(str, containerSep)
					endif

					sprintf line, "%s: %s", param, RemoveEnding(str, sep)
					break
				default:
					ASSERT(0, "Unsupported type")
			endswitch

			input[j][i] = prefix + line
		endfor
	endfor

	JSON_Release(jsonID)

	mainWindow = GetMainWindow(win)
	UpdateInfoButtonHelp(mainWindow, "button_psx_info", input)
End

/// @brief Return the event, wave and combo index
///
/// Direction is taken into account.
///
/// @param win       window, can be an `psx`/`psxStats` graph
/// @param direction [optional, defaults to 0] offset from the current position
///
/// @retval eventIndex event index
/// @retval waveIndex  index into the y wave of the cursor
/// @retval comboIndex combination index
static Function [variable eventIndex, variable waveIndex, variable comboIndex] PSX_GetEventIndexAndComboIndex(string win, [variable direction])

	string psxGraph, info, trace, postProc
	variable idx, yPointNumber, yNumRows, xNumRows

	psxGraph = PSX_GetPSXGraph(win)

	if(ParamIsDefault(direction))
		direction = 0
	else
		ASSERT(IsFinite(direction), "Invalid direction")
	endif

	if(!cmpstr(win, psxGraph))
		idx = PSX_GetCurrentEventIndex(psxGraph) + direction
		return [idx, idx, PSX_GetCurrentComboIndex(win)]
	endif

	// other graph, most likely psxStats plot

	if(WinType(win) != WINTYPE_GRAPH)
		return [NaN, NaN, NaN]
	endif

	info = CsrInfo(A, win)

	if(IsEmpty(info))
		return [NaN, NaN, NaN]
	endif

	trace = StringByKey("TNAME", info)

	if(IsEmpty(trace))
		return [NaN, NaN, NaN]
	endif

	yPointNumber = NumberByKey("POINT", info)

	if(IsNaN(yPointNumber))
		return [NaN, NaN, NaN]
	endif

	WAVE/Z yWave = TraceNameToWaveRef(win, trace)

	if(!WaveExists(yWave))
		return [NaN, NaN, NaN]
	endif

	postProc = JWN_GetStringFromWaveNote(yWave, SF_META_USER_GROUP + PSX_JWN_STATS_POST_PROC)

	WAVE/Z xWave = XWaveRefFromTrace(win, trace)

	if(!WaveExists(xWave))
		return [NaN, NaN, NaN]
	endif

	WAVE/T comboKeys = JWN_GetTextWaveFromWaveNote(yWave, SF_META_USER_GROUP + PSX_JWN_COMBO_KEYS_NAME)

	yNumRows = DimSize(yWave, ROWS)
	xNumRows = DimSize(xWave, ROWS)

	if(xNumRows == yNumRows)
		// x wave is from the psx yWave
		WAVE refxWave = xWave
	else
		// yWave vs something else
		WAVE refxWave = JWN_GetNumericWaveFromWaveNote(yWave, SF_META_XVALUES)
		xNumRows = DimSize(refxWave, ROWS)
	endif
	WaveClear xWave

	ASSERT(xNumRows == yNumRows, "Unmatching wave sizes")

	yPointNumber = limit(yPointNumber + direction, 0, yNumRows - 1)
	comboIndex   = PSX_GetComboIndexForComboKey(win, comboKeys[yPointNumber])

	strswitch(postProc)
		case "nothing":
		case "log10":
			eventIndex = refxWave[yPointNumber]
			break
		case "nonfinite":
			eventIndex = yWave[yPointNumber]
			break
		default:
			// unsupported post-processing
			return [NaN, NaN, NaN]
	endswitch

	return [eventIndex, yPointNumber, comboIndex]
End

static Function PSX_AbortWithOldPanel(string win)

	if(!HasPanelLatestVersion(win, PSX_PLOT_PANEL_VERSION))
		DoAbortNow("Can not continue with this psx plot. The psx panel is too old to be usable. Please close it and open a new one.")
	endif
End

/// @brief Window hook responsible for keyboard and mouse support
///
/// Works with `psx` and `psxStats` graphs.
Function PSX_PlotInteractionHook(STRUCT WMWinHookStruct &s)

	variable direction, eventIndex, loc, comboIndex, keyboardDir, waveIndex, first, last
	string psxGraph, info, msg, browser, win, mainWindow, trace

	switch(s.eventCode)
		case EVENT_WINDOW_HOOK_CURSORMOVED:

			if(cmpstr(s.cursorName, "A"))
				// not our cursor
				break
			endif

			win = s.winName

			PSX_AbortWithOldPanel(win)

			eventIndex = s.pointNumber
			psxGraph   = PSX_GetPSXGraph(win)

			if(!cmpstr(win, psxGraph))
				PSX_UpdateSingleEventGraph(psxGraph, eventIndex)
			else
				[eventIndex, waveIndex, comboIndex] = PSX_GetEventIndexAndComboIndex(win)

				if(IsNaN(eventIndex) || IsNaN(waveIndex) || IsNaN(comboIndex))
					break
				endif

				if(PSX_GetCurrentComboIndex(win) != comboIndex)
					mainWindow = GetMainWindow(win)
					PGC_SetAndActivateControl(mainWindow, "listbox_select_combo", val = comboIndex)
				endif

				PSX_MoveAndCenterCursor(psxGraph, eventIndex)

				trace = StringByKey("TNAME", CsrInfo(A, win))

				// x-coordinates are not unique in a stats graph as we can have multiple combos
				// and we therefore have to set waveIndex
				PSX_MoveCursor(win, trace, waveIndex, 0)
			endif

			return 1
		case EVENT_WINDOW_HOOK_KEYBOARD:

			win = s.winName
			PSX_AbortWithOldPanel(win)

			// workaround IP bug where the currently selected graph is not in s.winName
			GetWindow $win, activeSW
			win = S_value

			psxGraph = PSX_GetPSXGraph(win)

			[eventIndex, waveIndex, comboIndex] = PSX_GetEventIndexAndComboIndex(win)

			if(IsNaN(eventIndex) || IsNaN(waveIndex) || IsNaN(comboIndex))
				break
			endif

			if(!cmpstr(win, psxGraph))
				ASSERT(waveIndex == eventIndex, "Mismatched indizes")
				PSX_ReactToKeyPressWithoutMouse(psxGraph, s.keyCode, comboIndex, eventIndex)
				PSX_MoveMouseForKeyPress(psxGraph, s.keyCode, comboIndex, eventIndex)
			else
				// psxStats
				// adapt the event state of the *current event* according to the key press
				PSX_ReactToKeyPressWithoutMouse(psxGraph, s.keyCode, comboIndex, eventIndex)

				// calculate the next eventIndex from our current waveIndex
				// that new eventIndex might be something totally different as a stats plot will usually
				// only display a subset of the event data or combine multiple combos

				direction                           = PSX_GetDirectionFromKeyCode(psxGraph, s.keyCode)
				[eventIndex, waveIndex, comboIndex] = PSX_GetEventIndexAndComboIndex(win, direction = direction)

				if(IsNaN(eventIndex) || IsNaN(waveIndex) || IsNaN(comboIndex))
					BUG("Could not get new eventIndex after direction application")
					break
				endif

				if(PSX_GetCurrentComboIndex(win) != comboIndex)
					mainWindow = GetMainWindow(win)
					PGC_SetAndActivateControl(mainWindow, "listbox_select_combo", val = comboIndex)
				endif

				// undo the movement as the mouse cursor logic needs to know the direction as well
				PSX_MoveMouseForKeyPress(psxGraph, s.keyCode, comboIndex, eventIndex - direction)

				if(direction == 0)
					PSX_MoveAndCenterCursor(psxGraph, eventIndex)
				endif

				trace = StringByKey("TNAME", CsrInfo(A, win))

				if(!IsEmpty(trace))
					PSX_MoveCursor(win, trace, waveIndex, 0)
				endif
			endif

#ifdef DEBUGGING_ENABLED
			DFREF   workDFR      = PSX_GetWorkingFolder(win)
			WAVE/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)
			DFREF   comboDFR     = comboFolders[comboIndex]

			WAVE sweepDataOffFilt = GetPSXSweepDataOffFiltWaveFromDFR(comboDFR)
			WAVE psxEvent         = GetPSXEventWaveFromDFR(comboDFR)
			[first, last] = PSX_GetEventFitRange(sweepDataOffFilt, psxEvent, eventIndex)

			sprintf msg, "Fit range for event %d: [%g, %g]", eventIndex, first, last
			DEBUGPRINT(msg)
#endif // DEBUGGING_ENABLED
			return 1
		case EVENT_WINDOW_HOOK_MOUSEUP:
			win = s.winName

			if(WinType(win) != WINTYPE_GRAPH)
				break
			endif

			PSX_AbortWithOldPanel(win)

			// psxGraph
			if((s.eventMod & WINDOW_HOOK_EMOD_CTRLKEYDOWN) == WINDOW_HOOK_EMOD_CTRLKEYDOWN)
				DEBUGPRINT("Left mouse click and CTRL")

				psxGraph = PSX_GetPSXGraph(win)

				DFREF comboDFR = PSX_GetCurrentComboFolder(psxGraph)

				WAVE peakX = GetPSXPeakXWaveFromDFR(comboDFR)

				loc = AxisValFromPixel(psxGraph, "bottom", s.mouseLoc.h)

				FindValue/V=(loc)/T=(1) peakX
				if(V_row >= 0)
					PSX_UpdateEventWaves(psxGraph, toggle = 1, index = V_row)
				endif
			endif

			return 1
		case EVENT_WINDOW_HOOK_KILLVOTE:
			win     = s.winName
			browser = SFH_GetBrowserForFormulaGraph(s.winName)
			PSX_StoreGuiState(win, browser)
			return 0
		default:
			break
	endswitch

	return 0
End

Function PSX_AllEventGraphHook(STRUCT WMWinHookStruct &s)

	string win, extAllGraph, trace, info, statetype, specialEventPanel
	variable comboIndex, eventIndex, isHidden

	switch(s.eventCode)
		case EVENT_WINDOW_HOOK_KEYBOARD:
			win         = s.winName
			extAllGraph = PSX_GetAllEventGraph(win)

			info = TraceFromPixel(s.mouseloc.h, s.mouseloc.v, "WINDOW:" + extAllGraph)

			if(IsEmpty(info))
				break
			endif

			specialEventPanel = PSX_GetSpecialPanel(win)
			statetype         = GetPopupMenuString(specialEventPanel, "popupmenu_state_type")
			if(!cmpstr(statetype, PSX_TUD_FIT_STATE_KEY))
				printf "Keyboard interaction is disabled while fit event state is selected.\r"
				ControlWindowToFront()
				return 1
			endif

			trace = StringByKey("TRACE", info)

			WAVE/T tud = TUD_GetAllUserData(extAllGraph, trace)
			isHidden = !!str2num(tud[%$PSX_TUD_TRACE_HIDDEN_KEY])

			if(isHidden)
				break
			endif

			comboIndex = str2num(tud[%$PSX_TUD_COMBO_INDEX])
			eventIndex = str2num(tud[%$PSX_TUD_EVENT_INDEX_KEY])

			if(IsNaN(comboIndex) || IsNaN(eventIndex))
				// average wave, don't do anything
				break
			endif

			PSX_ReactToKeyPressWithoutMouse(win, s.keyCode, comboIndex, eventIndex)

			return 1
			break
		default:
			break
	endswitch
End

static Function PSX_GetDirectionFromKeyCode(string psxGraph, variable keyCode)

	switch(keycode)
		case LEFT_KEY:
			return -1
		case RIGHT_KEY:
			return +1
		case UP_KEY:
		case DOWN_KEY:
			return PSX_GetMoveDirection(psxGraph)
		default:
			return 0
	endswitch
End

static Function PSX_MoveMouseForKeyPress(string win, variable keyCode, variable comboIndex, variable eventIndex)

	variable direction

	switch(keycode)
		case LEFT_KEY:
		case RIGHT_KEY:
		case UP_KEY:
		case DOWN_KEY:
			direction = PSX_GetDirectionFromKeyCode(win, keyCode)
			PSX_MoveAndCenterCursor(win, eventIndex, direction = direction)
			break
		default:
			// unsupported key
			break
	endswitch
End

static Function PSX_ReactToKeyPressWithoutMouse(string win, variable keyCode, variable comboIndex, variable eventIndex)

	variable keyboardDir
	string   psxGraph

	switch(keycode)
		case LEFT_KEY:
			DEBUGPRINT("left")

			break
		case RIGHT_KEY:
			DEBUGPRINT("right")

			break
		case UP_KEY:
			DEBUGPRINT("up")

			PSX_UpdateEventWaves(win, val = PSX_ACCEPT, index = eventIndex, stateType = PSX_STATE_BOTH, comboIndex = comboIndex)
			break
		case DOWN_KEY:
			DEBUGPRINT("down")

			PSX_UpdateEventWaves(win, val = PSX_REJECT, index = eventIndex, stateType = PSX_STATE_BOTH, comboIndex = comboIndex)
			break
		case SPACE_KEY:
			DEBUGPRINT("space")

			PSX_UpdateEventWaves(win, toggle = 1, index = eventIndex, stateType = PSX_STATE_BOTH, comboIndex = comboIndex)
			break
		case C_KEY:
			DEBUGPRINT("center (c)")

			PSX_CenterCursor(win, eventIndex, 1)
			break
		case E_KEY:
			DEBUGPRINT("toggle event state (e)")

			PSX_UpdateEventWaves(win, toggle = 1, index = eventIndex, stateType = PSX_STATE_EVENT, comboIndex = comboIndex)
			break
		case F_KEY:
			DEBUGPRINT("toggle fit state (f)")

			PSX_UpdateEventWaves(win, toggle = 1, index = eventIndex, stateType = PSX_STATE_FIT, comboIndex = comboIndex)
			break
		case R_KEY:
			DEBUGPRINT("reverse direction (c)")

			keyboardDir = PSX_GetKeyboardDirection(win)

			switch(keyboardDir)
				case PSX_KEYBOARD_DIR_RL:
					keyboardDir = PSX_KEYBOARD_DIR_LR
					break
				case PSX_KEYBOARD_DIR_LR:
					keyboardDir = PSX_KEYBOARD_DIR_RL
					break
				default:
					ASSERT(0, "Unknown direction")
			endswitch

			PSX_SetKeyboardDirection(win, keyboardDir)
			break
		case Z_KEY:
			DEBUGPRINT("accept event and fail fit (z)")

			PSX_UpdateEventWaves(win, val = PSX_ACCEPT, index = eventIndex, stateType = PSX_STATE_EVENT, comboIndex = comboIndex)
			PSX_UpdateEventWaves(win, val = PSX_REJECT, index = eventIndex, stateType = PSX_STATE_FIT, comboIndex = comboIndex)
			break
		default:
			// unsupported key
			break
	endswitch
End

/// @brief Return a free text wave with all combo keys
Function/WAVE PSX_CreateCombinationsListBoxWaveAsFree(DFREF workDFR)

	WAVE/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	Make/T/N=(DimSize(comboFolders, ROWS))/FREE wv = PSX_GetComboKeyFromDFR(comboFolders[p])

	return wv
End

static Function PSX_GetNumberOfCombinations(WAVE/WAVE results)

	variable numCombos

	ASSERT(IsWaveRefWave(results), "Expected wave reference wave")

	numCombos = DimSize(results, ROWS) / PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY
	SFH_ASSERT(IsInteger(numCombos), "Could not determine the number of psx combinations")

	return numCombos
End

/// @brief High-level function responsible for `psx` data and plot management
Function PSX_Plot(string win, string graph, WAVE/Z/WAVE results, STRUCT SF_PlotMetaData &plotMetaData)

	variable numCombos, i, offset, firstOp, numFailures

	if(!WaveExists(results))
		return NaN
	endif

	DFREF workDFR = PSX_GetWorkingFolder(win)

	if(!DataFolderExistsDFR(workDFR))
		firstOp = 1
		DFREF sweepFormulaDFR = SFH_GetWorkingDF(graph)
		DFREF workDFR         = UniqueDataFolder(sweepFormulaDFR, "psx")
		BSP_SetFolder(win, workDFR, PSX_USER_DATA_WORKING_FOLDER)
	else
		WAVE comboFolders = PSX_GetAllCombinationFolders(workDFR)
		offset = DimSize(comboFolders, ROWS)
	endif

	numCombos = PSX_GetNumberOfCombinations(results)

	if(!numCombos)
		// nothing to do
		return NaN
	endif

	numFailures = PSX_MoveWavesToDataFolders(workDFR, results, offset, numCombos)
	numCombos  -= numFailures

	if(!numCombos)
		return NaN
	endif

	for(i = 0; i < numCombos; i += 1)
		PSX_UpdateEventWaves(win, writeState = 0, comboIndex = offset + i)
	endfor

	if(firstOp)
		PSX_CreatePSXGraphAndSubwindows(win, graph, plotMetaData)

		PSX_AddLegend(win, results)
	else
		WAVE combos        = GetPSXComboListBox(workDFR)
		WAVE updatedCombos = PSX_CreateCombinationsListBoxWaveAsFree(workDFR)

		Duplicate/O updatedCombos, combos
	endif
End

/// @brief Init the psx plot after filling it with data
Function PSX_PostPlot(string win)

	DFREF     workDFR      = PSX_GetWorkingFolder(win)
	WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)

	if(!WaveExists(comboFolders))
		return NaN
	endif

	PSX_SetKeyboardDirection(win, PSX_KEYBOARD_DIR_LR)

	PSX_MoveAndCenterCursor(win, 0, constantWidth = 0)

	PSX_AppendTracesToAllEventGraph(win)

	PSX_RestoreGuiState(win)

	PSX_UpdateAllEventGraph(win, forceAverageUpdate = 1, forceSingleEventUpdate = 1, forceBlockIndexUpdate = 1, forceSingleEventOffsetUpdate = 1)

	PSX_SetCheckboxTitleColors(win)

	PSX_ApplySpecialPlotProperties(win)
End

static Function PSX_SetCheckboxTitleColors(string win)

	string str, mainWindow

	mainWindow = GetMainWindow(win)

	sprintf str, "Show Deconv \\[0\\K(%s)lines\\]0", PSX_COLORS_DECONV
	SetControlTitle(mainWindow, "checkbox_show_deconv_lines", str)

	sprintf str, "Show Peak \\[0\\K(%s)lines\\]0", PSX_COLORS_PEAK
	SetControlTitle(mainWindow, "checkbox_show_peak_lines", str)

	sprintf str, "Show Baseline \\[0\\K(%s)lines\\]0", PSX_COLORS_BASELINE
	SetControlTitle(mainWindow, "checkbox_show_baseline_lines", str)
End

static Function PSX_OperationSetDimensionLabels(WAVE/WAVE output, variable numCombos, WAVE/T labels, WAVE/T labelsTemplate)

	variable i

	numCombos = DimSize(output, ROWS) / PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY

	for(i = 0; i < numCombos; i += 1)
		labels[] = PSX_GenerateKey(labelsTemplate[p], i)
		SetDimensionLabels(output, TextWaveToList(labels, ";"), ROWS, startPos = i * PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY)
	endfor
End

/// @brief Collect all resolved ranges in allResolvedRanges together with a hash of the select data
Function PSX_CollectResolvedRanges(string graph, WAVE range, WAVE singleSelectData, WAVE allResolvedRanges, WAVE/T allSelectHashes)

	variable numRows

	[WAVE resolvedRanges, WAVE/T epochRangeNames] = SFH_GetNumericRangeFromEpochFromSingleSelect(graph, singleSelectData, range)

	numRows = DimSize(allSelectHashes, ROWS)
	Redimension/N=(numRows + 1) allSelectHashes
	allSelectHashes[numRows] = WaveHash(singleSelectData, HASH_SHA2_256)

	Concatenate/NP/FREE {resolvedRanges}, allResolvedRanges

	if(DimSize(allResolvedRanges, COLS) == 0)
		Redimension/N=(-1, 1) allResolvedRanges
	endif
End

/// @brief Check that the 2xN wave allResolvedRanges has only
///        non-intersecting ranges for the same select data hash
static Function PSX_CheckResolvedRangesWithSelectHashes(WAVE allResolvedRanges, WAVE/T allSelectHashes)

	string selectHash
	variable numRows, numColumns, i, idx

	numRows    = DimSize(allResolvedRanges, ROWS)
	numColumns = DimSize(allResolvedRanges, COLS)

	ASSERT(numColumns == DimSize(allSelectHashes, ROWS), "Mismatched row sizes")

	for(selectHash : GetUniqueEntries(allSelectHashes))
		Make/N=(numRows, numColumns)/FREE work

		for(i = 0, idx = 0; i < numColumns; i += 1)
			if(!cmpstr(selectHash, allSelectHashes[i]))
				work[][idx] = allResolvedRanges[p][i]
				idx        += 1
			endif
		endfor

		MatrixOp/FREE workTransposed = work^t

		ASSERT(idx > 0, "Invalid idx after searching")
		Redimension/N=(idx, -1) workTransposed

		ASSERT(!AreIntervalsIntersecting(workTransposed), "Can't work with multiple intersecting ranges")
	endfor
End

/// @brief Implementation of the `psx` operation
///
// Returns a SweepFormula dataset with n * PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY
// entries where n denotes the number of range/channel/sweep combinations
//
// Output[0] = sweepData(0)
// Output[1] = sweepDataOffFilt(0)
// Output[2] = sweepDataOffFiltDeconv(0)
// Output[3] = peakX(0)
// Output[4] = peakY(0)
// Output[5] = psxEvent(0)
// Output[6] = psxFit(0)
// Output[0] = sweepData(1)
// Output[1] = sweepDataOffFilt(1)
// ...
//
// psx(id, [psxKernel(...), numSDs, psxSweepBPFilter(...), maxTauFactor, psxRiseTime(...), psxDeconvBPFilter(...)])
Function/WAVE PSX_Operation(variable jsonId, string jsonPath, string graph)

	variable numberOfSDs, parameterJsonID, numCombos, i, readIndex, writeIndex, addedData, kernelAmp
	variable maxTauFactor, peakThresh, success, kernelRiseTau, kernelDecayTau, constFilterOrderSweep, constFilterOrderDeconv
	variable minFilterOrderSweep, minFilterOrderDeconv
	string parameterPath, id, psxParameters, dataUnit, path, msg

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX, 1, maxArgs = 7)

	id = SFH_GetArgumentAsText(jsonID, jsonPath, graph, SF_OP_PSX, 0, checkFunc = IsValidObjectName)

	WAVE/WAVE psxKernelDataset = SFH_GetArgumentAsWave(jsonId, jsonPath, graph, SF_OP_PSX, 1, defOp = "psxKernel()")

	numberOfSDs = SFH_GetArgumentAsNumeric(jsonID, jsonPath, graph, SF_OP_PSX, 2, defValue = PSX_NUMBER_OF_SDS_DEFAULT, checkFunc = IsStrictlyPositiveAndFinite)
	WAVE sweepFilter = SFH_GetArgumentAsWave(jsonID, jsonPath, graph, SF_OP_PSX, 3, defOp = "psxSweepBPFilter()", singleResult = 1)
	maxTauFactor = SFH_GetArgumentAsNumeric(jsonID, jsonPath, graph, SF_OP_PSX, 4, defValue = PSX_DEFAULT_MAX_TAU_FACTOR, checkFunc = IsStrictlyPositiveAndFinite)
	WAVE riseTime = SFH_GetArgumentAsWave(jsonID, jsonPath, graph, SF_OP_PSX, 5, defOp = "psxRiseTime()", expectedMinorType = IGOR_TYPE_64BIT_FLOAT, singleResult = 1)
	ASSERT(IsNumericWave(riseTime), "Invalid return from psxRiseTime")
	WAVE deconvFilter = SFH_GetArgumentAsWave(jsonID, jsonPath, graph, SF_OP_PSX, 6, defOp = "psxDeconvBPFilter()", singleResult = 1)

	path          = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_KERNEL
	kernelRiseTau = JWN_GetNumberFromWaveNote(psxKernelDataset, path + "/riseTau")
	ASSERT(IsFinite(kernelRiseTau), "riseTau must be finite")
	kernelDecayTau = JWN_GetNumberFromWaveNote(psxKernelDataset, path + "/decayTau")
	ASSERT(IsFinite(kernelDecayTau), "decayTau must be finite")

	PSX_AddDefaultFilterFrequencies(sweepFilter, kernelRiseTau, kernelDecayTau, PSX_FILTER_SWEEP)
	PSX_AddDefaultFilterFrequencies(deconvFilter, kernelRiseTau, kernelDecayTau, PSX_FILTER_DECONV)

	parameterJsonID = JWN_GetWaveNoteAsJSON(psxKernelDataset)
	parameterPath   = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX
	JSON_AddTreeObject(parameterJsonID, parameterPath)
	JSON_AddString(parameterJsonID, parameterPath + "/id", id)
	JSON_AddVariable(parameterJsonID, parameterPath + "/numberOfSDs", numberOfSDs)
	JSON_AddVariable(parameterJsonID, parameterPath + "/maxTauFactor", maxTauFactor)
	parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_RISETIME
	JSON_AddTreeObject(parameterJsonID, parameterPath)
	JSON_AddVariable(parameterJsonID, parameterPath + "/upperThreshold", riseTime[%$"Upper Threshold"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/lowerThreshold", riseTime[%$"Lower Threshold"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/differentiateThreshold", riseTime[%$"Differentiate Threshold"])

	parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_DECONV_BP_FILTER
	JSON_AddTreeObject(parameterJsonID, parameterPath)
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterLow", deconvFilter[%$"Filter Low"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterHigh", deconvFilter[%$"Filter High"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterOrder", deconvFilter[%$"Filter Order"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterLowDefault", deconvFilter[%$"Filter Low (Default)"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterHighDefault", deconvFilter[%$"Filter High (Default)"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterOrderDefault", deconvFilter[%$"Filter Order (Default)"])

	parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_SWEEP_BP_FILTER
	JSON_AddTreeObject(parameterJsonID, parameterPath)
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterLow", sweepFilter[%$"Filter Low"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterHigh", sweepFilter[%$"Filter High"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterOrder", sweepFilter[%$"Filter Order"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterLowDefault", sweepFilter[%$"Filter Low (Default)"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterHighDefault", sweepFilter[%$"Filter High (Default)"])
	JSON_AddVariable(parameterJsonID, parameterPath + "/filterOrderDefault", sweepFilter[%$"Filter Order (Default)"])

	numCombos = DimSize(psxKernelDataset, ROWS) / PSX_KERNEL_OUTPUTWAVES_PER_ENTRY
	ASSERT(IsInteger(numCombos) && numCombos > 0, "Invalid number of input sets from psxKernel()")

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX, numCombos * PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY)

	WAVE/T labelsTemplate = ListToTextWave(PSX_EVENT_DIMENSION_LABELS, ";")
	ASSERT(DimSize(labelsTemplate, ROWS) == PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY, "Mismatched label wave")
	Duplicate/FREE/T labelsTemplate, labels

	PSX_OperationSetDimensionLabels(output, numCombos, labels, labelsTemplate)

	try
		for(;;)
			parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_DECONV_BP_FILTER
			JSON_SetVariable(parameterJsonID, parameterPath + "/filterOrder", deconvFilter[%$"Filter Order"])

			parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_SWEEP_BP_FILTER
			JSON_SetVariable(parameterJsonID, parameterPath + "/filterOrder", sweepFilter[%$"Filter Order"])

			sprintf msg, "sweepFilter: %s, deconvFilter: %s", NumericWaveToList(sweepFilter, ";", trailSep = 0), NumericWaveToList(deconvFilter, ";", trailSep = 0)
			DEBUGPRINT(msg)

			writeIndex = 0
			for(i = 0; i < numCombos; i += 1)
				readIndex   = i
				success     = !PSX_OperationSweepGathering(graph, psxKernelDataset, parameterJsonID, sweepFilter, deconvFilter, readIndex, writeIndex, output)
				writeIndex += success
			endfor

			numCombos = writeIndex

			if(numCombos == 0)
				Abort
			endif

			[constFilterOrderSweep, minFilterOrderSweep] = PSX_HasConstantFilterOrder(output, numCombos, PSX_FILTER_SWEEP)
			sprintf msg, "constFilterOrderSweep=%g, minFilterOrderSweep=%g", constFilterOrderSweep, minFilterOrderSweep
			DEBUGPRINT(msg)

			[constFilterOrderDeconv, minFilterOrderDeconv] = PSX_HasConstantFilterOrder(output, numCombos, PSX_FILTER_DECONV)
			sprintf msg, "constFilterOrderDeconv=%g, minFilterOrderDeconv=%g", constFilterOrderDeconv, minFilterOrderDeconv
			DEBUGPRINT(msg)

			if(constFilterOrderSweep && constFilterOrderDeconv)
				Redimension/N=(numCombos * PSX_OPERATION_OUTPUT_WAVES_PER_ENTRY) output
				break
			endif

			if(!constFilterOrderSweep)
				sweepFilter[%$"Filter Order"] = minFilterOrderSweep
			endif

			if(!constFilterOrderDeconv)
				deconvFilter[%$"Filter Order"] = minFilterOrderDeconv
			endif
		endfor

		[WAVE hist, WAVE fit, peakThresh, dataUnit] = PSX_CalculatePeakThreshold(output, numCombos, numberOfSDs)
		WaveClear hist, fit

		path      = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_KERNEL
		kernelAmp = JWN_GetNumberFromWaveNote(psxKernelDataset, path + "/amp")
		ASSERT(IsFinite(kernelAmp), "psxKernel amplitude must be finite")

		for(i = 0; i < numCombos; i += 1)
			PSX_OperationImpl(graph, parameterJsonID, id, peakThresh, maxTauFactor, riseTime, kernelAmp, kernelRiseTau, kernelDecayTau, i, output)
		endfor
	catch
		if(WaveExists(output))
			SFH_CleanUpInput(output)
		endif

		JSON_Release(parameterJsonID)

		SFH_CleanUpInput(psxKernelDataset)

		SFH_ASSERT(0, "Could not gather sweep data for psx")
	endtry

	parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX
	JSON_AddVariable(parameterJsonID, parameterPath + "/peakThreshold", peakThresh)

	JWN_SetWaveNoteFromJSON(output, parameterJsonID)
	JWN_SetStringInWaveNote(output, SF_META_DATATYPE, SF_DATATYPE_PSX)
	JWN_SetStringInWaveNote(output, SF_META_OPSTACK, AddListItem(SF_OP_PSX, ""))

	SFH_CleanUpInput(psxKernelDataset)

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX)
End

Function [variable constFilterOrder, variable minFilterOrder] PSX_HasConstantFilterOrder(WAVE/WAVE output, variable numCombos, variable type)

	variable i, realOrder
	string lbl, key, msg

	switch(type)
		case PSX_FILTER_SWEEP:
			lbl = "sweepDataOffFilt"
			break
		case PSX_FILTER_DECONV:
			lbl = "sweepDataOffFiltDeconv"
			break
		default:
			ASSERT(0, "Unexpected type")
	endswitch

	Make/FREE/N=(numCombos) filterOrder

	for(i = 0; i < numCombos; i += 1)
		key = PSX_GenerateKey(lbl, i)
		WAVE/Z wv = output[%$key]
		ASSERT(WaveExists(wv), "Expected data wave")

		realOrder = JWN_GetNumberFromWaveNote(wv, "realOrder")
		ASSERT(IsInteger(realOrder), "Expected an integer")
		filterOrder[i] = realOrder
	endfor

	sprintf msg, "filterOrder: %s", NumericWaveToList(filterOrder, ";", trailSep = 0)
	DEBUGPRINT(msg)

	return [IsConstant(filterOrder, filterOrder[0]), WaveMin(filterOrder)]
End

/// @brief Implementation of the `psxKernel` operation
///
// Returns a SweepFormula dataset with n * PSX_KERNEL_OUTPUTWAVES_PER_ENTRY
// entries where n denotes the number of range/channel/sweep combinations
//
// Output[0] = psx_kernel(0)
// Output[1] = kernel_fft(0)
// Output[2] = sweepData(0)
// Output[3] = psx_kernel(1)
// ...
//
// psxKernel([select(...), riseTau, decayTau, amp])
Function/WAVE PSX_OperationKernel(variable jsonId, string jsonPath, string graph)

	variable riseTau, decayTau, amp, dt, numPoints, numCombos, i, offset, idx, shorterPerc
	string parameterPath, key, bsPanel, comboKey, msg

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX_KERNEL, 0, maxArgs = 4)

	WAVE/Z/WAVE selectDataCompArray = SFH_GetArgumentSelect(jsonID, jsonPath, graph, SF_OP_PSX_KERNEL, 0)
	SFH_ASSERT(WaveExists(selectDataCompArray), "Could not gather sweep data from select statement")

	riseTau  = SFH_GetArgumentAsNumeric(jsonID, jsonPath, graph, SF_OP_PSX_KERNEL, 1, defValue = 1, checkFunc = IsStrictlyPositiveAndFinite)
	decayTau = SFH_GetArgumentAsNumeric(jsonID, jsonPath, graph, SF_OP_PSX_KERNEL, 2, defValue = 15, checkFunc = IsStrictlyPositiveAndFinite)
	amp      = SFH_GetArgumentAsNumeric(jsonID, jsonPath, graph, SF_OP_PSX_KERNEL, 3, defValue = -5, checkFunc = IsFinite)

	SFH_ASSERT(decayTau > riseTau, "decay tau must be strictly larger than the rise tau")

	WAVE/WAVE sweepDataRef = SFH_GetSweepsForFormula(graph, selectDataCompArray, SF_OP_PSX_KERNEL)

	numCombos = DimSize(sweepDataRef, ROWS)
	SFH_ASSERT(numCombos > 0, "Could not fetch sweeps")

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX_KERNEL, PSX_KERNEL_OUTPUTWAVES_PER_ENTRY * numCombos)

	Make/FREE/T rawLabels = {"psxKernel", "psxKernelFFT", "sweepData"}
	ASSERT(DimSize(rawLabels, ROWS) == PSX_KERNEL_OUTPUTWAVES_PER_ENTRY, "Mismatched rawLabels wave")

	Make/FREE/N=(0) allResolvedRanges
	Make/FREE/N=(0)/T allSelectHashes

	bsPanel = BSP_GetPanel(graph)

	for(i = 0; i < numCombos; i += 1)
		WAVE/Z sweepDataRaw = sweepDataRef[i]
		ASSERT(WaveExists(sweepDataRaw), "Can't handle invalid sweepData waves")

		[WAVE singleSelectData, WAVE range] = SFH_ParseToSelectDataWaveAndRange(sweepDataRaw)

		[WAVE resolvedRanges, WAVE/T epochRangeNames] = SFH_GetNumericRangeFromEpochFromSingleSelect(graph, singleSelectData, range)

		if(!WaveExists(resolvedRanges))
			continue
		endif

		numPoints = DimSize(sweepDataRaw, ROWS)

		if(IsOdd(numPoints))
			// throw away one point so that FFT works
			Redimension/N=(--numPoints) sweepDataRaw
		endif

		WAVE sweepData = ShortenWaveForFFTIfRequired(sweepDataRaw)

		numPoints = DimSize(sweepData, ROWS)
		dt        = DimDelta(sweepData, ROWS)

		if(numPoints != DimSize(sweepDataRaw, ROWS))
			comboKey    = PSX_GenerateComboKey(graph, singleSelectData, range)
			shorterPerc = (DimSize(sweepDataRaw, ROWS) - numPoints) / DimSize(sweepDataRaw, ROWS) * ONE_TO_PERCENT
			sprintf msg, "psxKernel: The sweep for combination \"%s\" has a very unfitting length and was therefore shortened by %.3g%%.", comboKey, shorterPerc
			SF_SetStatusDisplay(bsPanel, msg, SF_MSG_WARN)
		endif

		WAVE/WAVE result = PSX_GetPSXKernel(riseTau, decayTau, amp, numPoints, dt, range)

		if(DimSize(result, ROWS) == 0)
			continue
		endif

		PSX_CollectResolvedRanges(graph, resolvedRanges, singleSelectData, allResolvedRanges, allSelectHashes)

		Duplicate/FREE/T rawLabels, labels
		labels[] = PSX_GenerateKey(rawLabels[p], idx)
		SetDimensionLabels(output, TextWaveToList(labels, ";"), ROWS, startPos = idx * PSX_KERNEL_OUTPUTWAVES_PER_ENTRY)

		key           = PSX_GenerateKey("sweepData", idx)
		output[%$key] = sweepData
		key           = PSX_GenerateKey("psxKernel", idx)
		output[%$key] = result[0]
		key           = PSX_GenerateKey("psxKernelFFT", idx)
		output[%$key] = result[1]

		idx += 1
	endfor

	numCombos = idx

	SFH_ASSERT(numCombos > 0, "Could not create psxKernel")

	PSX_CheckResolvedRangesWithSelectHashes(allResolvedRanges, allSelectHashes)

	Redimension/N=(PSX_KERNEL_OUTPUTWAVES_PER_ENTRY * numCombos) output

	parameterPath = SF_META_USER_GROUP + PSX_JWN_PARAMETERS + "/" + SF_OP_PSX_KERNEL

	JWN_CreatePath(output, parameterPath)
	JWN_SetNumberInWaveNote(output, parameterPath + "/riseTau", riseTau)
	JWN_SetNumberInWaveNote(output, parameterPath + "/decayTau", decayTau)
	JWN_SetNumberInWaveNote(output, parameterPath + "/amp", amp)

	JWN_SetStringInWaveNote(output, SF_META_OPSTACK, AddListItem(SF_OP_PSX_KERNEL, ""))

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX_KERNEL)
End

// psxRiseTime([lowerThreshold, upperThreshold, differentiateThreshold])
Function/WAVE PSX_OperationRiseTime(variable jsonId, string jsonPath, string graph)

	variable lowerThreshold, upperThreshold, differentiateThreshold

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX_RISETIME, 0, maxArgs = 3)

	lowerThreshold         = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_RISETIME, 0, defValue = 20, checkFunc = BetweenZeroAndOneHoundredExc)
	upperThreshold         = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_RISETIME, 1, defValue = 80, checkFunc = BetweenZeroAndOneHoundredExc)
	differentiateThreshold = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_RISETIME, 2, defValue = 5, checkFunc = BetweenZeroAndOneHoundredExc)

	Make/D/FREE thresholds = {lowerThreshold / ONE_TO_PERCENT, upperThreshold / ONE_TO_PERCENT, differentiateThreshold / ONE_TO_PERCENT}
	SetDimensionLabels(thresholds, "Lower Threshold;Upper Threshold;Differentiate Threshold", ROWS)

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX_RISETIME, 1)

	output[0] = thresholds

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX_RISETIME)
End

// psxDeconvBPFilter([low, high, order])
Function/WAVE PSX_OperationDeconvBPFilter(variable jsonId, string jsonPath, string graph)

	variable low, high, first, second, order

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX_DECONV_BP_FILTER, 0, maxArgs = 3)

	first  = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_DECONV_BP_FILTER, 0, defValue = NaN, checkFunc = IsNullOrPositiveAndFinite, checkDefault = 0)
	second = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_DECONV_BP_FILTER, 1, defValue = NaN, checkFunc = IsNullOrPositiveAndFinite, checkDefault = 0)
	order  = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_DECONV_BP_FILTER, 2, defValue = NaN, checkFunc = IsStrictlyPositiveAndFinite, checkDefault = 0)

	if(!IsNaN(first) && !IsNaN(second))
		[high, low] = MinMax(first, second)
	else
		low  = first
		high = second
	endif

	if(IsOdd(order))
		order += 1
	endif

	Make/D/FREE params = {low, high, order, NaN, NaN, PSX_DECONV_FILTER_DEF_ORDER}
	SetDimensionLabels(params, "Filter Low;Filter High;Filter Order;Filter Low (Default);Filter High (Default);Filter Order (Default)", ROWS)

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX_DECONV_BP_FILTER, 1)

	output[0] = params

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX_DECONV_BP_FILTER)
End

// psxSweepBPFilter([low, high, order])
Function/WAVE PSX_OperationSweepBPFilter(variable jsonId, string jsonPath, string graph)

	variable low, high, first, second, order

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX_SWEEP_BP_FILTER, 0, maxArgs = 3)

	first  = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_SWEEP_BP_FILTER, 0, defValue = NaN, checkFunc = IsNullOrPositiveAndFinite, checkDefault = 0)
	second = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_SWEEP_BP_FILTER, 1, defValue = NaN, checkFunc = IsNullOrPositiveAndFinite, checkDefault = 0)
	order  = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_SWEEP_BP_FILTER, 2, defValue = NaN, checkFunc = IsStrictlyPositiveAndFinite, checkDefault = 0)

	if(!IsNaN(first) && !IsNaN(second))
		[high, low] = MinMax(first, second)
	else
		low  = first
		high = second
	endif

	if(IsOdd(order))
		order += 1
	endif

	Make/D/FREE params = {low, high, order, NaN, NaN, PSX_SWEEP_FILTER_DEF_ORDER}
	SetDimensionLabels(params, "Filter Low;Filter High;Filter Order;Filter Low (Default);Filter High (Default);Filter Order (Default)", ROWS)

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX_SWEEP_BP_FILTER, 1)

	output[0] = params

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX_SWEEP_BP_FILTER)
End

static Function/WAVE PSX_GetAllStatsProperties()

	Make/FREE/T allProps = {"amp",                               \
	                        "peak", "peaktime",                  \
	                        "deconvpeak", "deconvpeaktime",      \
	                        "baseline", "baselinetime",          \
	                        "xinterval",                         \
	                        "slowtau", "fasttau", "weightedtau", \
	                        "estate", "fstate", "fitresult",     \
	                        "slewrate", "slewratetime",          \
	                        "onsettime", "onset",                \
	                        "risetime", "rise"}

	return allProps
End

// psxStats(id, select(...), prop, state, [postProc])
Function/WAVE PSX_OperationStats(variable jsonId, string jsonPath, string graph)

	string stateAsStr, postProc, id, prop

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX_STATS, 4, maxArgs = 5)

	id = SFH_GetArgumentAsText(jsonID, jsonPath, graph, SF_OP_PSX, 0, checkFunc = IsValidObjectName)

	WAVE/Z/WAVE selectDataCompArray = SFH_GetArgumentSelect(jsonID, jsonPath, graph, SF_OP_PSX_STATS, 1)
	SFH_Assert(WaveExists(selectDataCompArray), "Missing select data")

	WAVE allProps = PSX_GetAllStatsProperties()
	prop = SFH_GetArgumentAsText(jsonID, jsonPath, graph, SF_OP_PSX_STATS, 2, allowedValues = allProps)
	Make/FREE/T allStates = {"accept", "reject", "undetermined", "all", "every"}
	stateAsStr = SFH_GetArgumentAsText(jsonID, jsonPath, graph, SF_OP_PSX_STATS, 3, allowedValues = allStates)
	Make/FREE/T allPostProc = {"nothing", "stats", "count", "hist", "log10", "nonfinite"}
	postProc = SFH_GetArgumentAsText(jsonID, jsonPath, graph, SF_OP_PSX_STATS, 4, defValue = "nothing", allowedValues = allPostProc)

	WAVE/WAVE output = PSX_OperationStatsImpl(graph, id, selectDataCompArray, prop, stateAsStr, postProc)

	JWN_SetStringInWaveNote(output, SF_META_OPSTACK, AddListItem(SF_OP_PSX_STATS, ""))

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX_STATS)
End

// psxPrep(data(...), [numSDs])
Function/WAVE PSX_OperationPrep(variable jsonId, string jsonPath, string graph)

	variable numSDs, threshold, numCombos
	string msg, dataUnit

	SFH_CheckArgumentCount(jsonId, jsonPath, SF_OP_PSX_PREP, 1, maxArgs = 2)

	WAVE/WAVE results = SFH_GetArgumentAsWave(jsonId, jsonPath, graph, SF_OP_PSX_PREP, 0)

	numCombos = PSX_GetNumberOfCombinations(results)

	if(!numCombos)
		return SFH_CreateSFRefWave(graph, SF_OP_PSX_PREP, 0)
	endif

	numSDs = SFH_GetArgumentAsNumeric(jsonId, jsonPath, graph, SF_OP_PSX_PREP, 1, defValue = PSX_NUMBER_OF_SDS_DEFAULT, checkFunc = IsStrictlyPositiveAndFinite)

	WAVE/WAVE output = SFH_CreateSFRefWave(graph, SF_OP_PSX_PREP, 3)
	SetDimensionLabels(output, "Histogram;Fit;Thresholds;", ROWS)

	[WAVE hist, WAVE fit, threshold, dataUnit] = PSX_CalculatePeakThreshold(results, numCombos, numSDs)

	Make/FREE=1/N=1 sdThresholdX, sdThresholdY

	sprintf msg, "Threshold=%g;", threshold
	Note/K sdThresholdY, msg

	sdThresholdX[] = threshold
	JWN_SetWaveInWaveNote(sdThresholdY, SF_META_XVALUES, sdThresholdX)

	output[%$"Histogram"]  = hist
	output[%$"Fit"]        = fit
	output[%$"Thresholds"] = sdThresholdY

	// colors
	JWN_SetWaveInWaveNote(hist, SF_META_TRACECOLOR, {0, 0, 0}) // black
	// keep default red for fit
	JWN_SetWaveInWaveNote(sdThresholdY, SF_META_TRACECOLOR, {0, 40000, 0}) // green

	// modes
	JWN_SetNumberInWaveNote(hist, SF_META_TRACE_MODE, TRACE_DISPLAY_MODE_LINES_MARKERS)
	JWN_SetNumberInWaveNote(fit, SF_META_TRACE_MODE, TRACE_DISPLAY_MODE_LINES)
	JWN_SetNumberInWaveNote(sdThresholdY, SF_META_TRACE_MODE, TRACE_DISPLAY_MODE_MARKERS)

	JWN_SetStringInWaveNote(output, SF_META_XAXISLABEL, "Data (" + dataUnit + ")")
	JWN_SetStringInWaveNote(output, SF_META_YAXISLABEL, "All points histogram with Gaussian fit")

	/// @todo: Don't hardcode trace names
	sprintf msg, "Number of SDs: %g\r\\s(T000000d0_X) Histogram\r\\s(T000001d1_X) Fit\r\\s(T000002d2_X) Peak threshold: %g (%s)", numSDs, threshold, dataUnit
	JWN_SetStringInWaveNote(output, SF_META_CUSTOM_LEGEND, msg)

	return SFH_GetOutputForExecutor(output, graph, SF_OP_PSX_PREP)
End

static Function [WAVE hist, WAVE fit, variable peakThresh, string dataUnit] PSX_CalculatePeakThreshold(WAVE/WAVE results, variable numCombos, variable numSDs)

	// Concatenate all input waves
	Make/FREE/N=(numCombos)/WAVE input = results[%$PSX_GenerateKey("sweepDataOffFiltDeconv", p)]
	Concatenate/NP/FREE {input}, sweepDataOffFiltDeconv

	WAVE hist = PSX_CreateHistogramOfDeconvSweepData(sweepDataOffFiltDeconv)

	[WAVE coef, WAVE fit] = PSX_FitHistogram(hist)

	if(WaveExists(coef) && WaveExists(fit))
		peakThresh = coef[3] * numSDs
		dataUnit   = WaveUnits(sweepDataOffFiltDeconv, -1)

		return [hist, fit, peakThresh, dataUnit]
	endif

	return [$"", $"", NaN, ""]
End

/// @brief Menu item for selecting event inside a marquee and changing their state
///
/// @param newState new state, one of @ref PSXStates
/// @param stateType state type, one of @ref PSXStateTypes
Function PSX_MouseEventSelection(variable newState, variable stateType)

	string win, bottomLabel, bsPanel, browser
	variable left, right, offFiltTop, offFiltBottom, offFiltDeconvTop, offFiltDeconvBottom, bottom, top
	variable numMatches, numEntries, i, needsUpdate, indexOrient

	[left, right] = GetMarqueeHelper("bottom", horiz = 1, doAssert = 1, win = win)

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)

	if(!DataFolderExistsDFR(comboDFR))
		// not our window
		return NaN
	endif

	bottomLabel = AxisLabel(win, "bottom")

	// remove the dynamic part of the bottom label
	if(strsearch(bottomLabel, "Non-finite values", 0) == 0)
		bottomLabel = "Non-finite values"
	endif

	strswitch(bottomLabel)
		// PSX decision plot
		// we match an empty string as well as AxisLabel returns that for auto labels (reported as #4353)
		case "ms":
		case "":
			WAVE peakX = GetPSXPeakXWaveFromDFR(comboDFR)

			Extract/INDX/FREE peakX, matches, peakX >= left && peakX <= right
			numMatches = DimSize(matches, ROWS)

			if(numMatches == 0)
				return NaN
			endif

			// now check wether the y-coordinates of the events are inside for either axis
			[offFiltBottom, offFiltTop]             = GetMarqueeHelper("leftOffFilt", vert = 1, doAssert = 0)
			[offFiltDeconvBottom, offFiltDeconvTop] = GetMarqueeHelper("leftOffFiltDeconv", vert = 1, doAssert = 0, kill = 1)

			if(IsNaN(offFiltTop) || IsNaN(offFiltBottom) || IsNaN(offFiltDeconvTop) || IsNaN(offFiltDeconvBottom))
				return NaN
			endif

			Make/FREE/N=(numMatches) xCrds = peakX[matches[p]]

			WAVE offFiltMatch       = PSX_GetEventsInsideAxisRange(win, "sweepDataOffFilt", offFiltBottom, offFiltTop, xCrds)
			WAVE offFiltDeconvMatch = PSX_GetEventsInsideAxisRange(win, "sweepDataOffFiltDeconv", offFiltDeconvBottom, offFiltDeconvTop, xCrds)

			Redimension/S matches
			matches[] = (IsFinite(offFiltMatch[p]) || IsFinite(offFiltDeconvMatch[p])) ? matches[p] : NaN

			WAVE/Z matchesClean = ZapNaNs(matches)

			if(!WaveExists(matchesClean))
				return NaN
			endif

			PSX_UpdateEventWaves(win, indizes = matchesClean, val = newState, stateType = stateType)
			needsUpdate = 1
			break
		// PSX stats plot
		case "Event":
		case "Non-finite values":
			[bottom, top] = GetMarqueeHelper("left", vert = 1, doAssert = 0, kill = 1)

			indexOrient = PSX_GetIndexOrientation(bottomLabel)

			WAVE/Z/WAVE result = PSX_GetEventsInsideMarqueeForStatsPlot(win, indexOrient, left, top, right, bottom)

			if(!WaveExists(result))
				return NaN
			endif

			needsUpdate = 1

			numEntries = DimSize(result, ROWS)
			for(i = 0; i < numEntries; i += 1)
				WAVE eventIndizes = result[i][%eventIndizes]
				WAVE comboIndex   = result[i][%comboIndex]
				ASSERT(DimSize(comboIndex, ROWS) == 1, "Unexpected combo index size")

				PSX_UpdateEventWaves(win, indizes = eventIndizes, val = newState, stateType = stateType, comboIndex = comboIndex[0])
			endfor
			break
		default:
			// do nothing
			return NaN
	endswitch

	if(needsUpdate)
		ASSERT(!IsFunctionCalledRecursively(), "Can not work recursively")
		browser = SFH_GetBrowserForFormulaGraph(win)
		bsPanel = BSP_GetPanel(browser)
		PGC_SetAndActivateControl(bsPanel, "button_sweepFormula_display", val = NaN)
	endif
End

static Function PSX_GetIndexOrientation(string axisLbl)

	strswitch(axisLbl)
		case "Event":
			return EVENT_INDEX_HORIZONTAL
			break
		case "Non-finite values":
			return EVENT_INDEX_VERTICAL
			break
		default:
			ASSERT(0, "Not supported")
	endswitch
End

/// @brief Returns a 2D wave reference wave with event indices/comboKey entries in each column
///
/// ROWS:
/// - Result for each trace
///
/// COLUMNS:
/// - 0 (eventIndizes):
///   Indizes of events which are in range
/// - 1 (comboIndex)
///   Combo index for the events in column 0
///   Always only one element!
static Function/WAVE PSX_GetEventsInsideMarqueeForStatsPlot(string win, variable indexOrient, variable left, variable top, variable right, variable bottom)

	string traces, comboKey, trace
	variable numTraces, i, idx

	traces    = TraceNameList(win, ";", 1 + 2)
	numTraces = ItemsInList(traces)

	Make/FREE/WAVE/N=(MINIMUM_WAVE_SIZE, 2) result
	SetDimensionLabels(result, "eventIndizes;comboIndex", COLS)

	for(i = 0; i < numTraces; i += 1)
		trace = StringFromList(i, traces)

		WAVE xWave = XWaveRefFromTrace(win, trace)
		WAVE yWave = TraceNameToWaveRef(win, trace)

		// xWave holds event numbers for EVENT_INDEX_HORIZONTAL
		// yWave holds event numbers for EVENT_INDEX_VERTICAL
		// xWave, yWave and comboKeys have corresponding indices
		Extract/FREE/INDX xWave, matches, xWave >= left && xWave <= right

		if(DimSize(matches, ROWS) == 0)
			continue
		endif

		// matches now holds the indizes which are inside the horizontal marquee

		WAVE yAxisMatch = PSX_GetEventsInsideAxisRange(win, trace, bottom, top, matches)

		Redimension/S matches
		matches[] = IsFinite(yAxisMatch[p]) ? matches[p] : NaN

		WAVE/Z matchesClean = ZapNaNs(matches)

		if(!WaveExists(matchesClean))
			continue
		endif

		WAVE/T comboKeys = JWN_GetTextWaveFromWaveNote(yWave, SF_META_USER_GROUP + PSX_JWN_COMBO_KEYS_NAME)
		// comboKeysMatches hold the comboKeys of all matches
		Make/T/FREE/N=(DimSize(matchesClean, ROWS)) comboKeysMatches = comboKeys[matchesClean[p]]
		WaveClear comboKeys

		WAVE/T uniqueComboKeysMatches = GetUniqueEntries(comboKeysMatches)

		// only iterate over all different comboKeys
		for(comboKey : uniqueComboKeysMatches)

			// now get all indizes from that comboKey
			WAVE indizes = FindIndizes(comboKeysMatches, str = comboKey)

			// now convert the matching indizes into matchesClean into an index into xWave/yWave and then into the xWave/yWave values themselves

			switch(indexOrient)
				case EVENT_INDEX_HORIZONTAL:
					MatrixOP/FREE eventIndizes = waveMap(xWave, waveMap(matchesClean, indizes))
					break
				case EVENT_INDEX_VERTICAL:
					MatrixOP/FREE eventIndizes = waveMap(yWave, waveMap(matchesClean, indizes))
					break
				default:
					ASSERT(0, "Unsupported index orientation")
			endswitch

			EnsureLargeEnoughWave(result, indexShouldExist = idx)

			Make/FREE comboIndex = {PSX_GetComboIndexForComboKey(win, comboKey)}
			result[idx][%comboIndex]   = comboIndex
			result[idx][%eventIndizes] = eventIndizes

			idx += 1
		endfor
	endfor

	if(!idx)
		return $""
	endif

	Redimension/N=(idx, -1) result
	Note/K result

	return result
End

/// @brief Make the events inside the marquee visible in the `psx` plot
Function PSX_JumpToEvents()

	variable left, right, bottom, top, foundComboIndex, refComboIndex, currentComboIndex, numResults, i, numEvents
	variable lowest, highest, indexOrient
	string win, bottomLabel, mainWindow, psxGraph

	[left, right] = GetMarqueeHelper("bottom", horiz = 1, doAssert = 1, win = win)

	DFREF comboDFR = PSX_GetCurrentComboFolder(win)

	if(!DataFolderExistsDFR(comboDFR))
		// not our window
		return NaN
	endif

	bottomLabel = AxisLabel(win, "bottom")

	strswitch(bottomLabel)
		case "Event":
			[bottom, top] = GetMarqueeHelper("left", vert = 1, doAssert = 0, kill = 1)

			if(IsNaN(bottom) || IsNaN(top))
				return NaN
			endif

			indexOrient = PSX_GetIndexOrientation(bottomLabel)

			WAVE/Z/WAVE result = PSX_GetEventsInsideMarqueeForStatsPlot(win, indexOrient, left, top, right, bottom)

			if(!WaveExists(result))
				return NaN
			endif

			numResults = DimSize(result, ROWS)

			mainWindow = GetMainWindow(win)

			Make/FREE/N=(numResults) combinations = WaveRef(result[p][%comboIndex])[0]

			if(IsConstant(combinations, combinations[0]))
				refComboIndex = combinations[0]
			else
				currentComboIndex = PSX_GetCurrentComboIndex(mainWindow)

				foundComboIndex = GetRowIndex(combinations, val = currentComboIndex)
				if(IsNaN(foundComboIndex))
					DoAbortNow("The selected events have mixed combinations but none of them is the current one.")
				endif

				refComboIndex = combinations[foundComboIndex]
			endif

			PGC_SetAndActivateControl(mainWindow, "listbox_select_combo", val = refComboIndex)

			Make/FREE/N=0 allEventIndizes
			for(i = 0; i < numResults; i += 1)
				WAVE entry = result[i][%comboIndex]
				if(entry[0] != refComboIndex)
					continue
				endif

				Concatenate/NP=(ROWS) {result[i][%eventIndizes]}, allEventIndizes
			endfor

			numEvents = DimSize(allEventIndizes, ROWS)
			ASSERT(numEvents > 0, "Unexpected number of events")

			psxGraph = PSX_GetPSXGraph(win)

			if(numEvents == 1)
				PSX_MoveAndCenterCursor(psxGraph, allEventIndizes[0])
			else
				[lowest, highest] = WaveMinAndMax(allEventIndizes)

				// move to lowest event index (this also centers but we don't care)
				PSX_MoveAndCenterCursor(psxGraph, lowest)
				// and bring the highest into range
				PSX_CenterCursor(psxGraph, lowest, 0, rightIndex = highest)
			endif

			break
		default:
			// do nothing
			break
	endswitch
End

/// @brief Change the current combination to `comboIndex`
static Function PSX_SetCombo(string win, variable comboIndex)

	string extSingleGraph, psxGraph
	variable eventIndex

	if(PSX_EventGraphSuppressUpdate(win))
		return NaN
	endif

	psxGraph = PSX_GetPSXGraph(win)

	DFREF workDFR  = PSX_GetWorkingFolder(psxGraph)
	DFREF comboDFR = GetPSXFolderForCombo(workDFR, comboIndex)

	extSingleGraph = PSX_GetSingleEventGraph(psxGraph)

	DFREF currentDFR = GetDataFolderDFR()
	SetDataFolder comboDFR
	ReplaceWave/W=$psxGraph allinCDF
	ReplaceWave/W=$extSingleGraph allinCDF
	SetDataFolder currentDFR

	PSX_ApplySpecialPlotProperties(psxGraph)

	if(PSX_GetRestrictEventsToCurrentCombo(win))
		PSX_UpdateAllEventGraph(win, forceAverageUpdate = 1, forceBlockIndexUpdate = 1)
	endif

	PSX_MoveAndCenterCursor(psxGraph, 0)
End

static Function/S PSX_GetID(string graph)

	string browser
	browser = SFH_GetBrowserForFormulaGraph(graph)

	WAVE/Z eventContainer = PSX_GetEventContainer(browser)
	ASSERT(WaveExists(eventContainer), "Missing eventContainer on load")

	return JWN_GetStringFromWaveNote(eventContainer, "/id")
End

Function PSX_ButtonProc_StoreEvents(STRUCT WMButtonAction &ba) : ButtonControl

	string graph, id, browser

	switch(ba.eventCode)
		case 2: // mouse up
			graph   = GetMainWindow(ba.win)
			browser = SFH_GetBrowserForFormulaGraph(graph)

			WAVE/Z eventContainer = PSX_GetEventContainer(browser)
			ASSERT(WaveExists(eventContainer), "Missing eventContainer on store")
			id = JWN_GetStringFromWaveNote(eventContainer, "/id")

			PSX_StoreIntoResultsWave(browser, SFH_RESULT_TYPE_PSX_EVENTS, eventContainer, id)
			break
		default:
			break
	endswitch
End

Function PSX_ButtonProc_LoadEvents(STRUCT WMButtonAction &ba) : ButtonControl

	string graph, browser, id, comboKey
	variable i, numCombos

	switch(ba.eventCode)
		case 2: // mouse up
			graph = GetMainWindow(ba.win)
			id    = PSX_GetID(graph)

			WAVE/Z eventContainerFromResults = PSX_GetEventContainerFromResults(id)
			if(!WaveExists(eventContainerFromResults))
				printf "Could not fetch events from the results wave with id: %s\r", id
				ControlWindowToFront()
				break
			endif

			DFREF workDFR = PSX_GetWorkingFolder(graph)

			WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)
			ASSERT(WaveExists(comboFolders), "Missing comboFolders")
			numCombos = DimSize(comboFolders, ROWS)

			for(i = 0; i < numCombos; i += 1)
				DFREF comboDFR = comboFolders[i]
				WAVE  psxEvent = GetPSXEventWaveFromDFR(comboDFR)

				comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)

				WAVE/Z psxEventFromResults = PSX_GetPSXEventForComboKey(eventContainerFromResults, comboKey)

				if(WaveExists(psxEventFromResults))
					Duplicate/O psxEventFromResults, psxEvent
				endif

				PSX_UpdateEventWaves(graph, writeState = 0, comboIndex = i)
			endfor
			break
		default:
			break
	endswitch
End

static Function/WAVE PSX_GetPSXEventForComboKey(WAVE/WAVE eventContainer, string refComboKey)

	string comboKey

	for(WAVE psxEvent : eventContainer)
		comboKey = JWN_GetStringFromWaveNote(psxEvent, PSX_EVENTS_COMBO_KEY_WAVE_NOTE)

		if(!cmpstr(comboKey, refComboKey))
			return psxEvent
		endif
	endfor

	return $""
End

Function PSX_ButtonProcJumpFirstUndet(STRUCT WMButtonAction &ba) : ButtonControl

	string win, panel, psxGraph
	variable numCombos, i

	switch(ba.eventCode)
		case 2: // mouse up
			win      = ba.win
			psxGraph = PSX_GetPSXGraph(win)

			DFREF workDFR = PSX_GetWorkingFolder(win)

			WAVE/Z/DF comboFolders = PSX_GetAllCombinationFolders(workDFR)
			ASSERT(WaveExists(comboFolders), "Missing comboFolders")
			numCombos = DimSize(comboFolders, ROWS)

			for(i = 0; i < numCombos; i += 1)
				WAVE psxEvent = GetPSXEventWaveFromDFR(comboFolders[i])

				FindValue/RMD=[][FindDimLabel(psxEvent, COLS, "Event manual QC call")]/V=(PSX_UNDET) psxEvent

				if(V_row >= 0)
					panel = GetMainWindow(win)
					PGC_SetAndActivateControl(panel, "listbox_select_combo", val = i)
					PSX_MoveAndCenterCursor(psxGraph, V_row)
					break
				endif
			endfor

			break
		default:
			break
	endswitch
End

Function PSX_ListBoxSelectCombo(STRUCT WMListBoxAction &lba) : ListboxControl

	variable row

	switch(lba.eventCode)
		case 3: // double click (PGC_SetAndActivateControl uses that)
		case 4: // cell selection

			// workaround IP bug where lba.row can be out of range
			WAVE/T listWave = lba.listWave

			row = lba.row

			if(row < 0 || row >= DimSize(listWave, ROWS))
				break
			endif

			PSX_SetCombo(lba.win, row)
			break
		default:
			break
	endswitch
End

Function PSX_CopyHelpToClipboard(STRUCT WMButtonAction &ba) : ButtonControl

	switch(ba.eventCode)
		case 2: // mouse down
			PutScrapText ba.userData
			break
		default:
			break
	endswitch
End

Function PSX_CheckboxProcSuppressUpdate(STRUCT WMCheckboxAction &cba) : CheckboxControl

	switch(cba.eventCode)
		case 2: // mouse up
			if(!cba.checked)
				PSX_UpdateAllEventGraph(cba.win, forceAverageUpdate = 1, forceSingleEventUpdate = 1)
			endif
			break
		default:
			break
	endswitch
End

Function PSX_PopupMenuState(STRUCT WMPopupAction &cba) : PopupMenuControl

	variable forceSingleEventOffsetUpdate

	switch(cba.eventCode)
		case 2: // mouse up
			forceSingleEventOffsetUpdate = !cmpstr(cba.ctrlName, "popupmenu_event_offset")
			PSX_UpdateAllEventGraph(cba.win, forceSingleEventUpdate = 1, forceAverageUpdate = 1, forceSingleEventOffsetUpdate = forceSingleEventOffsetUpdate)
			break
		default:
			break
	endswitch
End

Function PSX_CheckboxProcAllEventPlotUpdate(STRUCT WMCheckboxAction &cba) : CheckboxControl

	switch(cba.eventCode)
		case 2: // mouse up
			PSX_UpdateAllEventGraph(cba.win, forceSingleEventUpdate = 1, forceAverageUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_CheckboxProcChangeRestrictCurrentCombo(STRUCT WMCheckboxAction &cba) : CheckboxControl

	switch(cba.eventCode)
		case 2: // mouse up
			PSX_UpdateAllEventGraph(cba.win, forceSingleEventUpdate = 1, forceAverageUpdate = 1, forceBlockIndexUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_CheckboxProcFitAverage(STRUCT WMCheckboxAction &cba) : CheckboxControl

	switch(cba.eventCode)
		case 2: // mouse up
			PSX_UpdateAllEventGraph(cba.win, forceSingleEventUpdate = 1, forceAverageUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_FitStartAmplitude(STRUCT WMSetVariableAction &sva) : SetVariableControl

	switch(sva.eventCode)
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			PSX_UpdateAllEventGraph(sva.win, forceSingleEventUpdate = 1, forceAverageUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_PopupMenuBlockNumber(STRUCT WMPopupAction &cba) : PopupMenuControl

	switch(cba.eventCode)
		case 2: // mouse up
			PSX_UpdateAllEventGraph(cba.win, forceAverageUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_SetVarBlockSize(STRUCT WMSetVariableAction &sva) : SetVariableControl

	switch(sva.eventCode)
		case 1: // mouse up
		case 2: // Enter key
		case 3: // Live update
			PSX_UpdateAllEventGraph(sva.win, forceAverageUpdate = 1, forceBlockIndexUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_PopupFitAcceptAverageFunc(STRUCT WMPopupAction &cba) : PopupMenuControl

	switch(cba.eventCode)
		case 2: // mouse up
			PSX_UpdateAllEventGraph(cba.win, forceAverageUpdate = 1)
			break
		default:
			break
	endswitch
End

Function PSX_PlotStartupSettings()

	string win, guide, subwin, ctrl, specialEventPanel, ud

	win = GetMainWindow(GetCurrentWindow())

	ASSERT(WinType(win) == WINTYPE_PANEL, "Expected a panel")

	HideInfo/W=$win
	HideTools/W=$win

	// only remove guides on the main panel
	WAVE/T guides = ListToTextWave(GuideNameList(win, "TYPE:USER"), ";")
	for(guide : guides)
		DefineGuide/W=$win $guide={}
	endfor

	// propagate changes as ResizeControls queries the guides as well
	DoUpdate/W=$win

	Make/T/FREE infoButtons = {"button_psx_info", "button_accept_fit_results", "button_reject_fit_results", "button_undet_fit_results", "button_all_fit_results"}

	WAVE/T subwindows = ListToTextWave(GetAllWindows(win), ";")
	for(subwin : subwindows)

		HideTools/W=$subwin

		WAVE/Z/T userDataKeys = GetUserdataKeys(WinRecreation(subWin, 0))

		if(WaveExists(userDataKeys))
			for(ud : userDataKeys)
				if(!GrepString(ud, "^ResizeControls.*$"))
					SetWindow $subWin, userdata($ud)=""
				endif
			endfor
		endif

		if(WinType(subwin) == WINTYPE_GRAPH)
			if(ItemsInList(subwin, "#") <= 2)
				// kill main graphs
				KillWindow/Z $subwin
			else
				RemoveTracesFromGraph(subwin)
				RemoveAnnotationsFromGraph(subwin)
			endif
		endif

		for(ctrl : infoButtons)
			if(ControlExists(subwin, ctrl))
				Make/T/FREE help = {NONE}
				UpdateInfoButtonHelp(subwin, ctrl, help)
			endif
		endfor
	endfor

	// default GUI values
	CheckBox checkbox_show_deconv_lines, value=1, win=$win
	CheckBox checkbox_show_peak_lines, value=0, win=$win
	CheckBox checkbox_show_baseline_lines, value=0, win=$win
	CheckBox checkbox_suppress_update, value=0, win=$win

	ListBox listbox_select_combo, win=$win, listWave=$"", selWave=$"", helpWave=$"", selRow=0

	specialEventPanel = PSX_GetSpecialPanel(win)

	CheckBox checkbox_single_events_accept, value=1, win=$specialEventPanel
	CheckBox checkbox_single_events_reject, value=1, win=$specialEventPanel
	CheckBox checkbox_single_events_undetermined, value=1, win=$specialEventPanel

	CheckBox checkbox_average_events_accept, value=0, win=$specialEventPanel
	CheckBox checkbox_average_events_reject, value=0, win=$specialEventPanel
	CheckBox checkbox_average_events_undetermined, value=0, win=$specialEventPanel
	CheckBox checkbox_average_events_all, value=0, win=$specialEventPanel
	CheckBox checkbox_events_fit_accept, value=0, win=$specialEventPanel
	CheckBox checkbox_events_fit_reject, value=0, win=$specialEventPanel
	CheckBox checkbox_events_fit_undetermined, value=0, win=$specialEventPanel
	CheckBox checkbox_events_fit_all, value=0, win=$specialEventPanel

	CheckBox checkbox_restrict_events_to_current_combination, value=0, win=$specialEventPanel
	SetVariable setvar_event_block_size, value=_NUM:100, win=$specialEventPanel
	PopupMenu popup_block, mode=1, value="", win=$specialEventPanel, userdata($PSX_UD_NUM_BLOCKS)="1"
	SetVariable setvar_fit_start_amplitude, value=_NUM:20, win=$specialEventPanel

	StoreCurrentPanelsResizeInfo(win)

	PS_RemoveCoordinateSaving(win)

	if(SearchForInvalidControlProcs(win, warnOnEmpty = 1))
		return NaN
	endif

	DoWindow/C/W=$win $PSX_PANEL_MACRO

	Execute/P/Q/Z "DoWindow/R " + PSX_PANEL_MACRO
	Execute/P/Q/Z "COMPILEPROCEDURES "
	CleanupOperationQueueResult()
End

/// @brief Apply the macro `mac` onto the panel `win`
static Function PSX_ApplyMacroToExistingPanel(string win, string mac)

	string line, currWindow

	ASSERT(WinType(win) == WINTYPE_PANEL, "Expected window to be a panel")

	WAVE/T macroCode = ListToTextWave(ProcedureText(mac), "\r")
	ASSERT(DimSize(macroCode, ROWS) > 0, "Could not fetch the macro code for the macro: " + mac)

	// Remove
	//
	// Window PSXPanel() : Panel
	// PauseUpdate; Silent 1 ...
	// NewPanel ...
	//
	// from the beginning and
	//
	// EndMacro
	//
	// from the end
	FindValue/TEXT="NewPanel" macroCode
	ASSERT(V_row > 0, "Could not find NewPanel")
	macroCode[0, V_row] = ""
	macroCode[Inf]      = ""

	currWindow = GetCurrentWindow()
	DoWindow/F $win
	SetActiveSubwindow ##

	for(line : macroCode)
		if(IsEmpty(line))
			continue
		endif

		Execute/Q line
	endfor

	SetActiveSubwindow $currWindow

	KillVariables/Z V_flag
	KillStrings/Z S_name
End

Function PSX_UpdateVisualizationHelpers(STRUCT WMCheckboxAction &cba) : CheckBoxControl

	switch(cba.eventCode)
		case 2: // mouse up
			PSX_ApplySpecialPlotProperties(cba.win)
			break
		default:
			break
	endswitch

	return 0
End

Function PSX_CalculateOnsetTimeFromAvg(WAVE AvgEvent, variable kernelAmp, variable meanOnsetTime, variable meanPeakTime)
	
	
	duplicate/FREE AvgEvent, AvgEventDiff
	differentiate AvgEventDiff
	smooth 500, AvgEventDiff
	wavestats/q AvgEvent
	duplicate/o AvgEventDiff, root:forDisp
	smooth 500, root:forDisp
	variable eventPeak, eventPeak_t, edge, backwardEdge, level, slewrate, slewrate_t
	
	if(kernelAmp > 0)
		eventPeak      	= V_max
		eventPeak_t    	= V_maxLoc
		edge         	= FINDLEVEL_EDGE_INCREASING
		backwardEdge 	= FINDLEVEL_EDGE_DECREASING
	elseif(kernelAmp < 0)
		eventPeak      	= V_min
		eventPeak_t    	= V_minLoc
		edge         	= FINDLEVEL_EDGE_DECREASING
		backwardEdge 	= FINDLEVEL_EDGE_INCREASING
	else
		ASSERT(0, "Invalid kernel amp")
	endif

	variable searchEnd = eventPeak_t - (meanPeakTime)// - abs(meanOnsetTime))
	
	wavestats/q/r=(searchEnd, eventPeak_t) AvgEventDiff

	if(kernelAmp > 0)
		slewRate 		= v_max
		slewRate_t 		= v_maxloc
	elseif(kernelAmp < 0)
		slewRate      	= V_min
		slewRate_t    	= V_minLoc
	endif
	
	level = 0.2 * slewRate

	FindLevel/R=(eventPeak_t, searchEnd)/EDGE=(edge)/Q AvgEventDiff, level

	if(V_flag)
		return NaN
	endif

	return V_levelX

End

Function GetKernelDecayTau()
	string psxPath
	string ListOfwin = WinList("*", ";", "WIN:64")  // Only graph windows
	variable i, num = ItemsInList(ListOfwin, ";")

	// Search all graph windows for one with psxFolder user data
	for (i = 0; i < num; i += 1)
		string baseWin = StringFromList(i, ListOfwin, ";")
		psxPath = GetUserData(baseWin, "", "psxFolder")
		if (strlen(psxPath) > 0)
			break
		endif
	endfor

	if (strlen(psxPath) == 0)
		printf "No psxFolder user data found in any graph window.\r"
		return NaN
	endif

	DFREF psxDFR = $psxPath

	// Search combo_* subfolders for a valid psxEvent wave
	variable j = 0
	do
		string folderName = GetIndexedObjName(psxPath, 4, j)  // 4 = data folder
		if (strlen(folderName) == 0)
			break
		endif

		if (stringmatch(folderName, "combo_*"))
			DFREF comboDFR = psxDFR:$folderName
			if (DataFolderRefStatus(comboDFR) != 0)
				WAVE/Z psxEvent = comboDFR:psxEvent
				if (WaveExists(psxEvent))
					variable tau = JWN_GetNumberFromWaveNote(psxEvent, "User/Parameters/psxKernel/decayTau")
					if (IsFinite(tau))
						return tau
					endif
				endif
			endif
		endif

		j += 1
	while (1)

	printf "No valid psxEvent wave with decayTau found.\r"
	return NaN
End




