#pragma rtGlobals=3		// Use modern global access method and strict wave access.
//
#include <ProcedureBrowser>
#include <FunctionProfiling>
#include "ACL_TabUtilities"
#include "ACL_UserdataEditor"
#include "TJ_MIES_AmplifierInteraction"
#include "TJ_MIES_Analysis"
#include "TJ_MIES_DataAcqITC"
#include "TJ_MIES_BackgroundMD"
#include "TJ_MIES_DataBrowser"
#include "TJ_MIES_DataConfiguratorITC"
#include "TJ_MIES_DataManagementNew"
#include "TJ_MIES_ExperimentDocumentation"
#include "TJ_MIES_HardwareSetUp"
#include "TJ_MIES_Indexing"
#include "TJ_MIES_InitiateMIES"
#include "TJ_MIES_Oscilloscope"
#include "TJ_MIES_PanelITC"
#include "TJ_MIES_RepeatedAcquisition"
#include "TJ_MIES_TestPulse"
#include "TJ_MIES_WaveBuilder"
#include "TJ_MIES_WaveBuilderPanel"
#include "TJ_MIES_WaveNoteMgmnt"
#include "TJ_MIES_TPBackgroundMD"
#include "TJ_MIES_BackgroundTimerMD"
#include "TJ_MIES_DataAcqMgmt"
#include "DR_MIES_Menu"
#include "DR_MIES_TangoInteract"
//include "Arduino_Menu_and_IncludeFiles"